<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:sys="clr-namespace:System;assembly=mscorlib"
                 xmlns:p1="clr-namespace:Harp.OutputExpander;assembly=Harp.OutputExpander"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns:aeon="clr-namespace:Aeon.Acquisition;assembly=Aeon.Acquisition"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns:aeon-env="clr-namespace:Aeon.Environment;assembly=Aeon.Environment"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="rx:Defer">
        <Name>Alerts</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="GroupWorkflow">
              <Name>SubjectAlerts</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="rx:BehaviorSubject" TypeArguments="sys:String">
                    <rx:Name>SubjectAlertMessages</rx:Name>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="Aeon.Environment:EnvironmentCondition.bonsai">
                    <Value>Experiment</Value>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="Aeon.Acquisition:SendAlert.bonsai">
                    <ConfigFile>Z:\aeon\config\alerts.config</ConfigFile>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>FeederEvents</Name>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Count" DisplayName="DeliveryFailureThreshold" />
                  </Expression>
                  <Expression xsi:type="rx:SelectMany">
                    <Name>DispenserBroken</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Take">
                            <rx:Count>1</rx:Count>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="rx:AsyncSubject">
                          <Name>Feeder</Name>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>Feeder</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Key</Selector>
                        </Expression>
                        <Expression xsi:type="Format">
                          <Format>{0}</Format>
                          <Selector>it</Selector>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Take">
                            <rx:Count>1</rx:Count>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="rx:AsyncSubject">
                          <Name>FeederKeyString</Name>
                        </Expression>
                        <Expression xsi:type="GroupWorkflow">
                          <Name>PelletMonitor</Name>
                          <Description>Monitors pellet delivery state of commands and beam breaks.</Description>
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>Feeder</Name>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:Merge" />
                              </Expression>
                              <Expression xsi:type="p1:FilterRegister">
                                <harp:FilterType>Include</harp:FilterType>
                                <harp:Register xsi:type="p1:OutputSet" />
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="harp:FilterMessageType">
                                  <harp:FilterType>Include</harp:FilterType>
                                  <harp:MessageType>Write</harp:MessageType>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="scr:ExpressionTransform">
                                <scr:Expression>new(
False as Value,
it.GetTimestamp() as Timestamp
)</scr:Expression>
                              </Expression>
                              <Expression xsi:type="IncludeWorkflow" Path="Extensions\GetMatchingObservableGroup.bonsai">
                                <IGroupObservableSubjectMerge>FeederPelletDelivered</IGroupObservableSubjectMerge>
                                <Name>Feeder</Name>
                              </Expression>
                              <Expression xsi:type="scr:ExpressionTransform">
                                <scr:Expression>new(
True as Value,
Seconds as Timestamp)</scr:Expression>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:Merge" />
                              </Expression>
                              <Expression xsi:type="MemberSelector">
                                <Selector>Value,Timestamp</Selector>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="harp:CreateTimestamped" />
                              </Expression>
                              <Expression xsi:type="WorkflowOutput" />
                            </Nodes>
                            <Edges>
                              <Edge From="0" To="1" Label="Source1" />
                              <Edge From="1" To="2" Label="Source1" />
                              <Edge From="2" To="3" Label="Source1" />
                              <Edge From="3" To="4" Label="Source1" />
                              <Edge From="4" To="7" Label="Source1" />
                              <Edge From="5" To="6" Label="Source1" />
                              <Edge From="6" To="7" Label="Source2" />
                              <Edge From="7" To="8" Label="Source1" />
                              <Edge From="8" To="9" Label="Source1" />
                              <Edge From="9" To="10" Label="Source1" />
                            </Edges>
                          </Workflow>
                        </Expression>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="Count" />
                        </Expression>
                        <Expression xsi:type="rx:Condition">
                          <Name>DispenserBroken</Name>
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="WorkflowInput">
                                <Name>Source1</Name>
                              </Expression>
                              <Expression xsi:type="scr:ExpressionTransform">
                                <scr:Expression>Value ? 1 : 0</scr:Expression>
                              </Expression>
                              <Expression xsi:type="ExternalizedMapping">
                                <Property Name="Count" />
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:BufferCount">
                                  <rx:Count>5</rx:Count>
                                  <rx:Skip>1</rx:Skip>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="Add" />
                              <Expression xsi:type="GroupWorkflow">
                                <Name>Equal</Name>
                                <Workflow>
                                  <Nodes>
                                    <Expression xsi:type="WorkflowInput">
                                      <Name>Source1</Name>
                                    </Expression>
                                    <Expression xsi:type="ExternalizedMapping">
                                      <Property Name="Value" DisplayName="Count" />
                                    </Expression>
                                    <Expression xsi:type="Equal">
                                      <Operand xsi:type="IntProperty">
                                        <Value>5</Value>
                                      </Operand>
                                    </Expression>
                                    <Expression xsi:type="Equal">
                                      <Operand xsi:type="IntProperty">
                                        <Value>0</Value>
                                      </Operand>
                                    </Expression>
                                    <Expression xsi:type="Combinator">
                                      <Combinator xsi:type="rx:Zip" />
                                    </Expression>
                                    <Expression xsi:type="LogicalOr" />
                                    <Expression xsi:type="WorkflowOutput" />
                                  </Nodes>
                                  <Edges>
                                    <Edge From="0" To="2" Label="Source1" />
                                    <Edge From="0" To="3" Label="Source1" />
                                    <Edge From="1" To="2" Label="Source2" />
                                    <Edge From="2" To="4" Label="Source1" />
                                    <Edge From="3" To="4" Label="Source2" />
                                    <Edge From="4" To="5" Label="Source1" />
                                    <Edge From="5" To="6" Label="Source1" />
                                  </Edges>
                                </Workflow>
                              </Expression>
                              <Expression xsi:type="WorkflowOutput" />
                            </Nodes>
                            <Edges>
                              <Edge From="0" To="1" Label="Source1" />
                              <Edge From="1" To="3" Label="Source1" />
                              <Edge From="2" To="3" Label="Source2" />
                              <Edge From="2" To="5" Label="Source2" />
                              <Edge From="3" To="4" Label="Source1" />
                              <Edge From="4" To="5" Label="Source1" />
                              <Edge From="5" To="6" Label="Source1" />
                            </Edges>
                          </Workflow>
                        </Expression>
                        <Expression xsi:type="harp:ConvertTimestamped">
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="WorkflowInput">
                                <Name>Source1</Name>
                              </Expression>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>FeederKeyString</Name>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:WithLatestFrom" />
                              </Expression>
                              <Expression xsi:type="WorkflowOutput" />
                            </Nodes>
                            <Edges>
                              <Edge From="0" To="2" Label="Source1" />
                              <Edge From="1" To="2" Label="Source2" />
                              <Edge From="2" To="3" Label="Source1" />
                            </Edges>
                          </Workflow>
                        </Expression>
                        <Expression xsi:type="IncludeWorkflow" Path="Extensions\AlertGate.bonsai">
                          <AlertRefractoryPeriod>PT5M</AlertRefractoryPeriod>
                        </Expression>
                        <Expression xsi:type="Format">
                          <Format>## **Dispenser Broken**
**Patch**: Patch{0}
</Format>
                          <Selector>Value.Item2</Selector>
                        </Expression>
                        <Expression xsi:type="MulticastSubject">
                          <Name>SubjectAlertMessages</Name>
                        </Expression>
                        <Expression xsi:type="aeon:FormatLogMessage">
                          <Format>Patch{0}</Format>
                          <Selector>Value.Item2</Selector>
                          <aeon:Priority>Alert</aeon:Priority>
                          <aeon:Type>DispenserBroken</aeon:Type>
                          <aeon:Timestamp />
                        </Expression>
                        <Expression xsi:type="MulticastSubject">
                          <Name>AlertLogs</Name>
                        </Expression>
                        <Expression xsi:type="IncludeWorkflow" Path="Extensions\GetMatchingObservableGroup.bonsai">
                          <IGroupObservableSubjectMerge>FeederDispenser</IGroupObservableSubjectMerge>
                          <Name>Feeder</Name>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>Feeder</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Merge" />
                        </Expression>
                        <Expression xsi:type="harp:Parse">
                          <harp:Register xsi:type="harp:ParseMessagePayload">
                            <harp:PayloadType>Timestamp</harp:PayloadType>
                            <harp:IsArray>false</harp:IsArray>
                          </harp:Register>
                        </Expression>
                        <Expression xsi:type="GroupWorkflow">
                          <Name>WithLatestTimestamp</Name>
                          <Description>Records the latest collected Harp timestamp for each element of the input sequence.</Description>
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="WorkflowInput">
                                <Name>Source1</Name>
                              </Expression>
                              <Expression xsi:type="WorkflowInput">
                                <Name>Source2</Name>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:WithLatestFrom" />
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="harp:CreateTimestamped" />
                              </Expression>
                              <Expression xsi:type="WorkflowOutput" />
                            </Nodes>
                            <Edges>
                              <Edge From="0" To="2" Label="Source1" />
                              <Edge From="1" To="2" Label="Source2" />
                              <Edge From="2" To="3" Label="Source1" />
                              <Edge From="3" To="4" Label="Source1" />
                            </Edges>
                          </Workflow>
                        </Expression>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="PelletThreshold" />
                        </Expression>
                        <Expression xsi:type="rx:Condition">
                          <Name>LowFood</Name>
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="WorkflowInput">
                                <Name>Source1</Name>
                              </Expression>
                              <Expression xsi:type="MemberSelector">
                                <Selector>Value.Count</Selector>
                              </Expression>
                              <Expression xsi:type="ExternalizedMapping">
                                <Property Name="Value" DisplayName="PelletThreshold" Description="Below this value the low food alert will be raised." />
                              </Expression>
                              <Expression xsi:type="LessThan">
                                <Operand xsi:type="IntProperty">
                                  <Value>105</Value>
                                </Operand>
                              </Expression>
                              <Expression xsi:type="WorkflowOutput" />
                            </Nodes>
                            <Edges>
                              <Edge From="0" To="1" Label="Source1" />
                              <Edge From="1" To="3" Label="Source1" />
                              <Edge From="2" To="3" Label="Source2" />
                              <Edge From="3" To="4" Label="Source1" />
                            </Edges>
                          </Workflow>
                        </Expression>
                        <Expression xsi:type="IncludeWorkflow" Path="Extensions\AlertGate.bonsai">
                          <AlertRefractoryPeriod>PT5M</AlertRefractoryPeriod>
                        </Expression>
                        <Expression xsi:type="harp:ConvertTimestamped">
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="WorkflowInput">
                                <Name>Source1</Name>
                              </Expression>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>FeederKeyString</Name>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:WithLatestFrom" />
                              </Expression>
                              <Expression xsi:type="WorkflowOutput" />
                            </Nodes>
                            <Edges>
                              <Edge From="0" To="2" Label="Source1" />
                              <Edge From="1" To="2" Label="Source2" />
                              <Edge From="2" To="3" Label="Source1" />
                            </Edges>
                          </Workflow>
                        </Expression>
                        <Expression xsi:type="Format">
                          <Format>## **Low Food**
**Patch**: {0}  
**Current Pellet Estimate**: {1}
</Format>
                          <Selector>Value.Item2,Value.Item1.Count</Selector>
                        </Expression>
                        <Expression xsi:type="MulticastSubject">
                          <Name>SubjectAlertMessages</Name>
                        </Expression>
                        <Expression xsi:type="aeon:FormatLogMessage">
                          <Format>Patch{0}	{1}</Format>
                          <Selector>Value.Item2,Value.Item1.Count</Selector>
                          <aeon:Priority>Alert</aeon:Priority>
                          <aeon:Type>LowFood</aeon:Type>
                        </Expression>
                        <Expression xsi:type="MulticastSubject">
                          <Name>AlertLogs</Name>
                        </Expression>
                        <Expression xsi:type="IncludeWorkflow" Path="Extensions\GetMatchingObservableGroup.bonsai">
                          <IGroupObservableSubjectMerge>FeederPelletMissed</IGroupObservableSubjectMerge>
                          <Name>Feeder</Name>
                        </Expression>
                        <Expression xsi:type="harp:ConvertTimestamped">
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="WorkflowInput">
                                <Name>Source1</Name>
                              </Expression>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>FeederKeyString</Name>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:WithLatestFrom" />
                              </Expression>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>SubjectState</Name>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:WithLatestFrom" />
                              </Expression>
                              <Expression xsi:type="WorkflowOutput" />
                            </Nodes>
                            <Edges>
                              <Edge From="0" To="2" Label="Source1" />
                              <Edge From="1" To="2" Label="Source2" />
                              <Edge From="2" To="4" Label="Source1" />
                              <Edge From="3" To="4" Label="Source2" />
                              <Edge From="4" To="5" Label="Source1" />
                            </Edges>
                          </Workflow>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:ElementIndex" />
                        </Expression>
                        <Expression xsi:type="IncludeWorkflow" Path="Extensions\AlertGate.bonsai">
                          <AlertRefractoryPeriod>PT5M</AlertRefractoryPeriod>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Value.Seconds,Index,Value.Value.Item2.Value.Id,Value.Value.Item1.Item2</Selector>
                        </Expression>
                        <Expression xsi:type="scr:ExpressionTransform">
                          <scr:Expression>new(
Item1 as Timestamp,
Item2 + 1 as Count,
Item3 as SubjectId,
Item4 as FeederId
)</scr:Expression>
                        </Expression>
                        <Expression xsi:type="Format">
                          <Format>## **Missed Pellet**
**Subject**: {0}
**Patch:**: Patch{1}
**Total Missed**: {2}
</Format>
                          <Selector>SubjectId,FeederId,Count</Selector>
                        </Expression>
                        <Expression xsi:type="MulticastSubject">
                          <Name>SubjectAlertMessages</Name>
                        </Expression>
                        <Expression xsi:type="aeon:FormatLogMessage">
                          <Format>{0}	Patch{1}	{2}</Format>
                          <Selector>SubjectId,FeederId,Count</Selector>
                          <aeon:Priority>Alert</aeon:Priority>
                          <aeon:Type>MissedPellet</aeon:Type>
                          <aeon:Timestamp>Timestamp</aeon:Timestamp>
                        </Expression>
                        <Expression xsi:type="MulticastSubject">
                          <Name>AlertLogs</Name>
                        </Expression>
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="3" To="4" Label="Source1" />
                        <Edge From="4" To="5" Label="Source1" />
                        <Edge From="5" To="6" Label="Source1" />
                        <Edge From="6" To="7" Label="Source1" />
                        <Edge From="8" To="10" Label="Source1" />
                        <Edge From="9" To="10" Label="Source2" />
                        <Edge From="10" To="11" Label="Source1" />
                        <Edge From="11" To="12" Label="Source1" />
                        <Edge From="12" To="13" Label="Source1" />
                        <Edge From="12" To="15" Label="Source1" />
                        <Edge From="13" To="14" Label="Source1" />
                        <Edge From="15" To="16" Label="Source1" />
                        <Edge From="17" To="21" Label="Source1" />
                        <Edge From="18" To="19" Label="Source1" />
                        <Edge From="19" To="20" Label="Source1" />
                        <Edge From="20" To="21" Label="Source2" />
                        <Edge From="21" To="23" Label="Source1" />
                        <Edge From="22" To="23" Label="Source2" />
                        <Edge From="23" To="24" Label="Source1" />
                        <Edge From="24" To="25" Label="Source1" />
                        <Edge From="25" To="26" Label="Source1" />
                        <Edge From="25" To="28" Label="Source1" />
                        <Edge From="26" To="27" Label="Source1" />
                        <Edge From="28" To="29" Label="Source1" />
                        <Edge From="30" To="31" Label="Source1" />
                        <Edge From="31" To="32" Label="Source1" />
                        <Edge From="32" To="33" Label="Source1" />
                        <Edge From="33" To="34" Label="Source1" />
                        <Edge From="34" To="35" Label="Source1" />
                        <Edge From="35" To="36" Label="Source1" />
                        <Edge From="35" To="38" Label="Source1" />
                        <Edge From="36" To="37" Label="Source1" />
                        <Edge From="38" To="39" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>SubjectStart</Name>
                  </Expression>
                  <Expression xsi:type="rx:SelectMany">
                    <Name>SubjectTrackingAlerts</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="rx:AsyncSubject">
                          <Name>ActiveSubject</Name>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>TrackingEvents</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Merge" />
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>SubjectState</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:WithLatestFrom" />
                        </Expression>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="DueTime" DisplayName="MissingTimeout" />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Throttle">
                            <rx:DueTime>PT30M</rx:DueTime>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="Format">
                          <Format>## **Subject Missing**
**Subject**: {0}  
</Format>
                          <Selector>Item2.Value.Id</Selector>
                        </Expression>
                        <Expression xsi:type="MulticastSubject">
                          <Name>SubjectAlertMessages</Name>
                        </Expression>
                        <Expression xsi:type="aeon:FormatLogMessage">
                          <Format>{0}</Format>
                          <Selector>Item2.Value.Id</Selector>
                          <aeon:Priority>Alert</aeon:Priority>
                          <aeon:Type>TrackingFailure</aeon:Type>
                          <aeon:Timestamp>Item1.Seconds</aeon:Timestamp>
                        </Expression>
                        <Expression xsi:type="MulticastSubject">
                          <Name>AlertLogs</Name>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>TrackingEvents</Name>
                        </Expression>
                        <Expression xsi:type="rx:SelectMany">
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="WorkflowInput">
                                <Name>Source1</Name>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:Take">
                                  <rx:Count>1</rx:Count>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="rx:AsyncSubject">
                                <Name>TrakingEvents</Name>
                              </Expression>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>TrakingEvents</Name>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:Merge" />
                              </Expression>
                              <Expression xsi:type="GroupWorkflow">
                                <Name>SpeedThreshold</Name>
                                <Workflow>
                                  <Nodes>
                                    <Expression xsi:type="WorkflowInput">
                                      <Name>Source1</Name>
                                    </Expression>
                                    <Expression xsi:type="harp:ConvertTimestamped">
                                      <Workflow>
                                        <Nodes>
                                          <Expression xsi:type="WorkflowInput">
                                            <Name>Source1</Name>
                                          </Expression>
                                          <Expression xsi:type="MemberSelector">
                                            <Selector>Item1</Selector>
                                          </Expression>
                                          <Expression xsi:type="WorkflowOutput" />
                                        </Nodes>
                                        <Edges>
                                          <Edge From="0" To="1" Label="Source1" />
                                          <Edge From="1" To="2" Label="Source1" />
                                        </Edges>
                                      </Workflow>
                                    </Expression>
                                    <Expression xsi:type="rx:Condition">
                                      <Workflow>
                                        <Nodes>
                                          <Expression xsi:type="WorkflowInput">
                                            <Name>Source1</Name>
                                          </Expression>
                                          <Expression xsi:type="MemberSelector">
                                            <Selector>Value.Count</Selector>
                                          </Expression>
                                          <Expression xsi:type="GreaterThan">
                                            <Operand xsi:type="IntProperty">
                                              <Value>0</Value>
                                            </Operand>
                                          </Expression>
                                          <Expression xsi:type="WorkflowOutput" />
                                        </Nodes>
                                        <Edges>
                                          <Edge From="0" To="1" Label="Source1" />
                                          <Edge From="1" To="2" Label="Source1" />
                                          <Edge From="2" To="3" Label="Source1" />
                                        </Edges>
                                      </Workflow>
                                    </Expression>
                                    <Expression xsi:type="MemberSelector">
                                      <Selector>Value[0].Centroid</Selector>
                                    </Expression>
                                    <Expression xsi:type="Combinator">
                                      <Combinator xsi:type="dsp:Difference">
                                        <dsp:Order>1</dsp:Order>
                                      </Combinator>
                                    </Expression>
                                    <Expression xsi:type="Combinator">
                                      <Combinator xsi:type="dsp:Norm">
                                        <dsp:NormType>L2</dsp:NormType>
                                      </Combinator>
                                    </Expression>
                                    <Expression xsi:type="ExternalizedMapping">
                                      <Property Name="Value" DisplayName="MaxSpeed" />
                                    </Expression>
                                    <Expression xsi:type="GreaterThan">
                                      <Operand xsi:type="DoubleProperty">
                                        <Value>500</Value>
                                      </Operand>
                                    </Expression>
                                    <Expression xsi:type="MemberSelector">
                                      <Selector>Seconds</Selector>
                                    </Expression>
                                    <Expression xsi:type="Combinator">
                                      <Combinator xsi:type="rx:Zip" />
                                    </Expression>
                                    <Expression xsi:type="rx:DistinctUntilChangedBy">
                                      <rx:KeySelector>Item1</rx:KeySelector>
                                    </Expression>
                                    <Expression xsi:type="WorkflowOutput" />
                                  </Nodes>
                                  <Edges>
                                    <Edge From="0" To="1" Label="Source1" />
                                    <Edge From="1" To="2" Label="Source1" />
                                    <Edge From="2" To="3" Label="Source1" />
                                    <Edge From="2" To="8" Label="Source1" />
                                    <Edge From="3" To="4" Label="Source1" />
                                    <Edge From="4" To="5" Label="Source1" />
                                    <Edge From="5" To="7" Label="Source1" />
                                    <Edge From="6" To="7" Label="Source2" />
                                    <Edge From="7" To="9" Label="Source1" />
                                    <Edge From="8" To="9" Label="Source2" />
                                    <Edge From="9" To="10" Label="Source1" />
                                    <Edge From="10" To="11" Label="Source1" />
                                  </Edges>
                                </Workflow>
                              </Expression>
                              <Expression xsi:type="rx:Condition">
                                <Name>TrackingUnstable</Name>
                                <Workflow>
                                  <Nodes>
                                    <Expression xsi:type="WorkflowInput">
                                      <Name>Source1</Name>
                                    </Expression>
                                    <Expression xsi:type="MemberSelector">
                                      <Selector>Item1</Selector>
                                    </Expression>
                                    <Expression xsi:type="WorkflowOutput" />
                                  </Nodes>
                                  <Edges>
                                    <Edge From="0" To="1" Label="Source1" />
                                    <Edge From="1" To="2" Label="Source1" />
                                  </Edges>
                                </Workflow>
                              </Expression>
                              <Expression xsi:type="WorkflowOutput" />
                            </Nodes>
                            <Edges>
                              <Edge From="0" To="1" Label="Source1" />
                              <Edge From="1" To="2" Label="Source1" />
                              <Edge From="3" To="4" Label="Source1" />
                              <Edge From="4" To="5" Label="Source1" />
                              <Edge From="5" To="6" Label="Source1" />
                              <Edge From="6" To="7" Label="Source1" />
                            </Edges>
                          </Workflow>
                        </Expression>
                        <Expression xsi:type="IncludeWorkflow" Path="Extensions\AlertGate.bonsai">
                          <AlertRefractoryPeriod>PT5M</AlertRefractoryPeriod>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>SubjectState</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:WithLatestFrom" />
                        </Expression>
                        <Expression xsi:type="scr:ExpressionTransform">
                          <scr:Expression>new(
Item1.Item2 as Timestamp,
Item2.Value.Id as Id)</scr:Expression>
                        </Expression>
                        <Expression xsi:type="Format">
                          <Format>## **Tracking Failure**
**Subject**: {0}  
</Format>
                          <Selector>Id</Selector>
                        </Expression>
                        <Expression xsi:type="MulticastSubject">
                          <Name>SubjectAlertMessages</Name>
                        </Expression>
                        <Expression xsi:type="aeon:FormatLogMessage">
                          <Format>{0}</Format>
                          <Selector>Id</Selector>
                          <aeon:Priority>Alert</aeon:Priority>
                          <aeon:Type>TrackingFailure</aeon:Type>
                          <aeon:Timestamp>Timestamp</aeon:Timestamp>
                        </Expression>
                        <Expression xsi:type="MulticastSubject">
                          <Name>AlertLogs</Name>
                        </Expression>
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="2" To="3" Label="Source1" />
                        <Edge From="3" To="5" Label="Source1" />
                        <Edge From="4" To="5" Label="Source2" />
                        <Edge From="5" To="7" Label="Source1" />
                        <Edge From="6" To="7" Label="Source2" />
                        <Edge From="7" To="8" Label="Source1" />
                        <Edge From="7" To="10" Label="Source1" />
                        <Edge From="8" To="9" Label="Source1" />
                        <Edge From="10" To="11" Label="Source1" />
                        <Edge From="12" To="13" Label="Source1" />
                        <Edge From="13" To="14" Label="Source1" />
                        <Edge From="14" To="16" Label="Source1" />
                        <Edge From="15" To="16" Label="Source2" />
                        <Edge From="16" To="17" Label="Source1" />
                        <Edge From="17" To="18" Label="Source1" />
                        <Edge From="17" To="20" Label="Source1" />
                        <Edge From="18" To="19" Label="Source1" />
                        <Edge From="20" To="21" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="3" To="5" Label="Source1" />
                  <Edge From="4" To="5" Label="Source2" />
                  <Edge From="6" To="7" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Aeon.Foraging:RepeatEverySubject.bonsai" />
            <Expression xsi:type="GroupWorkflow">
              <Name>EnvironmentAlerts</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="SubscribeSubject">
                      <Name>CameraControllerEvents</Name>
                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="Combinator">
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                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="Combinator">
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                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="rx:SelectMany">
                      <Name>ExperimentSummary</Name>
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                    </Builder>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>EnvironmentState</Name>
                  </Expression>
                  <Expression xsi:type="Format">
                    <Format>## Arena {0} Mode Change
Mode: {1}</Format>
                    <Selector>Value.Name,Value.Type</Selector>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>CameraControllerEvents</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:SubscribeWhen" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:DelaySubscription">
                      <rx:DueTime>PT2S</rx:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="Combinator">
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                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="IncludeWorkflow" Path="Aeon.Acquisition:SendAlert.bonsai">
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                    </Builder>
                  </Expression>
                  <Expression xsi:type="rx:PublishSubject" TypeArguments="sys:String">
                    <rx:Name>EnvironmentAlertMessages</rx:Name>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="IncludeWorkflow" Path="Aeon.Acquisition:SendAlert.bonsai">
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                    </Builder>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>EnvironmentState</Name>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="DueTime" DisplayName="MaintenanceTimeout" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Throttle">
                      <rx:DueTime>PT15M</rx:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:Condition">
                    <Name>IsMaintenance</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Value.Type</Selector>
                        </Expression>
                        <Expression xsi:type="Equal">
                          <Operand xsi:type="WorkflowProperty" TypeArguments="aeon-env:EnvironmentStateType">
                            <Value>Maintenance</Value>
                          </Operand>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="2" To="3" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Seconds</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="aeon:GetDateTime" />
                  </Expression>
                  <Expression xsi:type="Format">
                    <Format>## Maintenance Timeout
**Started at**: {0}</Format>
                    <Selector />
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>EnvironmentAlertMessages</Name>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="Bonsai.Harp:WithLatestTimestamp.bonsai">
                    <Name>CameraControllerEvents</Name>
                  </Expression>
                  <Expression xsi:type="aeon:FormatLogMessage">
                    <Format />
                    <Selector>Value</Selector>
                    <aeon:Priority>Alert</aeon:Priority>
                    <aeon:Type>MaintenanceTimeout</aeon:Type>
                    <aeon:Timestamp>Seconds</aeon:Timestamp>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>AlertLogs</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>CameraControllerEvents</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="aeon:GroupByTime">
                      <aeon:ChunkSize>1</aeon:ChunkSize>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Skip">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:SelectMany">
                    <Name>LocalFileCount</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>PathPrefix</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="io:GetDirectoryName" />
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="Path" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="io:GetFiles">
                            <io:Path>D:\Tests\aeon-swc\aa-dev-calibration-c183da8</io:Path>
                            <io:SearchPattern>*</io:SearchPattern>
                            <io:SearchOption>AllDirectories</io:SearchOption>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Length</Selector>
                        </Expression>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Merge" />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Take">
                            <rx:Count>1</rx:Count>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Zip" />
                        </Expression>
                        <Expression xsi:type="scr:ExpressionTransform">
                          <scr:Expression>new(
Item1 as Count,
Item2.GetTimestamp() as Timestamp)</scr:Expression>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="2" To="3" Label="Source1" />
                        <Edge From="3" To="4" Label="Source1" />
                        <Edge From="4" To="8" Label="Source1" />
                        <Edge From="5" To="6" Label="Source1" />
                        <Edge From="6" To="7" Label="Source1" />
                        <Edge From="7" To="8" Label="Source2" />
                        <Edge From="8" To="9" Label="Source1" />
                        <Edge From="9" To="10" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" DisplayName="LocalFileThreshold" />
                  </Expression>
                  <Expression xsi:type="rx:Condition">
                    <Name>GreaterThan</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Count</Selector>
                        </Expression>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="Value" />
                        </Expression>
                        <Expression xsi:type="GreaterThan">
                          <Operand xsi:type="IntProperty">
                            <Value>500</Value>
                          </Operand>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="3" Label="Source1" />
                        <Edge From="2" To="3" Label="Source2" />
                        <Edge From="3" To="4" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Format">
                    <Format>## **File Storage**
**Total Files in Local Storage**: {0}</Format>
                    <Selector>Count</Selector>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>EnvironmentAlertMessages</Name>
                  </Expression>
                  <Expression xsi:type="aeon:FormatLogMessage">
                    <Format />
                    <Selector>Count</Selector>
                    <aeon:Priority>Alert</aeon:Priority>
                    <aeon:Type>FileStorage</aeon:Type>
                    <aeon:Timestamp>Timestamp</aeon:Timestamp>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>AlertLogs</Name>
                  </Expression>
                  <Expression xsi:type="GroupWorkflow">
                    <Name>DroppedFramesMonitor</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>FrameEvents</Name>
                        </Expression>
                        <Expression xsi:type="rx:SelectMany">
                          <Name>DroppedFrames</Name>
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="WorkflowInput">
                                <Name>Source1</Name>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:Take">
                                  <rx:Count>1</rx:Count>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="rx:AsyncSubject">
                                <Name>Camera</Name>
                              </Expression>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>Camera</Name>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:Merge" />
                              </Expression>
                              <Expression xsi:type="rx:Condition">
                                <Workflow>
                                  <Nodes>
                                    <Expression xsi:type="WorkflowInput">
                                      <Name>Source1</Name>
                                    </Expression>
                                    <Expression xsi:type="MemberSelector">
                                      <Selector>Value.ChunkData.FrameID</Selector>
                                    </Expression>
                                    <Expression xsi:type="Combinator">
                                      <Combinator xsi:type="dsp:Difference">
                                        <dsp:Order>1</dsp:Order>
                                      </Combinator>
                                    </Expression>
                                    <Expression xsi:type="GreaterThan">
                                      <Operand xsi:type="DoubleProperty">
                                        <Value>1</Value>
                                      </Operand>
                                    </Expression>
                                    <Expression xsi:type="WorkflowOutput" />
                                  </Nodes>
                                  <Edges>
                                    <Edge From="0" To="1" Label="Source1" />
                                    <Edge From="1" To="2" Label="Source1" />
                                    <Edge From="2" To="3" Label="Source1" />
                                    <Edge From="3" To="4" Label="Source1" />
                                  </Edges>
                                </Workflow>
                              </Expression>
                              <Expression xsi:type="IncludeWorkflow" Path="Extensions\AlertGate.bonsai">
                                <AlertRefractoryPeriod>PT5M</AlertRefractoryPeriod>
                              </Expression>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>Camera</Name>
                              </Expression>
                              <Expression xsi:type="MemberSelector">
                                <Selector>Key.Item1</Selector>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:WithLatestFrom" />
                              </Expression>
                              <Expression xsi:type="scr:ExpressionTransform">
                                <scr:Expression>new(
Item1.Seconds as Timestamp,
Item2 as Name,
Item1.Value.ChunkData.FrameID as FrameID)</scr:Expression>
                              </Expression>
                              <Expression xsi:type="WorkflowOutput" />
                            </Nodes>
                            <Edges>
                              <Edge From="0" To="1" Label="Source1" />
                              <Edge From="1" To="2" Label="Source1" />
                              <Edge From="3" To="4" Label="Source1" />
                              <Edge From="4" To="5" Label="Source1" />
                              <Edge From="5" To="6" Label="Source1" />
                              <Edge From="6" To="9" Label="Source1" />
                              <Edge From="7" To="8" Label="Source1" />
                              <Edge From="8" To="9" Label="Source2" />
                              <Edge From="9" To="10" Label="Source1" />
                              <Edge From="10" To="11" Label="Source1" />
                            </Edges>
                          </Workflow>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Format">
                    <Format>## **Frame Dropped**
**Camera**: {0}  
**Current Frame**: {1}

</Format>
                    <Selector>Name,FrameID</Selector>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>EnvironmentAlertMessages</Name>
                  </Expression>
                  <Expression xsi:type="aeon:FormatLogMessage">
                    <Format>{0}	{1}</Format>
                    <Selector>Name,FrameID</Selector>
                    <aeon:Priority>Alert</aeon:Priority>
                    <aeon:Type>DroppedFrames</aeon:Type>
                    <aeon:Timestamp>Timestamp</aeon:Timestamp>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>AlertLogs</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Annotations</Name>
                  </Expression>
                  <Expression xsi:type="rx:Condition">
                    <Name>Alert</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Value.Priority</Selector>
                        </Expression>
                        <Expression xsi:type="Equal">
                          <Operand xsi:type="WorkflowProperty" TypeArguments="aeon:PriorityLevel">
                            <Value>Alert</Value>
                          </Operand>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="2" To="3" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Format">
                    <Format>## **Experimenter Annotation**
**Message**: {0}</Format>
                    <Selector>Value.Message</Selector>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>EnvironmentAlertMessages</Name>
                  </Expression>
                  <Expression xsi:type="GroupWorkflow">
                    <Name>StreamTimeoutMonitor</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="GroupWorkflow">
                          <Name>StreamTimeout</Name>
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>FrameEvents</Name>
                              </Expression>
                              <Expression xsi:type="rx:SelectMany">
                                <Workflow>
                                  <Nodes>
                                    <Expression xsi:type="WorkflowInput">
                                      <Name>Source1</Name>
                                    </Expression>
                                    <Expression xsi:type="Combinator">
                                      <Combinator xsi:type="rx:Take">
                                        <rx:Count>1</rx:Count>
                                      </Combinator>
                                    </Expression>
                                    <Expression xsi:type="rx:AsyncSubject">
                                      <Name>Camera</Name>
                                    </Expression>
                                    <Expression xsi:type="SubscribeSubject">
                                      <Name>Camera</Name>
                                    </Expression>
                                    <Expression xsi:type="Combinator">
                                      <Combinator xsi:type="rx:Merge" />
                                    </Expression>
                                    <Expression xsi:type="IncludeWorkflow" Path="Aeon.Acquisition:TimeoutNotification.bonsai">
                                      <DueTime>PT1S</DueTime>
                                    </Expression>
                                    <Expression xsi:type="SubscribeSubject">
                                      <Name>Camera</Name>
                                    </Expression>
                                    <Expression xsi:type="MemberSelector">
                                      <Selector>Key.Item1</Selector>
                                    </Expression>
                                    <Expression xsi:type="SubscribeSubject">
                                      <Name>Heartbeats</Name>
                                    </Expression>
                                    <Expression xsi:type="Combinator">
                                      <Combinator xsi:type="rx:CombineLatest" />
                                    </Expression>
                                    <Expression xsi:type="Combinator">
                                      <Combinator xsi:type="rx:Take">
                                        <rx:Count>1</rx:Count>
                                      </Combinator>
                                    </Expression>
                                    <Expression xsi:type="MemberSelector">
                                      <Selector>Item2,Item3</Selector>
                                    </Expression>
                                    <Expression xsi:type="Combinator">
                                      <Combinator xsi:type="harp:CreateTimestamped" />
                                    </Expression>
                                    <Expression xsi:type="WorkflowOutput" />
                                  </Nodes>
                                  <Edges>
                                    <Edge From="0" To="1" Label="Source1" />
                                    <Edge From="1" To="2" Label="Source1" />
                                    <Edge From="3" To="4" Label="Source1" />
                                    <Edge From="4" To="5" Label="Source1" />
                                    <Edge From="5" To="9" Label="Source1" />
                                    <Edge From="6" To="7" Label="Source1" />
                                    <Edge From="7" To="9" Label="Source2" />
                                    <Edge From="8" To="9" Label="Source3" />
                                    <Edge From="9" To="10" Label="Source1" />
                                    <Edge From="10" To="11" Label="Source1" />
                                    <Edge From="11" To="12" Label="Source1" />
                                    <Edge From="12" To="13" Label="Source1" />
                                  </Edges>
                                </Workflow>
                              </Expression>
                              <Expression xsi:type="WorkflowOutput" />
                            </Nodes>
                            <Edges>
                              <Edge From="0" To="1" Label="Source1" />
                              <Edge From="1" To="2" Label="Source1" />
                            </Edges>
                          </Workflow>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>StartCameras</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:SubscribeWhen" />
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>StopCameras</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:TakeUntil" />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Repeat" />
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="2" Label="Source1" />
                        <Edge From="1" To="2" Label="Source2" />
                        <Edge From="2" To="4" Label="Source1" />
                        <Edge From="3" To="4" Label="Source2" />
                        <Edge From="4" To="5" Label="Source1" />
                        <Edge From="5" To="6" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Format">
                    <Format>## **Stream Timeout**
**Stream**: {0}
</Format>
                    <Selector>Value</Selector>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>EnvironmentAlertMessages</Name>
                  </Expression>
                  <Expression xsi:type="aeon:FormatLogMessage">
                    <Format />
                    <Selector>Value</Selector>
                    <aeon:Priority>Alert</aeon:Priority>
                    <aeon:Type>StreamTimeout</aeon:Type>
                    <aeon:Timestamp>Seconds</aeon:Timestamp>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>AlertLogs</Name>
                  </Expression>
                  <Expression xsi:type="GroupWorkflow">
                    <Name>HeartbeatSources</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="GroupWorkflow">
                          <Name>FeederHeartbeatMonitor</Name>
                          <Description>Captures the sequence of heartbeats from the specified source as a named group.</Description>
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>FeederEvents</Name>
                              </Expression>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>RigConfiguration</Name>
                              </Expression>
                              <Expression xsi:type="MemberSelector">
                                <Selector>Feeders.Count</Selector>
                              </Expression>
                              <Expression xsi:type="PropertyMapping">
                                <PropertyMappings>
                                  <Property Name="Count" Selector="it" />
                                </PropertyMappings>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:Take">
                                  <rx:Count>3</rx:Count>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="rx:CreateObservable">
                                <Name />
                                <Workflow>
                                  <Nodes>
                                    <Expression xsi:type="WorkflowInput">
                                      <Name>Source1</Name>
                                    </Expression>
                                    <Expression xsi:type="Combinator">
                                      <Combinator xsi:type="rx:Take">
                                        <rx:Count>1</rx:Count>
                                      </Combinator>
                                    </Expression>
                                    <Expression xsi:type="rx:AsyncSubject">
                                      <Name>Feeder</Name>
                                    </Expression>
                                    <Expression xsi:type="SubscribeSubject">
                                      <Name>Feeder</Name>
                                    </Expression>
                                    <Expression xsi:type="Combinator">
                                      <Combinator xsi:type="rx:Merge" />
                                    </Expression>
                                    <Expression xsi:type="harp:Parse">
                                      <harp:Register xsi:type="harp:TimestampedTimestampSeconds" />
                                    </Expression>
                                    <Expression xsi:type="harp:ConvertTimestamped">
                                      <Workflow>
                                        <Nodes>
                                          <Expression xsi:type="WorkflowInput">
                                            <Name>Source1</Name>
                                          </Expression>
                                          <Expression xsi:type="SubscribeSubject">
                                            <Name>Feeder</Name>
                                          </Expression>
                                          <Expression xsi:type="MemberSelector">
                                            <Selector>Key</Selector>
                                          </Expression>
                                          <Expression xsi:type="Format">
                                            <Format>Feeder {0}</Format>
                                            <Selector>it</Selector>
                                          </Expression>
                                          <Expression xsi:type="Combinator">
                                            <Combinator xsi:type="rx:WithLatestFrom" />
                                          </Expression>
                                          <Expression xsi:type="MemberSelector">
                                            <Selector>Item2</Selector>
                                          </Expression>
                                          <Expression xsi:type="WorkflowOutput" />
                                        </Nodes>
                                        <Edges>
                                          <Edge From="0" To="4" Label="Source1" />
                                          <Edge From="1" To="2" Label="Source1" />
                                          <Edge From="2" To="3" Label="Source1" />
                                          <Edge From="3" To="4" Label="Source2" />
                                          <Edge From="4" To="5" Label="Source1" />
                                          <Edge From="5" To="6" Label="Source1" />
                                        </Edges>
                                      </Workflow>
                                    </Expression>
                                    <Expression xsi:type="WorkflowOutput" />
                                  </Nodes>
                                  <Edges>
                                    <Edge From="0" To="1" Label="Source1" />
                                    <Edge From="1" To="2" Label="Source1" />
                                    <Edge From="3" To="4" Label="Source1" />
                                    <Edge From="4" To="5" Label="Source1" />
                                    <Edge From="5" To="6" Label="Source1" />
                                    <Edge From="6" To="7" Label="Source1" />
                                  </Edges>
                                </Workflow>
                              </Expression>
                              <Expression xsi:type="WorkflowOutput" />
                            </Nodes>
                            <Edges>
                              <Edge From="0" To="4" Label="Source1" />
                              <Edge From="1" To="2" Label="Source1" />
                              <Edge From="2" To="3" Label="Source1" />
                              <Edge From="3" To="4" Label="Source2" />
                              <Edge From="4" To="5" Label="Source1" />
                              <Edge From="5" To="6" Label="Source1" />
                            </Edges>
                          </Workflow>
                        </Expression>
                        <Expression xsi:type="IncludeWorkflow" Path="Aeon.Acquisition:HeartbeatMonitor.bonsai">
                          <Name>CameraControllerEvents</Name>
                        </Expression>
                        <Expression xsi:type="IncludeWorkflow" Path="Aeon.Acquisition:HeartbeatMonitor.bonsai">
                          <Name>SynchronizerEvents</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Merge" />
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="3" Label="Source1" />
                        <Edge From="1" To="3" Label="Source2" />
                        <Edge From="2" To="3" Label="Source3" />
                        <Edge From="3" To="4" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="Aeon.Acquisition:SynchronizerMonitor.bonsai" />
                  <Expression xsi:type="scr:ExpressionCondition">
                    <scr:Expression>DeviceCount != ExpectedDeviceCount || MaxDifference &gt; 0 || Math.Abs((MeanUtcTimestamp - DateTime.UtcNow).TotalMinutes) &gt; 30
</scr:Expression>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="Extensions\AlertGate.bonsai">
                    <AlertRefractoryPeriod>PT1M</AlertRefractoryPeriod>
                  </Expression>
                  <Expression xsi:type="Format">
                    <Format>## **Harp Synch**
**Synchronizer Stats**: {0}</Format>
                    <Selector>it</Selector>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>EnvironmentAlertMessages</Name>
                  </Expression>
                  <Expression xsi:type="aeon:FormatLogMessage">
                    <Format>{0}	{1}	{2}	{3}	{4}</Format>
                    <Selector>MeanTimestamp,MeanUtcTimestamp,ExpectedDeviceCount,DeviceCount,MaxDifference</Selector>
                    <aeon:Priority>Alert</aeon:Priority>
                    <aeon:Type>HarpSynch</aeon:Type>
                    <aeon:Timestamp>MeanTimestamp</aeon:Timestamp>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>AlertLogs</Name>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="9" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="7" Label="Source1" />
                  <Edge From="6" To="7" Label="Source2" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="9" Label="Source2" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="11" To="12" Label="Source1" />
                  <Edge From="13" To="15" Label="Source1" />
                  <Edge From="14" To="15" Label="Source2" />
                  <Edge From="15" To="16" Label="Source1" />
                  <Edge From="16" To="17" Label="Source1" />
                  <Edge From="17" To="18" Label="Source1" />
                  <Edge From="17" To="21" Label="Source1" />
                  <Edge From="18" To="19" Label="Source1" />
                  <Edge From="19" To="20" Label="Source1" />
                  <Edge From="21" To="22" Label="Source1" />
                  <Edge From="22" To="23" Label="Source1" />
                  <Edge From="24" To="25" Label="Source1" />
                  <Edge From="25" To="26" Label="Source1" />
                  <Edge From="26" To="27" Label="Source1" />
                  <Edge From="27" To="29" Label="Source1" />
                  <Edge From="28" To="29" Label="Source2" />
                  <Edge From="29" To="30" Label="Source1" />
                  <Edge From="29" To="32" Label="Source1" />
                  <Edge From="30" To="31" Label="Source1" />
                  <Edge From="32" To="33" Label="Source1" />
                  <Edge From="34" To="35" Label="Source1" />
                  <Edge From="34" To="37" Label="Source1" />
                  <Edge From="35" To="36" Label="Source1" />
                  <Edge From="37" To="38" Label="Source1" />
                  <Edge From="39" To="40" Label="Source1" />
                  <Edge From="40" To="41" Label="Source1" />
                  <Edge From="41" To="42" Label="Source1" />
                  <Edge From="43" To="44" Label="Source1" />
                  <Edge From="43" To="46" Label="Source1" />
                  <Edge From="44" To="45" Label="Source1" />
                  <Edge From="46" To="47" Label="Source1" />
                  <Edge From="48" To="49" Label="Source1" />
                  <Edge From="49" To="50" Label="Source1" />
                  <Edge From="50" To="51" Label="Source1" />
                  <Edge From="51" To="52" Label="Source1" />
                  <Edge From="51" To="54" Label="Source1" />
                  <Edge From="52" To="53" Label="Source1" />
                  <Edge From="54" To="55" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>