WorkflowBuilder(Version=2.9.1)
GroupWorkflow EnvironmentSubjectState
    SubscribeSubject CameraControllerEvents
    -> IncludeWorkflow(Path=Extensions\SubjectDatabase.bonsai, DatabaseConfig=Z:\aeon\config\database.config)
    -> MulticastSubject SubjectState
    -> VisualizerMapping => #3
    SubscribeSubject CameraControllerEvents
    -> Aeon.Environment.AnnotationSource
    -> MulticastSubject Annotations
    -> VisualizerMapping => #7
    SubscribeSubject CameraControllerEvents
    -> Aeon.Environment.EnvironmentState
    -> MulticastSubject EnvironmentState
    -> VisualizerMapping => #11
    SubscribeSubject AlertLogs => #12
    -> Aeon.Acquisition.GetDateTime => #13
    #12, #13 -> Zip
    -> MemberSelector(Selector="Item2,Item1.Value.Priority,Item1.Value.Type,Item1.Value.Message")
    -> Format(Format="{0},{1},{2},{3}", Selector="Item1,Item2,Item3,Item4") => #16
    SubscribeSubject Annotations => #17
    -> Aeon.Acquisition.GetDateTime => #18
    #17, #18 -> Zip
    -> Condition Alert
        WorkflowInput Source1
        -> MemberSelector(Selector=Item1.Value.Priority)
        -> Equal(Operand=WorkflowProperty<Aeon.Acquisition.PriorityLevel>(Value=Alert))
        -> WorkflowOutput
    -> Format => #21
      Format:
        ## **Experimenter Annotation**
        **Timestamp:**{1}**Message**: {0}
      Selector="Item1.Value.Message, Item2"
    #16, #21 -> Merge
    -> VisualizerMapping => #23
    #11, #23 -> Bonsai.Gui.TableLayoutPanelBuilder(Enabled=true, Visible=true, ColumnCount=1, RowCount=2, ColumnStyles="", RowStyles="", CellSpans="")
    -> VisualizerMapping => #25
    #7, #25 -> Bonsai.Gui.TableLayoutPanelBuilder(Enabled=true, Visible=true, ColumnCount=2, RowCount=1, ColumnStyles="", RowStyles="", CellSpans="")
    -> VisualizerMapping => #27
    #3, #27 -> Bonsai.Gui.TableLayoutPanelBuilder EnvironmentSubjectState
      Enabled=true
      Visible=true
      ColumnCount=1
      RowCount=3
      ColumnStyles=""
      RowStyles(RowStyle(SizeType=Percent, Height=40), RowStyle(SizeType=Percent, Height=40), RowStyle(SizeType=Percent, Height=20))
      CellSpans=""
    -> WorkflowOutput
-> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.TableLayoutPanelVisualizer>) => #1
Defer FeederController
    SubscribeSubject FeederEvents
    -> MemberSelector(Selector=Key) => #1
    ExternalizedMapping(BufferSize(DisplayName=BeamBreakBufferSize)) => #2
    #1, #2 -> Aeon.Acquisition.CreateGroup BeamAndPellets => #3
        WorkflowInput Source1
        -> Take(Count=1)
        -> AsyncSubject SelectedFeeder

        ExternalizedMapping(Name(DisplayName=PelletCommand)) => #3
        -> SubscribeSubject FeederEvents
        -> Condition ID
            WorkflowInput Source1
            -> MemberSelector(Selector=Key) => #1
            SubscribeSubject SelectedFeeder => #2
            #1, #2 -> WithLatestFrom
            -> Equal
            -> WorkflowOutput
        -> Merge
        -> Take(Count=1) => #7
        ExternalizedMapping(Count(DisplayName=BufferSize)) => #8
        #7, #8 -> Range(Start=0, Count=1000) => #9
        #9, #7 -> WithLatestFrom
        -> MemberSelector(Selector=Item2) => #11
        #3 -> SubscribeSubject FeederEvents
        -> Condition ID
            WorkflowInput Source1
            -> MemberSelector(Selector=Key) => #1
            SubscribeSubject SelectedFeeder => #2
            #1, #2 -> WithLatestFrom
            -> Equal
            -> WorkflowOutput
        -> Merge
        -> Harp.OutputExpander.FilterRegister(FilterType=Include, Register=Harp.OutputExpander.OutputSet)
        -> Bonsai.Harp.FilterMessageType(FilterType=Include, MessageType=Write) => #16
        #11, #16 -> Concat
        -> Aeon.Acquisition.GetDateTime => #18
        -> BooleanProperty(Value=false) => #19
        #19, #18 -> Zip => #20
        ExternalizedMapping(Name(DisplayName=PelletDelivered))
        -> SubscribeSubject FeederPelletDelivered
        -> Condition ID
            WorkflowInput Source1
            -> MemberSelector(Selector=Key) => #1
            SubscribeSubject SelectedFeeder => #2
            #1, #2 -> WithLatestFrom
            -> Equal
            -> WorkflowOutput
        -> Merge
        -> Aeon.Acquisition.GetDateTime => #25
        -> BooleanProperty(Value=true) => #26
        #26, #25 -> Zip => #27
        #20, #27 -> Merge
        -> WorkflowOutput
    #3, #2 -> ReplayGroupBuffer(BufferSize=1000)
    -> ReplaySubject BeamBreaks(BufferSize=nil)

    Disable SubscribeSubject FeederEvents
    -> Disable MemberSelector(Selector=Key) => #7
    Disable ExternalizedMapping(BufferSize(DisplayName=WheelBufferSize)) => #8
    #7, #8 -> Disable Aeon.Acquisition.CreateGroup WheelDisplacement => #9
        WorkflowInput Source1
        -> Take(Count=1)
        -> AsyncSubject FeederId

        SubscribeSubject FeederWheelDisplacement
        -> Condition ID
            WorkflowInput Source1
            -> MemberSelector(Selector=Key) => #1
            SubscribeSubject FeederId => #2
            #1, #2 -> WithLatestFrom
            -> Equal
            -> WorkflowOutput
        -> BehaviorSubject Displacement

        SubscribeSubject Displacement
        -> Merge
        -> Take(Count=1) => #8
        ExternalizedMapping(BufferSize) => #9
        #8, #9 -> GroupWorkflow Range => #10
            WorkflowInput Source1 => #0
            ExternalizedMapping(Value(DisplayName=BufferSize))
            -> PropertySource<Range,System.Int32>(MemberName=Count, Value=5000)
            -> Add(Operand=IntProperty(Value=1))
            -> PropertyMapping(Count) => #4
            #0, #4 -> Range(Start=-1, Count=5001)
            -> WorkflowOutput
        #10, #8 -> WithLatestFrom => #11
        -> DoubleProperty(Value=0) => #12
        #11 -> MemberSelector(Selector="Item2.Seconds,Item1")
        -> Subtract => #14
        #12, #14 -> Zip
        -> Bonsai.Harp.CreateTimestamped => #16
        #16, #9 -> GroupWorkflow Take
            WorkflowInput Source1 => #0
            ExternalizedMapping(Count(DisplayName=BufferSize)) => #1
            #0, #1 -> Take(Count=5000)
            -> WorkflowOutput
        -> Materialize
        -> Dematerialize => #19
        SubscribeSubject Displacement
        -> Merge => #21
        ExternalizedMapping(Interval) => #22
        #21, #22 -> SampleInterval(Interval=PT0.02S) => #23
        #19, #23 -> Concat => #24
        ExternalizedMapping(Gain) => #25
        #24, #25 -> Bonsai.Harp.ConvertTimestamped => #26
            WorkflowInput Source1 => #0
            ExternalizedMapping(Value(DisplayName=Gain, Description="A factor used to increase or decrease the speed of integration.")) => #1
            #0, #1 -> Multiply(Operand=DoubleProperty(Value=1))
            -> Accumulate
            -> WorkflowOutput
        -> MemberSelector(Selector=Value) => #27
        #26 -> Aeon.Acquisition.GetDateTime => #28
        #27, #28 -> Zip
        -> WorkflowOutput
    #9, #8 -> Disable ReplayGroupBuffer(BufferSize=5000)
    -> Disable ReplaySubject Distance(BufferSize=nil)

    SubscribeSubject FeederEvents
    -> MemberSelector(Selector=Key) => #13
    SubscribeSubject RigConfiguration
    -> MemberSelector(Selector=Feeders.Count)
    -> PropertyMapping(Count) => #16
    #13, #16 -> Take(Count=4)
    -> ToArray
    -> Bonsai.Gui.ListBoxDataSourceBuilder(Enabled=true, Visible=true, DisplayMember="") => #19
    -> BehaviorSubject SelectedFeeder
    SubscribeSubject SelectedFeeder
    -> Format(Format=Feeder_{0}, Selector=it)
    -> PropertyMapping(Text(Selector=it))
    -> Bonsai.Gui.LabelBuilder(Enabled=true, Visible=true, Font="Microsoft Sans Serif, 15.75pt", Text=Feeder_Feeder1)
    -> VisualizerMapping => #25
    #19 -> VisualizerMapping => #26
    #25, #26 -> Bonsai.Gui.TableLayoutPanelBuilder(Enabled=true, Visible=true, ColumnCount=1, RowCount=1, ColumnStyles="", RowStyles="", CellSpans="")
    -> VisualizerMapping => #28
    SubscribeSubject SelectedFeeder
    -> CreateObservable
        WorkflowInput Source1
        -> Take(Count=1)
        -> AsyncSubject SelectedFeeder

        SubscribeSubject FeederDispenser => #3
        SubscribeSubject SelectedFeeder => #4
        #3, #4 -> WithLatestFrom
        -> Condition SelectedPatch
            WorkflowInput Source1
            -> MemberSelector(Selector="Item2,Item1.Key")
            -> Equal
            -> WorkflowOutput
        -> MemberSelector(Selector=Item1)
        -> Merge
        -> WorkflowOutput
    -> Switch
    -> Aeon.Foraging.DispenserController
    -> Sink
        WorkflowInput Source1 => #0
        SubscribeSubject SelectedFeeder => #1
        #0, #1 -> WithLatestFrom
        -> MulticastSubject FeederController
        -> WorkflowOutput
    -> VisualizerMapping => #34
    #28, #34 -> Bonsai.Gui.TableLayoutPanelBuilder Feeders(Enabled=true, Visible=true, ColumnCount=2, RowCount=1, ColumnStyles="", RowStyles="", CellSpans="")
    -> VisualizerMapping => #36
    SubscribeSubject SelectedFeeder
    -> CreateObservable
        WorkflowInput Source1
        -> Take(Count=1)
        -> AsyncSubject SelectedFeeder

        SubscribeSubject BeamBreaks
        -> Condition ID
            WorkflowInput Source1
            -> MemberSelector(Selector=Key) => #1
            SubscribeSubject SelectedFeeder => #2
            #1, #2 -> WithLatestFrom
            -> Equal
            -> WorkflowOutput
        -> Merge
        -> WorkflowOutput
    -> Switch => #39
    ExternalizedMapping(BufferSize(DisplayName=BeamBreakRollingGraphSize)) => #40
    #39, #40 -> GroupWorkflow RollingGraph
        WorkflowInput Source1 => #0
        ExternalizedMapping(Capacity(DisplayName=BufferSize)) => #1
        #0, #1 -> Bonsai.Gui.ZedGraph.RollingGraphBuilder(IndexSelector=Item2, ValueSelector=Item1, SymbolType=None, LineWidth=1, CurveSettings="", Capacity=100, Min=nil, Max=nil)
        -> WorkflowOutput
    -> VisualizerMapping => #42
    SubscribeSubject SelectedFeeder
    -> CreateObservable WheelDisplacement
        WorkflowInput Source1
        -> Take(Count=1)
        -> AsyncSubject FeederId

        SubscribeSubject FeederWheelDisplacement
        -> Condition ID
            WorkflowInput Source1
            -> MemberSelector(Selector=Key) => #1
            SubscribeSubject FeederId => #2
            #1, #2 -> WithLatestFrom
            -> Equal
            -> WorkflowOutput
        -> Merge => #5
        -> MemberSelector(Selector=Value)
        -> Accumulate => #7
        #5 -> Aeon.Acquisition.GetDateTime => #8
        #7, #8 -> Zip
        -> BehaviorSubject distance

        SubscribeSubject distance
        -> SampleInterval(Interval=PT0.02S)
        -> WorkflowOutput
    -> Switch => #45
    ExternalizedMapping(BufferSize(DisplayName=DistanceRollingGraphBufferSize)) => #46
    #45, #46 -> GroupWorkflow RollingGraph
        WorkflowInput Source1 => #0
        ExternalizedMapping(Capacity(DisplayName=BufferSize)) => #1
        #0, #1 -> Bonsai.Gui.ZedGraph.RollingGraphBuilder(IndexSelector=Item2, ValueSelector=Item1, SymbolType=None, LineWidth=1, CurveSettings="", Capacity=1000, Min=nil, Max=nil)
        -> WorkflowOutput
    -> VisualizerMapping => #48
    #36, #42, #48 -> Bonsai.Gui.TableLayoutPanelBuilder Feeders(Enabled=true, Visible=true, ColumnCount=1, RowCount=3, ColumnStyles="", RowStyles="", CellSpans="")
    -> WorkflowOutput
-> VisualizerMapping => #3
Defer InStateFeeder
    Disable SubscribeSubject CurrentState => #0
    Disable SubscribeSubject States => #1
    #0, #1 -> Disable CombineLatest
    -> Disable SelectMany RunningState
        WorkflowInput Source1
        -> Take(Count=1)
        -> AsyncSubject state

        SubscribeSubject state
        -> MemberSelector(Selector=Item2)
        -> Condition => #5
            WorkflowInput Source1
            -> MemberSelector(Selector=Keys)
            -> Merge
            -> SelectMany
                WorkflowInput Source1 => #0
                SubscribeSubject state
                -> MemberSelector(Selector=Item1) => #2
                #0, #2 -> WithLatestFrom
                -> Equal
                -> Condition
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> WorkflowOutput
            -> WorkflowOutput
        SubscribeSubject state
        -> MemberSelector(Selector=Item1)
        -> PropertyMapping(Value) => #8
        #5, #8 -> Index(Operand=StringProperty(Value=AllActive_State1))
        -> Take(Count=1)
        -> WorkflowOutput
    -> Disable BehaviorSubject State
    -> Disable MemberSelector(Selector=PatchStates)
    -> Disable MemberSelector(Selector=Count)
    -> Disable BehaviorSubject WheelCount

    SubscribeSubject SelectedPlayer
    -> CreateObservable
        SubscribeSubject FeedersTask
        -> Condition
            WorkflowInput Source1
            -> MemberSelector(Selector=Key) => #1
            SubscribeSubject SelectedPlayer => #2
            #1, #2 -> WithLatestFrom
            -> Equal
            -> WorkflowOutput
        -> Merge
        -> WorkflowOutput
    -> Switch
    -> BehaviorSubject CurrentState

    Disable BehaviorSubject<HtsLoom.FeederName> SelectedWheel
    -> Disable CreateObservable InStateWheelDisplacement
        WorkflowInput Source1
        -> Take(Count=1)
        -> AsyncSubject SelectedWheel

        SubscribeSubject InStateWheelDisplacement
        -> Condition
            WorkflowInput Source1
            -> MemberSelector(Selector=Key) => #1
            SubscribeSubject SelectedWheel => #2
            #1, #2 -> WithLatestFrom
            -> Equal
            -> WorkflowOutput
        -> Merge
        -> MemberSelector(Selector=Value) => #6
        SubscribeSubject State
        -> MemberSelector(Selector=PatchStates)
        -> Merge
        -> Condition
            WorkflowInput Source1
            -> MemberSelector(Selector=Key) => #1
            SubscribeSubject SelectedWheel => #2
            #1, #2 -> WithLatestFrom
            -> Equal
            -> WorkflowOutput
        -> MemberSelector(Selector=Value.RewardRule.DistanceThreshold) => #11
        #6, #11 -> WithLatestFrom
        -> WorkflowOutput
    -> Disable Switch
    -> Disable PublishSubject WheelDisplacement

    SubscribeSubject TaskConfiguration
    -> MemberSelector(Selector=FeederTask.Keys)
    -> Merge
    -> ToList
    -> Bonsai.Gui.ListBoxDataSourceBuilder(Enabled=true, Visible=true, DisplayMember="")
    -> BehaviorSubject SelectedPlayer
    -> VisualizerMapping => #22
    SubscribeSubject CurrentState => #23
    -> MemberSelector(Selector=Item2) => #24
    -> MemberSelector(Selector=Item2)
    -> PropertyMapping(Text(Selector=it))
    -> Bonsai.Gui.LabelBuilder(Enabled=true, Visible=true, Text=State_1)
    -> VisualizerMapping => #28
    #24 -> MemberSelector(Selector=Item1)
    -> MemberSelector(Selector=StateFile)
    -> PropertyMapping(Text(Selector=it))
    -> Bonsai.Gui.LabelBuilder(Enabled=true, Visible=true, Text=ScreenWest_Rule.yaml)
    -> VisualizerMapping => #33
    #23 -> MemberSelector(Selector=Item1) => #34
    -> MemberSelector(Selector=Item1)
    -> PropertyMapping(Text(Selector=it))
    -> Bonsai.Gui.LabelBuilder(Enabled=true, Visible=true, Text=ScreenWest_State1)
    -> VisualizerMapping => #38
    #34 -> MemberSelector(Selector=Item2.PatchStates)
    -> CreateObservable
        WorkflowInput Source1
        -> Take(Count=1)
        -> Merge
        -> GroupWorkflow
            WorkflowInput Source1 => #0
            -> MemberSelector(Selector=Key) => #1
            #0 -> MemberSelector(Selector=Value)
            -> MemberSelector(Selector=RewardRule.DistanceThreshold) => #3
            #1, #3 -> Zip
            -> WorkflowOutput
        -> ToList
        -> WorkflowOutput
    -> Switch
    -> SelectMany
        WorkflowInput Source1
        -> Take(Count=1)
        -> Merge
        -> Format(Format="{0},{1}", Selector="Item1, Item2")
        -> ToList
        -> WorkflowOutput
    -> Bonsai.Gui.ListBoxDataSourceBuilder(Enabled=true, Visible=true, DisplayMember="")
    -> VisualizerMapping => #44
    #28, #33, #38, #44 -> Bonsai.Gui.TableLayoutPanelBuilder
      Enabled=true
      Visible=true
      ColumnCount=1
      RowCount=4
      ColumnStyles=""
      RowStyles
        RowStyle(SizeType=Percent, Height=15)
        RowStyle(SizeType=Percent, Height=15)
        RowStyle(SizeType=Percent, Height=15)
        RowStyle(SizeType=Percent, Height=65)
      CellSpans=""
    -> VisualizerMapping => #46
    Disable VisualizerMapping => #47
    Disable SubscribeSubject<System.Int32> WheelCount => #48
    Disable SubscribeSubject State => #49
    #48, #49 -> Disable Zip
    -> Disable SelectMany GetFeeders
        WorkflowInput Source1
        -> Take(Count=1)
        -> AsyncSubject Feeders

        SubscribeSubject Feeders
        -> MemberSelector(Selector=Item2.PatchStates)
        -> Merge
        -> MemberSelector(Selector=Key) => #6
        SubscribeSubject Feeders
        -> MemberSelector(Selector=Item1)
        -> PropertyMapping(Count) => #9
        #6, #9 -> Take(Count=4)
        -> ToArray
        -> WorkflowOutput
    -> Disable Bonsai.Gui.ListBoxDataSourceBuilder(Enabled=true, Visible=true, DisplayMember="")
    -> Disable MulticastSubject SelectedWheel
    -> Disable VisualizerMapping => #54
    Disable SubscribeSubject WheelDisplacement
    -> Disable BufferTime(TimeSpan=PT1S)
    -> Disable MemberSelector(Selector=Count)
    -> Disable VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Design.ObjectTextVisualizer>) => #58
    Disable SubscribeSubject MetaStateCurrentTimeInterval
    -> Disable Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: TimeSpan.FromSeconds(it)
    -> Disable SampleInterval(Interval=PT1S) => #61
    Disable SubscribeSubject CurrentState => #62
    Disable SubscribeSubject CurrentMetaState => #63
    Disable SubscribeSubject MetaStateStateCounter => #64
    Disable SubscribeSubject MetaStateEatenPelletsCount => #65
    #61, #62, #63, #64, #65 -> Disable CombineLatest
    -> Disable Format
      Format:
        Meta: {2}
        State: {1}
        Time: {0}
        StateCounter: {3}
        EatenPellets: {4}
      Selector="Item1,Item2,Item3.Item2,Item4,Item5"
    -> Disable PropertyMapping(Text)
    -> Disable Bonsai.Gui.LabelBuilder State
      Enabled=true
      Visible=true
      Font="Microsoft Sans Serif, 12pt, style=Bold"
      Text:
        Meta: State_2
        State: Rule2_A
        Time: 00:40:48.7890000
        StateCounter: 0
        EatenPellets: 0
    -> Disable VisualizerMapping => #70
    #22, #46, #47, #54, #58, #70 -> Bonsai.Gui.TableLayoutPanelBuilder(Enabled=true, Visible=true, ColumnCount=3, RowCount=1, ColumnStyles="", RowStyles="", CellSpans="")
    -> VisualizerMapping => #72
    SubscribeSubject CurrentState
    -> CreateObservable
        WorkflowInput Source1
        -> Take(Count=1)
        -> AsyncSubject State

        SubscribeSubject State

        SubscribeSubject State
        -> MemberSelector(Selector=Item1) => #5
        -> MemberSelector(Selector=Item2.PatchStates)
        -> MemberSelector(Selector=Keys)
        -> Merge => #8
        #5 -> MemberSelector(Selector=Item1) => #9
        #8, #9 -> WithLatestFrom
        -> ToArray
        -> OrderBy(KeySelector=it)
        -> Take(Count=1)
        -> AsyncSubject FeederNames

        SubscribeSubject FeederNames
        -> Merge
        -> CreateObservable
            WorkflowInput Source1
            -> Take(Count=1)
            -> AsyncSubject Key

            SubscribeSubject FeederStateDistanceGroup
            -> Condition
                WorkflowInput Source1
                -> MemberSelector(Selector=Key) => #1
                SubscribeSubject Key => #2
                #1, #2 -> WithLatestFrom
                -> Equal
                -> WorkflowOutput
            -> Merge => #5
            SubscribeSubject Key => #6
            #5, #6 -> WithLatestFrom
            -> WorkflowOutput
        -> Zip
        -> SelectMany
            WorkflowInput Source1
            -> Take(Count=1)
            -> Merge => #2
            -> MemberSelector(Selector=Item1.Item1)
            -> ToArray => #4
            #2 -> MemberSelector(Selector=Item1.Item2)
            -> ToArray => #6
            #2 -> MemberSelector(Selector=Item2)
            -> ToArray => #8
            #4, #6, #8 -> Zip
            -> WorkflowOutput
        -> Disable Bonsai.Scripting.Expressions.ExpressionTransform
          Expression:
            new(
                it[0].item1 as Feeder1,
                it[1].item1 as Feeder2,
                it[2].item1 as Feeder3,
                it[3].item1 as Feeder4)
        -> SampleInterval(Interval=PT0.02S)
        -> WorkflowOutput

        Disable SubscribeSubject InStateWheelDeltaDisplacement => #23
        Disable SubscribeSubject Count => #24
        #23, #24 -> Disable WithLatestFrom
        -> Disable InputMapping(Selector=Item1, Count(Selector=Item2))
        -> Disable Take(Count=4)
        -> Disable ToArray
        -> Disable OrderBy(KeySelector=Key)
        -> Disable Merge
    -> Switch => #75
    -> Bonsai.Gui.ZedGraph.RollingGraphBuilder(IndexSelector="", ValueSelector=Item1, SymbolType=None, LineWidth=1, CurveSettings="", Capacity=10000, Min=nil, Max=nil)
    -> VisualizerMapping
    -> Bonsai.Gui.TableLayoutPanelBuilder FeedersDistance(Enabled=true, Visible=true, ColumnCount=1, RowCount=1, ColumnStyles="", RowStyles="", CellSpans="")
    -> VisualizerMapping => #79
    #72, #79 -> Bonsai.Gui.TableLayoutPanelBuilder FeedersInState
      Enabled=true
      Visible=true
      ColumnCount=1
      RowCount=2
      ColumnStyles=""
      RowStyles(RowStyle(SizeType=Percent, Height=25), RowStyle(SizeType=Percent, Height=75))
      CellSpans=""
    -> WorkflowOutput
    #75 -> MemberSelector(Selector=Item1)
    -> SelectMany
        WorkflowInput Source1
        -> Take(Count=1)
        -> AsyncSubject array

        SubscribeSubject array
        -> Merge
        -> WorkflowOutput
    -> Disable Bonsai.Dsp.ConvertToMat

    Disable SubscribeSubject FeedersTask
    -> Disable Condition
        WorkflowInput Source1
        -> MemberSelector(Selector=Key)
        -> WithLatestFrom
        -> Equal(Operand=StringProperty)
        -> WorkflowOutput
    -> Disable Merge
-> VisualizerMapping => #5
Disable Defer WeightMonitor
    BehaviorSubject<System.Single> CurrentWeightValue
    BehaviorSubject<System.Single> CurrentMinuteWeightValue

    SubscribeSubject PercentWeightLoss
    -> Merge
    -> Take(Count=1)
    -> SelectMany StartAveraging
        SubscribeSubject NestWeightData
        -> Merge => #1
        SubscribeSubject PercentWeightLoss
        -> Merge => #3
        #1, #3 -> WithLatestFrom
        -> MemberSelector(Selector=Item2)
        -> MemberSelector(Selector=CurrentWeight)
        -> WindowTime(TimeSpan=PT1S)
        -> SelectMany Average
            WorkflowInput Source1
            -> Average => #1
            SubscribeSubject CurrentWeightValue
            -> Take(Count=1) => #3
            #1, #3 -> Catch
            -> Take(Count=1)
            -> WorkflowOutput
        -> Condition
            WorkflowInput Source1
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: Single.IsNaN(it)
            -> BitwiseNot
            -> WorkflowOutput
        -> WorkflowOutput
    -> MulticastSubject CurrentWeightValue

    SubscribeSubject PercentWeightLoss
    -> Merge => #8
    -> MemberSelector(Selector=Timestamp)
    -> Aeon.Acquisition.GetDateTime => #10
    #8 -> MemberSelector(Selector=CurrentWeight) => #11
    #8 -> MemberSelector(Selector=CurrentPercent) => #12
    #10, #11, #12 -> Zip
    -> Format
      Format:
        Timestamp: {0}
        Weight: {1}
        LossWeightPercent: {2}
      Selector="Item1,Item2,Item3"
    -> PropertyMapping(Text)
    -> Bonsai.Gui.LabelBuilder Weight
      Enabled=true
      Visible=true
      Font="Microsoft Sans Serif, 12pt, style=Bold"
      Text:
        Timestamp: 11/19/2025 09:39:07
        Weight: 21.46025
        LossWeightPercent: 63.11837
    -> VisualizerMapping => #17
    SubscribeSubject CurrentWeightValue
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: new (it as Weight)
    -> Bonsai.Gui.ZedGraph.RollingGraphBuilder(ValueSelector=Weight, SymbolType=None, LineWidth=1, CurveSettings="", Capacity=60, Min=nil, Max=nil)
    -> VisualizerMapping => #21
    SubscribeSubject CurrentWeightValue
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: new (it as Weight)
    -> Bonsai.Gui.ZedGraph.RollingGraphBuilder(ValueSelector=Weight, SymbolType=None, LineWidth=1, CurveSettings="", Capacity=3600, Min=nil, Max=nil)
    -> VisualizerMapping => #25
    SubscribeSubject CurrentWeightValue
    -> WindowTime(TimeSpan=PT1M)
    -> SelectMany
        WorkflowInput Source1
        -> Average => #1
        SubscribeSubject CurrentMinuteWeightValue => #2
        #1, #2 -> Catch
        -> Take(Count=1)
        -> WorkflowOutput
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: new (it as Weight)
    -> Bonsai.Gui.ZedGraph.RollingGraphBuilder(ValueSelector=Weight, SymbolType=None, LineWidth=1, CurveSettings="", Capacity=14400, Min=nil, Max=nil)
    -> VisualizerMapping => #31
    #17, #21, #25, #31 -> Bonsai.Gui.TableLayoutPanelBuilder Weight
      Enabled=true
      Visible=true
      ColumnCount=1
      RowCount=3
      ColumnStyles=""
      RowStyles
        RowStyle(SizeType=Percent, Height=10)
        RowStyle(SizeType=Percent, Height=30)
        RowStyle(SizeType=Percent, Height=30)
        RowStyle(SizeType=Percent, Height=30)
      CellSpans=""
    -> WorkflowOutput
-> Disable VisualizerMapping => #7
Defer Task
    SubscribeSubject TaskConfiguration
    -> MemberSelector(Selector=Looms)
    -> Merge
    -> SelectMany
        WorkflowInput Source1
        -> Take(Count=1)
        -> AsyncSubject LoomScreen

        SubscribeSubject LoomScreen => #3
        -> MemberSelector(Selector=Value)
        -> Merge
        -> MemberSelector(Selector=Key)
        -> ToArray => #7
        #3 -> MemberSelector(Selector=Key) => #8
        #7, #8 -> Zip
        -> WorkflowOutput
    -> ToDictionary(KeySelector=Item2, ElementSelector=Item1)
    -> ReplaySubject Looms(BufferSize=nil)

    SubscribeSubject SelectedLooms
    -> MemberSelector(Selector=Item2)
    -> Distinct
    -> Aeon.Acquisition.CreateGroup
        WorkflowInput Source1
        -> Take(Count=1)
        -> AsyncSubject ScreenName

        SubscribeSubject SelectedLooms => #3
        SubscribeSubject ScreenName => #4
        #3, #4 -> WithLatestFrom
        -> Condition
            WorkflowInput Source1
            -> MemberSelector(Selector="Item1.Item2,Item2")
            -> Equal
            -> WorkflowOutput
        -> MemberSelector(Selector=Item1.Item1)
        -> WorkflowOutput
    -> MulticastSubject SelectedLoomsObservable

    SubscribeSubject Looms
    -> MemberSelector(Selector=Keys)
    -> Merge
    -> ToArray
    -> Bonsai.Gui.ListBoxDataSourceBuilder(Enabled=true, Visible=true, DisplayMember="")
    -> BehaviorSubject ScreenName
    -> VisualizerMapping => #17
    SubscribeSubject ScreenName
    -> SelectMany SelectActives
        WorkflowInput Source1
        -> Take(Count=1)
        -> AsyncSubject ScreenName

        SubscribeSubject SelectedLoomsObservable => #3
        SubscribeSubject ScreenName
        -> PropertyMapping(Value) => #5
        #3, #5 -> Condition
            WorkflowInput Source1
            -> MemberSelector(Selector=Key) => #1
            ExternalizedMapping(Value) => #2
            #1, #2 -> Equal(Operand=WorkflowProperty<HtsLoom.ScreenName>(Value=ScreenEast))
            -> WorkflowOutput
        -> Merge
        -> WorkflowOutput
    -> Bonsai.Gui.ListBoxDataSourceBuilder(Enabled=true, Visible=true, DisplayMember="")
    -> VisualizerMapping => #21
    SubscribeSubject TaskLoom
    -> SelectMany
        WorkflowInput Source1
        -> Take(Count=1)
        -> AsyncSubject ScreeenLoom

        SubscribeSubject ScreeenLoom
        -> Merge => #4
        -> MemberSelector(Selector=Key) => #5
        SubscribeSubject ScreeenLoom
        -> MemberSelector(Selector=Key) => #7
        #5, #7 -> WithLatestFrom => #8
        #4 -> Timestamp
        -> MemberSelector(Selector=Timestamp.UtcDateTime) => #10
        #8, #10 -> Zip
        -> IncludeWorkflow(Path=Aeon.Environment:EnvironmentCondition.bonsai, Value=Experiment)
        -> WorkflowOutput
    -> VisualizerMapping => #24
    SubscribeSubject InputExpanderEvents
    -> Harp.InputExpander.Parse(Register=Harp.InputExpander.DigitalInput)
    -> MemberSelector(Selector=DigitalInputState) => #27
    -> BufferTime(TimeSpan=PT1S)
    -> MemberSelector(Selector=Count)
    -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Design.ObjectTextVisualizer>) => #30
    #24, #30 -> Bonsai.Gui.TableLayoutPanelBuilder(Enabled=true, Visible=true, ColumnCount=2, RowCount=1, ColumnStyles="", RowStyles="", CellSpans="")
    -> VisualizerMapping => #32
    #27 -> InputMapping(Value(Selector=value__))
    -> IntProperty(Value=0)
    -> VisualizerMapping => #35
    #17, #21, #32, #35 -> Bonsai.Gui.TableLayoutPanelBuilder LoomMapping(Enabled=true, Visible=true, ColumnCount=1, RowCount=4, ColumnStyles="", RowStyles="", CellSpans="")
    -> WorkflowOutput

    SubscribeSubject ScreenName
    -> CreateObservable
        WorkflowInput Source1
        -> Take(Count=1)
        -> AsyncSubject ScreenName

        SubscribeSubject Looms => #3
        SubscribeSubject ScreenName
        -> PropertyMapping(Value) => #5
        #3, #5 -> Index(Operand=WorkflowProperty<HtsLoom.ScreenName>(Value=ScreenEast))
        -> Bonsai.Gui.ListBoxDataSourceBuilder(Enabled=true, Visible=true, Font="Microsoft Sans Serif, 12pt", DisplayMember="") => #7
        -> Skip(Count=1)
        -> PublishSubject SelectedItem
        #7 -> VisualizerMapping => #10
        Bonsai.Gui.ButtonBuilder Select(Enabled=true, Visible=true, Text=Select) => #11
        -> VisualizerMapping => #12
        #10, #12 -> Bonsai.Gui.TableLayoutPanelBuilder(Enabled=true, Visible=true, ColumnCount=1, RowCount=2, ColumnStyles="", RowStyles="", CellSpans="") => #13
        ExternalizedMapping(Visible) => #14
        #13, #14 -> Bonsai.Design.VisualizerWindow(Visible=true, Location=nil, Size=nil, WindowState=nil)
        SubscribeSubject SelectedItem => #16
        #16, #11 -> TakeUntil
        -> Distinct
        -> ToList
        -> Repeat => #20
        SubscribeSubject ScreenName => #21
        #20, #21 -> WithLatestFrom
        -> WorkflowOutput
    -> Switch
    -> BehaviorSubject SelectedLooms
-> VisualizerMapping => #9
#1, #3, #5, #7, #9 -> Bonsai.Gui.TabControlBuilder Environment(Enabled=true, Visible=true)
-> VisualizerMapping => #11
Defer CameraViz
    SubscribeSubject FrameEvents
    -> MemberSelector(Selector=Key) => #1
    SubscribeSubject RigConfiguration
    -> MemberSelector(Selector=Cameras.Count)
    -> PropertyMapping(Count) => #4
    #1, #4 -> Take(Count=10)
    -> ToArray
    -> Bonsai.Gui.ListBoxDataSourceBuilder(Enabled=true, Visible=true, DisplayMember="")
    -> BehaviorSubject SelectedCamera
    -> VisualizerMapping => #9
    SubscribeSubject SelectedCamera
    -> CreateObservable
        WorkflowInput Source1
        -> Take(Count=1)
        -> AsyncSubject SelectedCamera

        SubscribeSubject FrameEvents
        -> Condition
            WorkflowInput Source1 => #0
            SubscribeSubject SelectedCamera => #1
            #0, #1 -> WithLatestFrom
            -> MemberSelector(Selector="Item1.Key.Item1,Item2.Item1")
            -> Equal
            -> WorkflowOutput
        -> Merge
        -> MemberSelector(Selector=Value.Image)
        -> WorkflowOutput
    -> Switch => #12
    -> BufferTime(TimeSpan=PT1S)
    -> MemberSelector(Selector=Count)
    -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Design.ObjectTextVisualizer>) => #15
    Defer CamerasControlButton
        BehaviorSubject<System.Boolean> CamerasRunning => #0
        -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> StringProperty(Value=Stop) => #2
        #0 -> BitwiseNot
        -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> StringProperty(Value=Start) => #5
        #2, #5 -> Merge
        -> PropertyMapping(Text) => #7
        BooleanProperty(Value=false)
        -> PropertyMapping(Checked) => #9
        #7, #9 -> Bonsai.Gui.ToggleButtonBuilder(Enabled=true, Visible=true, Text=Start, Checked=false)
        -> MulticastSubject CamerasRunning
        -> WorkflowOutput

        SubscribeSubject CamerasRunning
        -> Skip(Count=1) => #14
        -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> MulticastSubject StartCameras
        #14 -> BitwiseNot
        -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> MulticastSubject StopCameras
    -> VisualizerMapping => #17
    Bonsai.Gui.CheckBoxBuilder Original(Enabled=true, Visible=true, Text=Original, Checked=true)
    -> BehaviorSubject Original
    -> VisualizerMapping => #20
    #9, #15, #17, #20 -> Bonsai.Gui.TableLayoutPanelBuilder(Enabled=true, Visible=true, ColumnCount=4, RowCount=1, ColumnStyles="", RowStyles="", CellSpans="")
    -> VisualizerMapping => #22
    BehaviorSubject<OpenCV.Net.IplImage> image
    -> VisualizerMapping => #24
    SubscribeSubject SelectedCamera
    -> MemberSelector(Selector=Item1)
    -> IncludeWorkflow Heatmap(Path=Extensions\SelectStream.bonsai)
    -> VisualizerMapping => #28
    SubscribeSubject SelectedCamera
    -> MemberSelector(Selector=Item1)
    -> IncludeWorkflow TrackingEvents(Path=Extensions\SelectStream.bonsai)
    -> MemberSelector(Selector=Value) => #32
    -> MemberSelector(Selector=Item2)
    -> VisualizerMapping => #34
    SubscribeSubject SelectedCamera
    -> GroupWorkflow SelectStream
        WorkflowInput Source1 => #0
        ExternalizedMapping(Name) => #1
        #0, #1 -> CreateObservable
            WorkflowInput Source1
            -> Take(Count=1)
            -> AsyncSubject SelectedCamera

            ExternalizedMapping(Name)
            -> SubscribeSubject HeadTailLag => #4
            SubscribeSubject SelectedCamera => #5
            #4, #5 -> WithLatestFrom
            -> Condition
                WorkflowInput Source1
                -> MemberSelector(Selector="Item1.Key,Item2.Item1")
                -> Equal
                -> WorkflowOutput
            -> MemberSelector(Selector=Item1)
            -> Merge
            -> WorkflowOutput
            #4 -> MemberSelector(Selector=Key)
        -> Switch
        -> WorkflowOutput
    -> MemberSelector(Selector=Value)
    -> Bonsai.Gui.ZedGraph.RollingGraphBuilder(SymbolType=None, LineWidth=1, CurveSettings="", Capacity=10000, Min=nil, Max=nil)
    -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Design.Visualizers.TimeSeriesVisualizer>) => #39
    #28, #34, #39 -> Bonsai.Gui.TableLayoutPanelBuilder Heatmap
      Enabled=true
      Visible=true
      ColumnCount=2
      RowCount=2
      ColumnStyles=""
      RowStyles=""
      CellSpans(CellSpan(ColumnSpan=1, RowSpan=1), CellSpan(ColumnSpan=1, RowSpan=1), CellSpan(ColumnSpan=2, RowSpan=1))
    -> VisualizerMapping => #41
    #22, #24, #41 -> Bonsai.Gui.TableLayoutPanelBuilder Cameras
      Enabled=true
      Visible=true
      ColumnCount=1
      RowCount=3
      ColumnStyles=""
      RowStyles(RowStyle(SizeType=Percent, Height=10), RowStyle(SizeType=Percent, Height=50), RowStyle(SizeType=Percent, Height=40))
      CellSpans=""
    -> WorkflowOutput
    SubscribeSubject Original => #44
    #32, #44 -> WithLatestFrom
    -> Condition NotOriginal
        WorkflowInput Source1
        -> MemberSelector(Selector=Item2)
        -> BitwiseNot
        -> WorkflowOutput
    -> MemberSelector(Selector=Item1.Item3)
    -> MulticastSubject image
    SubscribeSubject Original => #49
    #12, #49 -> WithLatestFrom
    -> Condition Original
        WorkflowInput Source1
        -> MemberSelector(Selector=Item2)
        -> WorkflowOutput
    -> MemberSelector(Selector=Item1)
    -> MulticastSubject image
-> VisualizerMapping => #13
ExternalizedMapping(NumberOfBlobs)
-> Defer HeadTailViz
    ExternalizedMapping(NumberOfBlobs)
    -> GroupWorkflow Tracking
        BehaviorSubject<System.Int32> BlobId
        BehaviorSubject<System.String> HistVsHeadTail

        ExternalizedMapping(Count(DisplayName=NumberOfBlobs))
        -> Range(Start=0, Count=1)
        -> ReplaySubject BlobsRange(BufferSize=nil)

        SubscribeSubject HeadTailObservable
        -> SelectMany Histograms
            WorkflowInput Source1
            -> Take(Count=1)
            -> AsyncSubject HeadTail

            SubscribeSubject HeadTail
            -> Merge
            -> SampleInterval(Interval=PT0.1S)
            -> MemberSelector(Selector=Value.Item1.Centroid)
            -> Bonsai.Dsp.Histogram2D(MinX=0, MaxX=1440, MinY=0, MaxY=1080, BinsX=288, BinsY=216, Normalize=false, Accumulate=true)
            -> Bonsai.Dsp.ConvertScale(Depth=U8, Scale=20, Shift=0) => #8
            SubscribeSubject HeadTail
            -> MemberSelector(Selector=Key) => #10
            #8, #10 -> WithLatestFrom
            -> WorkflowOutput
        -> GroupBy(KeySelector=Item2, ElementSelector=Item1)
        -> ReplaySubject Histograms(BufferSize=nil)

        SubscribeSubject SelectedCamera => #9
        SubscribeSubject BlobId => #10
        #9, #10 -> CombineLatest
        -> BehaviorSubject SelectedItemKey

        SubscribeSubject SelectedItemKey
        -> IncludeWorkflow HeadTailObservable(Path=Extensions\GetStreamCameraBlobId.bonsai)
        -> Switch
        -> PublishSubject SelectedHeadTail

    GroupWorkflow Zones
        SubscribeSubject SelectedCamera
        -> SelectMany NoZones
            SubscribeSubject HeadTailTrackingSettings => #0
            WorkflowInput Source1
            -> Take(Count=1)
            -> PropertyMapping(Value) => #3
            #0, #3 -> Index(Operand=WorkflowProperty<HtsLoom.CameraName>(Value=CameraNorth))
            -> MemberSelector(Selector=Zones)
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: it==null
            -> WorkflowOutput
        -> BehaviorSubject NoZones

        SubscribeSubject SelectedItemKey => #3
        BehaviorSubject<System.Int32> SelectedZoneIndex => #4
        #3, #4 -> CombineLatest
        -> MemberSelector(Selector="Item1.Item1,Item1.Item2,Item2")
        -> BehaviorSubject SelectedZoneKey

        SubscribeSubject SelectedCamera
        -> SelectMany GetZones
            SubscribeSubject HeadTailTrackingSettings => #0
            WorkflowInput Source1
            -> Take(Count=1)
            -> PropertyMapping(Value) => #3
            #0, #3 -> Index(Operand=WorkflowProperty<HtsLoom.CameraName>(Value=CameraNorth))
            -> Condition HasZones
                WorkflowInput Source1
                -> MemberSelector(Selector=Zones)
                -> Bonsai.Scripting.Expressions.ExpressionTransform
                  Expression: it!=null
                -> WorkflowOutput
            -> MemberSelector(Selector=Zones)
            -> WorkflowOutput
        -> BehaviorSubject SelectedZones
        -> MemberSelector(Selector=Count)

        SubscribeSubject SelectedZoneKey
        -> IncludeWorkflow LoomAngleObservable(Path="Extensions\FindBlobsInZoneId .bonsai")
        -> Switch
        -> Condition NoZones
            WorkflowInput Source1 => #0
            SubscribeSubject NoZones => #1
            #0, #1 -> WithLatestFrom
            -> MemberSelector(Selector=Item2)
            -> BitwiseNot
            -> WorkflowOutput
        -> PublishSubject SelectedLoomAngle

        SubscribeSubject SelectedZoneKey
        -> IncludeWorkflow LoomAngleObservable(Path="Extensions\FindBlobsInZoneId .bonsai")
        -> Switch
        -> Condition NoZones
            WorkflowInput Source1 => #0
            SubscribeSubject NoZones => #1
            #0, #1 -> WithLatestFrom
            -> MemberSelector(Selector=Item2)
            -> BitwiseNot
            -> WorkflowOutput
        -> PublishSubject SelectedLoomRegion

    SubscribeSubject HeadTailTrackingSettings
    -> MemberSelector(Selector=Keys)
    -> Merge
    -> ToArray
    -> Bonsai.Gui.ListBoxDataSourceBuilder(Enabled=true, Visible=true, DisplayMember="")
    -> BehaviorSubject SelectedCamera
    -> VisualizerMapping => #9
    SubscribeSubject BlobsRange
    -> Format(Format="BlobId {0}", Selector=it)
    -> ToArray
    -> Bonsai.Gui.ListBoxDataSourceBuilder(Enabled=true, Visible=true, DisplayMember="")
    -> Sink
        WorkflowInput Source1
        -> Parse(Pattern="BlobId %i")
        -> MulticastSubject BlobId
        -> WorkflowOutput
    -> VisualizerMapping => #15
    SubscribeSubject SelectedZones
    -> SelectMany => #17
        WorkflowInput Source1
        -> Take(Count=1)
        -> AsyncSubject source

        SubscribeSubject source
        -> Merge
        -> ElementIndex
        -> MemberSelector(Selector=Index)
        -> Format(Format="Zone {0}", Selector=it)
        -> ToArray
        -> WorkflowOutput
    SubscribeSubject NoZones
    -> Condition
        WorkflowInput Source1
        -> WorkflowOutput
    -> SelectMany => #20
        StringProperty
        -> Take(Count=1)
        -> ToArray
        -> WorkflowOutput
    #17, #20 -> Merge
    -> Bonsai.Gui.ListBoxDataSourceBuilder(Enabled=true, Visible=true, DisplayMember="")
    -> Sink
        WorkflowInput Source1
        -> Parse(Pattern="Zone %i")
        -> MulticastSubject SelectedZoneIndex
        -> WorkflowOutput
    -> VisualizerMapping => #24
    Bonsai.Gui.ListBoxBuilder(Enabled=true, Visible=true, Items(string=Histogram, string=HeadTail, string=Zone), SelectedItem=Histogram)
    -> Sink
        WorkflowInput Source1
        -> MulticastSubject HistVsHeadTail
        -> WorkflowOutput
    -> VisualizerMapping => #27
    #9, #15, #24, #27 -> Bonsai.Gui.TableLayoutPanelBuilder(Enabled=true, Visible=true, ColumnCount=4, RowCount=1, ColumnStyles="", RowStyles="", CellSpans="")
    -> VisualizerMapping => #29
    SubscribeSubject HistVsHeadTail
    -> CreateObservable HistogramOrHeadTail
        WorkflowInput Source1
        -> Take(Count=1)
        -> AsyncSubject SelectedStream

        SubscribeSubject SelectedItemKey
        -> CreateObservable Histogram2D
            WorkflowInput Source1
            -> AsyncSubject selectedItem

            SubscribeSubject Histograms
            -> Condition
                WorkflowInput Source1
                -> MemberSelector(Selector=Key) => #1
                SubscribeSubject selectedItem => #2
                #1, #2 -> WithLatestFrom
                -> IncludeWorkflow(Path=Extensions\EqualTuple2.bonsai)
                -> WorkflowOutput
            -> Merge
            -> WorkflowOutput
        -> Switch => #5
        SubscribeSubject SelectedStream
        -> Condition => #7
            WorkflowInput Source1 => #0
            ExternalizedMapping(Value) => #1
            #0, #1 -> Equal(Operand=StringProperty(Value=Histogram))
            -> WorkflowOutput
        #5, #7 -> SubscribeWhen => #8
        SubscribeSubject SelectedCamera
        -> CreateObservable HeadTailVisualizer
            WorkflowInput Source1
            -> AsyncSubject SelectedCamera

            ExternalizedMapping(Name)
            -> SubscribeSubject HeadTailObservable => #3
            SubscribeSubject SelectedCamera
            -> PropertyMapping(Value) => #5
            #3, #5 -> Condition
                WorkflowInput Source1
                -> MemberSelector(Selector=Key.Item1) => #1
                ExternalizedMapping(Value) => #2
                #1, #2 -> Equal(Operand=WorkflowProperty<HtsLoom.CameraName>(Value=CameraNorth))
                -> WorkflowOutput
            -> ReplaySubject HeadTails(BufferSize=nil)

            SubscribeSubject FrameEvents
            -> Condition
                WorkflowInput Source1
                -> MemberSelector(Selector=Key.Item1) => #1
                SubscribeSubject SelectedCamera => #2
                #1, #2 -> WithLatestFrom
                -> Equal
                -> WorkflowOutput
            -> Merge
            -> PublishSubject ProcessedImage

            SubscribeSubject ProcessedImage
            -> SampleInterval(Interval=PT0.1S)
            -> SelectMany
                SubscribeSubject HeadTails
                -> Take(Count=1)
                -> SelectMany
                    ExternalizedMapping(Name(DisplayName=ProcessedImage, Category=Subject)) => #0
                    -> SubscribeSubject ProcessedImage
                    -> MemberSelector(Selector=Value.Image)
                    -> GroupWorkflow CreateCanvas => #3
                        WorkflowInput Source1
                        -> InputMapping(Size(Selector=Size))
                        -> Bonsai.Vision.Drawing.CreateCanvas(Size(Width=1440, Height=1080), Depth=U8, Channels=4, Color(Val0=0, Val1=0, Val2=0, Val3=0))
                        -> WorkflowOutput
                    #3, #0 -> GroupWorkflow AddImage
                        WorkflowInput Source1 => #0
                        ExternalizedMapping(Name)
                        -> SubscribeSubject ProcessedImage => #2
                        -> MemberSelector(Selector=Value.Image)
                        -> Bonsai.Vision.ConvertColor(Conversion=Gray2Bgra) => #4
                        #2 -> MemberSelector(Selector=Value.Image.Size)
                        -> Bonsai.Scripting.Expressions.ExpressionTransform => #6
                          Expression: new (0 as X, 0 as Y ,it.Width as Width, it.Height as Height)
                        #0, #4, #6 -> Zip
                        -> InputMapping(Selector=Item1, Image(Selector=Item2), Destination(Selector="Item3.X,Item3.Y,Item3.Width,Item3.Height"))
                        -> Bonsai.Vision.Drawing.AddImage(Destination(X=0, Y=0, Width=1440, Height=1080), Interpolation=Linear)
                        -> WorkflowOutput
                    -> Take(Count=1)
                    -> WorkflowOutput
                -> BehaviorSubject Canvas

                SubscribeSubject BlobsRange => #4
                SubscribeSubject Canvas => #5
                #4, #5 -> SubscribeWhen
                -> IncludeWorkflow(Path=Extensions\DrawBlob.bonsai, ExternalColor(Val0=255, Val1=0, Val2=255, Val3=255))
                -> MemberSelector(Selector=Item1)
                -> TakeLast(Count=1)
                -> Bonsai.Vision.Drawing.DrawCanvas
                -> WorkflowOutput
            -> WorkflowOutput
        -> Switch => #11
        SubscribeSubject SelectedStream
        -> Condition => #13
            WorkflowInput Source1 => #0
            ExternalizedMapping(Value) => #1
            #0, #1 -> Equal(Operand=StringProperty(Value=HeadTail))
            -> WorkflowOutput
        #11, #13 -> SubscribeWhen => #14
        SubscribeSubject SelectedCamera
        -> CreateObservable ZoneVisualizer
            WorkflowInput Source1
            -> AsyncSubject SelectedCamera

            SubscribeSubject HeadTailObservable => #2
            SubscribeSubject SelectedCamera
            -> PropertyMapping(Value) => #4
            #2, #4 -> Condition
                WorkflowInput Source1
                -> MemberSelector(Selector=Key.Item1) => #1
                ExternalizedMapping(Value) => #2
                #1, #2 -> Equal(Operand=WorkflowProperty<HtsLoom.CameraName>(Value=CameraNorth))
                -> WorkflowOutput
            -> ReplaySubject HeadTails(BufferSize=nil)

            SubscribeSubject FrameEvents
            -> Condition
                WorkflowInput Source1
                -> MemberSelector(Selector=Key.Item1) => #1
                SubscribeSubject SelectedCamera => #2
                #1, #2 -> WithLatestFrom
                -> Equal
                -> WorkflowOutput
            -> Merge
            -> PublishSubject ProcessedImage

            SubscribeSubject ProcessedImage
            -> SampleInterval(Interval=PT0.1S)
            -> SelectMany PaintSelectedRegion
                GroupWorkflow DrawImage
                    SubscribeSubject SelectedZones => #0
                    SubscribeSubject SelectedZoneIndex
                    -> PropertyMapping(Value) => #2
                    #0, #2 -> Index(Operand=IntProperty(Value=0))
                    -> Take(Count=1)
                    -> AsyncSubject Zone
                    -> SelectMany CreateCanvas
                        ExternalizedMapping(Name(DisplayName=ProcessedImage, Category=Subject)) => #0
                        -> SubscribeSubject ProcessedImage
                        -> MemberSelector(Selector=Value.Image)
                        -> GroupWorkflow CreateCanvas => #3
                            WorkflowInput Source1
                            -> InputMapping(Size(Selector=Size))
                            -> Bonsai.Vision.Drawing.CreateCanvas(Size(Width=1440, Height=1080), Depth=U8, Channels=4, Color(Val0=0, Val1=0, Val2=0, Val3=0))
                            -> WorkflowOutput
                        #3, #0 -> GroupWorkflow AddImage
                            WorkflowInput Source1 => #0
                            ExternalizedMapping(Name)
                            -> SubscribeSubject ProcessedImage => #2
                            -> MemberSelector(Selector=Value.Image)
                            -> Bonsai.Vision.ConvertColor(Conversion=Gray2Bgra) => #4
                            #2 -> MemberSelector(Selector=Value.Image.Size)
                            -> Bonsai.Scripting.Expressions.ExpressionTransform => #6
                              Expression: new (0 as X, 0 as Y ,it.Width as Width, it.Height as Height)
                            #0, #4, #6 -> Zip
                            -> InputMapping(Selector=Item1, Image(Selector=Item2), Destination(Selector="Item3.X,Item3.Y,Item3.Width,Item3.Height"))
                            -> Bonsai.Vision.Drawing.AddImage(Destination(X=0, Y=0, Width=1440, Height=1080), Interpolation=Linear)
                            -> WorkflowOutput
                        -> Take(Count=1)
                        -> WorkflowOutput
                    -> WorkflowOutput
                -> BehaviorSubject Canvas

                SubscribeSubject Canvas
                -> Take(Count=1)
                -> SelectMany DrawContour
                    SubscribeSubject SelectedZoneKey
                    -> IncludeWorkflow LoomRegionStateObservable(Path="Extensions\FindBlobsInZoneId .bonsai")
                    -> Merge
                    -> MemberSelector(Selector=Value) => #3
                    -> Condition
                        WorkflowInput Source1
                        -> WorkflowOutput
                    -> PropertySource<Bonsai.Vision.Drawing.DrawContours,OpenCV.Net.Scalar>(MemberName=ExternalColor, Value(Val0=0, Val1=0, Val2=255, Val3=255)) => #5
                    #3 -> Condition Not
                        WorkflowInput Source1
                        -> BitwiseNot
                        -> WorkflowOutput
                    -> PropertySource<Bonsai.Vision.Drawing.DrawContours,OpenCV.Net.Scalar>(MemberName=ExternalColor, Value(Val0=255, Val1=0, Val2=255, Val3=255)) => #7
                    #5, #7 -> Merge
                    -> BehaviorSubject Collor

                    SubscribeSubject SelectedItemKey
                    -> Take(Count=1)
                    -> MemberSelector(Selector=Item2) => #12
                    SubscribeSubject Collor => #13
                    #12, #13 -> SubscribeWhen => #14
                    #13 -> PropertyMapping(ExternalColor) => #15
                    #14, #15 -> IncludeWorkflow(Path=Extensions\DrawBlob.bonsai, ExternalColor(Val0=255, Val1=0, Val2=255, Val3=255))
                    -> WorkflowOutput
                -> AsyncSubject Blob

                SubscribeSubject Blob
                -> SelectMany DrawZones
                    SubscribeSubject Zone
                    -> MemberSelector(Selector=Regions)
                    -> Merge
                    -> CreateObservable
                        WorkflowInput Source1
                        -> Take(Count=1)
                        -> AsyncSubject Region

                        SubscribeSubject Region
                        -> MemberSelector(Selector=Points)
                        -> Condition
                            WorkflowInput Source1
                            -> MemberSelector(Selector=Count)
                            -> GreaterThan(Operand=IntProperty(Value=0))
                            -> WorkflowOutput
                        -> Take(Count=1)
                        -> AsyncSubject Points

                        SubscribeSubject Points
                        -> Merge => #9
                        SubscribeSubject Points
                        -> Index(Operand=IntProperty(Value=0))
                        -> Take(Count=1) => #12
                        #9, #12 -> Concat => #13
                        -> Skip(Count=1) => #14
                        #13, #14 -> Zip
                        -> MemberSelector(Selector="Item1,Item2")
                        -> CreateObservable
                            WorkflowInput Source1
                            -> Take(Count=1)
                            -> AsyncSubject Point

                            SubscribeSubject Canvas => #3
                            SubscribeSubject Point => #4
                            -> MemberSelector(Selector=Item1) => #5
                            #3, #5 -> Sample
                            -> Take(Count=1) => #7
                            #5 -> PropertyMapping(Center(Selector="X,Y")) => #8
                            #7, #8 -> Bonsai.Vision.Drawing.Circle(Center(X=360, Y=483), Radius=10, Color(Val0=255, Val1=255, Val2=0, Val3=255), Thickness=2, LineType=Connected8, Shift=0) => #9
                            #5 -> PropertyMapping(Start(Selector="X,Y")) => #10
                            #4 -> MemberSelector(Selector=Item2)
                            -> PropertyMapping(End(Selector="X,Y")) => #12
                            #9, #10, #12 -> Bonsai.Vision.Drawing.Line(Start(X=360, Y=483), End(X=243, Y=387), Color(Val0=0, Val1=255, Val2=255, Val3=255), Thickness=2, LineType=Connected8, Shift=0)
                            -> MulticastSubject Canvas
                            -> WorkflowOutput
                        -> Concat
                        -> WorkflowOutput
                    -> Concat
                    -> TakeLast(Count=1)
                    -> WorkflowOutput
                -> AsyncSubject Zones

                SubscribeSubject Zones
                -> SelectMany DrawPosition
                    SubscribeSubject Canvas
                    -> Take(Count=1) => #1
                    SubscribeSubject Zone
                    -> MemberSelector(Selector=Position)
                    -> PropertyMapping(Center(Selector="X,Y")) => #4
                    #1, #4 -> Bonsai.Vision.Drawing.Circle(Center(X=741, Y=140), Radius=10, Color(Val0=0, Val1=255, Val2=255, Val3=255), Thickness=5, LineType=Connected8, Shift=0)
                    -> WorkflowOutput
                -> Bonsai.Vision.Drawing.DrawCanvas
                -> WorkflowOutput
            -> WorkflowOutput

            Disable GroupWorkflow "All regions"
                SubscribeSubject HeadTails
                -> SelectMany
                    ExternalizedMapping(Name(DisplayName=ProcessedImage, Category=Subject)) => #0
                    -> SubscribeSubject ProcessedImage
                    -> MemberSelector(Selector=Value.Image)
                    -> GroupWorkflow CreateCanvas => #3
                        WorkflowInput Source1
                        -> InputMapping(Size(Selector=Size))
                        -> Bonsai.Vision.Drawing.CreateCanvas(Size(Width=1440, Height=1080), Depth=U8, Channels=4, Color(Val0=0, Val1=0, Val2=0, Val3=0))
                        -> WorkflowOutput
                    #3, #0 -> GroupWorkflow AddImage
                        WorkflowInput Source1 => #0
                        ExternalizedMapping(Name)
                        -> SubscribeSubject ProcessedImage => #2
                        -> MemberSelector(Selector=Value.Image)
                        -> Bonsai.Vision.ConvertColor(Conversion=Gray2Bgra) => #4
                        #2 -> MemberSelector(Selector=Value.Image.Size)
                        -> Bonsai.Scripting.Expressions.ExpressionTransform => #6
                          Expression: new (0 as X, 0 as Y ,it.Width as Width, it.Height as Height)
                        #0, #4, #6 -> Zip
                        -> InputMapping(Selector=Item1, Image(Selector=Item2), Destination(Selector="Item3.X,Item3.Y,Item3.Width,Item3.Height"))
                        -> Bonsai.Vision.Drawing.AddImage(Destination(X=0, Y=0, Width=1440, Height=1080), Interpolation=Linear)
                        -> WorkflowOutput
                    -> Take(Count=1)
                    -> WorkflowOutput
                -> BehaviorSubject Canvas

                SubscribeSubject SelectedZones
                -> Take(Count=1)
                -> Merge
                -> Take(Count=1)
                -> MemberSelector(Selector=Regions)
                -> Merge
                -> CreateObservable
                    WorkflowInput Source1
                    -> Take(Count=1)
                    -> AsyncSubject Region

                    SubscribeSubject Region
                    -> MemberSelector(Selector=Points)
                    -> Merge
                    -> CreateObservable
                        WorkflowInput Source1
                        -> Take(Count=1)
                        -> AsyncSubject Point

                        SubscribeSubject Canvas => #3
                        SubscribeSubject Point => #4
                        #3, #4 -> Sample => #5
                        #4 -> PropertyMapping(Center(Selector="X,Y")) => #6
                        #5, #6 -> Bonsai.Vision.Drawing.Circle(Center(X=99, Y=342), Radius=5, Color(Val0=255, Val1=255, Val2=0, Val3=255), Thickness=2, LineType=Connected8, Shift=0)
                        -> Take(Count=1)
                        -> MulticastSubject Canvas
                        -> WorkflowOutput
                    -> Concat
                    -> WorkflowOutput
                -> Concat
                -> TakeLast(Count=1)
                -> Bonsai.Vision.Drawing.DrawCanvas
                -> WorkflowOutput
        -> Switch => #17
        SubscribeSubject SelectedStream
        -> Condition => #19
            WorkflowInput Source1 => #0
            ExternalizedMapping(Value) => #1
            #0, #1 -> Equal(Operand=StringProperty(Value=Zone))
            -> WorkflowOutput
        #17, #19 -> SubscribeWhen => #20
        #8, #14, #20 -> Disable Amb
        -> Merge
        -> WorkflowOutput
    -> Switch
    -> VisualizerMapping => #33
    SubscribeSubject SelectedHeadTail
    -> MemberSelector(Selector=Value.Item1.Heading)
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression:
        new(
          it as Heading
        )
    -> Bonsai.Gui.ZedGraph.RollingGraphBuilder(ValueSelector=Heading, SymbolType=None, LineWidth=1, CurveSettings="", Capacity=10000, Min=nil, Max=nil)
    -> VisualizerMapping => #38
    SubscribeSubject SelectedHeadTail
    -> MemberSelector(Selector=Value.Item1.Velocity)
    -> Bonsai.Dsp.Norm(NormType=L2)
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression:
        new(
          it as Velocity)
    -> Bonsai.Gui.ZedGraph.RollingGraphBuilder(ValueSelector=Velocity, SymbolType=None, LineWidth=1, CurveSettings="", Capacity=10000, Min=nil, Max=nil)
    -> VisualizerMapping => #44
    #38, #44 -> Bonsai.Gui.TableLayoutPanelBuilder(Enabled=true, Visible=true, ColumnCount=2, RowCount=1, ColumnStyles="", RowStyles="", CellSpans="")
    -> VisualizerMapping => #46
    SubscribeSubject SelectedLoomRegion
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: new (it.Value as InRegionDuration)
    -> Bonsai.Gui.ZedGraph.RollingGraphBuilder(ValueSelector=InRegionDuration, SymbolType=None, LineWidth=1, CurveSettings="", Capacity=10000, Min=nil, Max=nil)
    -> VisualizerMapping => #50
    SubscribeSubject SelectedLoomAngle
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: new (it.Value as AngleToRegion)
    -> Bonsai.Gui.ZedGraph.RollingGraphBuilder(ValueSelector=AngleToRegion, SymbolType=None, LineWidth=1, CurveSettings="", Capacity=10000, Min=nil, Max=nil)
    -> VisualizerMapping => #54
    #50, #54 -> Bonsai.Gui.TableLayoutPanelBuilder(Enabled=true, Visible=true, ColumnCount=2, RowCount=1, ColumnStyles="", RowStyles="", CellSpans="")
    -> VisualizerMapping => #56
    #29, #33, #46, #56 -> Bonsai.Gui.TableLayoutPanelBuilder HeadTail
      Enabled=true
      Visible=true
      ColumnCount=1
      RowCount=4
      ColumnStyles=""
      RowStyles(RowStyle(SizeType=Percent, Height=10), RowStyle(SizeType=Percent, Height=65), RowStyle(SizeType=Percent, Height=25))
      CellSpans=""
    -> WorkflowOutput
-> VisualizerMapping => #16
#13, #16 -> Bonsai.Gui.TabControlBuilder ComputerVision(Enabled=true, Visible=true)
-> VisualizerMapping => #18
#11, #18 -> Bonsai.Gui.TableLayoutPanelBuilder HtsLoom(Enabled=true, Visible=true, ColumnCount=2, RowCount=1, ColumnStyles="", RowStyles="", CellSpans="")
-> WorkflowOutput
