WorkflowBuilder(Version=2.9.0)
GroupWorkflow HardwareDevices
    GroupWorkflow TimestampSynchronizer
        SubscribeSubject RigConfiguration
        -> MemberSelector(Selector=ClockSynchronizer)
        -> Disable Condition TimestampGeneratorGen3
            WorkflowInput Source1
            -> MemberSelector(Selector=DeviceType) => #1
            ExternalizedMapping(Value) => #2
            #1, #2 -> Equal(Operand=WorkflowProperty<TimestampSynchronizer.SynchronizerType>(Value=""))
            -> WorkflowOutput
        -> CreateObservable
            WorkflowInput Source1
            -> PropertyMapping(PortName(Selector=PortName))
            -> GroupWorkflow TimestampGenerator(Description="Provides support for uninterruptible synchronization of all arena Harp devices and setting the UTC time reference.")
                BehaviorSubject<System.Object> SynchronizeTimestamp
                -> Bonsai.Harp.SynchronizeTimestamp => #1
                ExternalizedMapping(PortName) => #2
                #1, #2 -> Harp.ClockSynchronizer.Device(OperationMode=Active, OperationLed=On, DumpRegisters=true, VisualIndicators=On, Heartbeat=Disabled, IgnoreErrors=false, PortName=COM5)
                -> MulticastSubject SynchronizerEvents
                -> Bonsai.Harp.FilterMessageType(FilterType=Include, MessageType=Event)
                -> Bonsai.Harp.FilterRegister(FilterType=Include, Register=Bonsai.Harp.TimestampSeconds)
                -> MulticastSubject Heartbeats
                -> WorkflowOutput
            -> WorkflowOutput
        -> Merge
        -> WorkflowOutput

        PublishSubject<Bonsai.Harp.HarpMessage> SynchronizerEvents
        PublishSubject<Bonsai.Harp.HarpMessage> Heartbeats

    GroupWorkflow VideoController
        SubscribeSubject RigConfiguration
        -> MemberSelector(Selector=CameraSynchronizer)
        -> SelectMany CameraControllerGen2
            WorkflowInput Source1
            -> Take(Count=1)
            -> AsyncSubject ControllerSettings

            BehaviorSubject<Bonsai.Harp.HarpMessage> Commands => #3
            SubscribeSubject ControllerSettings
            -> PropertyMapping(PortName(Selector=PortName)) => #5
            #3, #5 -> Harp.CameraControllerGen2.Device(OperationMode=Active, OperationLed=On, DumpRegisters=true, VisualIndicators=On, Heartbeat=Enabled, IgnoreErrors=false, PortName=COM6)
            -> PublishSubject Events
            -> WorkflowOutput

            GroupWorkflow ConfigureTriggersCam0
                Harp.CameraControllerGen2.CreateMessage(MessageType=Write, Payload=Harp.CameraControllerGen2.CreateConfigureCam0EventPayload(ConfigureCam0Event=EventOnTrigger)) => #0
                Harp.CameraControllerGen2.CreateMessage(MessageType=Write, Payload=Harp.CameraControllerGen2.CreateTriggerConfigCam0Payload(TriggerConfigCam0=Internal)) => #1
                SubscribeSubject ControllerSettings
                -> MemberSelector(Selector=Triggers)
                -> Merge
                -> Condition Trigger0
                    WorkflowInput Source1
                    -> MemberSelector(Selector=Key) => #1
                    ExternalizedMapping(Value) => #2
                    #1, #2 -> Equal(Operand=WorkflowProperty<HtsLoom.TriggerName>(Value=Trigger0))
                    -> WorkflowOutput
                -> Take(Count=1)
                -> AsyncSubject Trigger0
                -> MemberSelector(Selector=Value.Frequency)
                -> Harp.CameraControllerGen2.Format(MessageType=Write, Register=Harp.CameraControllerGen2.TriggerFrequencyCam0) => #9
                #0, #1, #9 -> Concat
                -> WorkflowOutput
            -> DelaySubscription(DueTime=PT1S) => #10
            GroupWorkflow ConfigureTroggersCam1
                Harp.CameraControllerGen2.CreateMessage(MessageType=Write, Payload=Harp.CameraControllerGen2.CreateConfigureCam1EventPayload(ConfigureCam1Event=EventOnTrigger)) => #0
                Harp.CameraControllerGen2.CreateMessage(MessageType=Write, Payload=Harp.CameraControllerGen2.CreateTriggerConfigCam1Payload(TriggerConfigCam1=Internal)) => #1
                SubscribeSubject ControllerSettings
                -> MemberSelector(Selector=Triggers)
                -> Merge
                -> Condition Trigger1
                    WorkflowInput Source1
                    -> MemberSelector(Selector=Key) => #1
                    ExternalizedMapping(Value) => #2
                    #1, #2 -> Equal(Operand=WorkflowProperty<HtsLoom.TriggerName>(Value=Trigger1))
                    -> WorkflowOutput
                -> Take(Count=1)
                -> AsyncSubject Trigger1
                -> MemberSelector(Selector=Value.Frequency)
                -> Harp.CameraControllerGen2.Format(MessageType=Write, Register=Harp.CameraControllerGen2.TriggerFrequencyCam1) => #9
                #0, #1, #9 -> Concat
                -> WorkflowOutput
            -> DelaySubscription(DueTime=PT1S) => #12
            SubscribeSubject StartCameras
            -> Harp.CameraControllerGen2.CreateMessage(MessageType=Write, Payload=Harp.CameraControllerGen2.CreateStartAndStopPayload(StartAndStop="StartCam0 StartCam1")) => #14
            SubscribeSubject StopCameras
            -> Harp.CameraControllerGen2.CreateMessage(MessageType=Write, Payload=Harp.CameraControllerGen2.CreateStartAndStopPayload(StartAndStop="StopCam0 StopCam1")) => #16
            #10, #12, #14, #16 -> Merge
            -> MulticastSubject Commands

            SubscribeSubject Events
            -> Bonsai.Harp.FilterMessageType(FilterType=Include, MessageType=Event)
            -> Harp.CameraControllerGen2.Parse(Register=Harp.CameraControllerGen2.TimestampedCam0Event)
            -> Condition TriggerEvent => #22
                WorkflowInput Source1
                -> MemberSelector(Selector=Value)
                -> HasFlag(Operand=WorkflowProperty<Harp.CameraControllerGen2.CameraEvents>(Value=Trigger))
                -> WorkflowOutput
            SubscribeSubject Trigger0 => #23
            #22, #23 -> WithLatestFrom => #24
            SubscribeSubject Events
            -> Bonsai.Harp.FilterMessageType(FilterType=Include, MessageType=Event)
            -> Harp.CameraControllerGen2.Parse(Register=Harp.CameraControllerGen2.TimestampedCam1Event)
            -> Condition TriggerEvent => #28
                WorkflowInput Source1
                -> MemberSelector(Selector=Value)
                -> HasFlag(Operand=WorkflowProperty<Harp.CameraControllerGen2.CameraEvents>(Value=Trigger))
                -> WorkflowOutput
            SubscribeSubject Trigger1 => #29
            #28, #29 -> WithLatestFrom => #30
            #24, #30 -> Merge
            -> GroupBy(KeySelector="Item2.Key,Item2.Value.Frequency", ElementSelector=Item1)
            -> MulticastSubject Triggers
        -> PublishSubject CameraControllerEvents
        -> WorkflowOutput

        PublishSubject<System.Object> StartCameras
        PublishSubject<System.Object> StopCameras
        ReplaySubject<System.Reactive.Linq.IGroupedObservable(System.Tuple(HtsLoom.TriggerName,System.Int32),Bonsai.Harp.Timestamped(Harp.CameraControllerGen2.CameraEvents))> Triggers(BufferSize=nil)

    GroupWorkflow Cameras
        SubscribeSubject RigConfiguration
        -> MemberSelector(Selector=Cameras)
        -> Merge
        -> SelectMany
            WorkflowInput Source1
            -> AsyncSubject SpinnakerSettings => #1
            SubscribeSubject RigConfiguration
            -> MemberSelector(Selector=CameraSynchronizer.Triggers)
            -> Merge
            -> Condition MatchName
                WorkflowInput Source1
                -> MemberSelector(Selector=Key) => #1
                SubscribeSubject SpinnakerSettings
                -> MemberSelector(Selector=Value.Trigger) => #3
                #1, #3 -> WithLatestFrom
                -> Equal
                -> WorkflowOutput
            -> AsyncSubject TriggerSettings => #6
            #1, #6 -> Zip
            -> Take(Count=1)
            -> WorkflowOutput
        -> SelectMany CreateCameras
            WorkflowInput Source1
            -> Take(Count=1)
            -> AsyncSubject SpinnakerSettings

            SubscribeSubject Triggers => #3
            SubscribeSubject SpinnakerSettings
            -> MemberSelector(Selector=Item1.Value.Trigger) => #5
            #3, #5 -> WithLatestFrom
            -> Condition
                WorkflowInput Source1
                -> MemberSelector(Selector="Item2,Item1.Key.Item1")
                -> Equal
                -> WorkflowOutput
            -> MemberSelector(Selector=Item1)
            -> Take(Count=1)
            -> Merge => #10
            SubscribeSubject SpinnakerSettings
            -> MemberSelector(Selector=Item2.Value.Frequency) => #12
            SubscribeSubject SpinnakerSettings
            -> MemberSelector(Selector=Item1.Value.ExposureTime) => #14
            #12, #14 -> Zip
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: Math.Min(Item2, 1e6 / Item1 - 500)
            -> PropertyMapping(ExposureTime) => #17
            SubscribeSubject SpinnakerSettings
            -> PropertyMapping(Gain(Selector=Item1.Value.Gain), Binning(Selector=Item1.Value.Binning), SerialNumber(Selector=Item1.Value.SerialNumber)) => #19
            #10, #17, #19 -> Aeon.Video.SpinnakerCapture(Index=nil, SerialNumber=23032823, ColorProcessing=Default, ExposureTime=5000, Gain=4, Binning=2)
            -> ObserveOn(Scheduler=ThreadPoolScheduler) => #21
            SubscribeSubject SpinnakerSettings
            -> MemberSelector(Selector=Item1.Key) => #23
            SubscribeSubject SpinnakerSettings
            -> MemberSelector(Selector=Item2.Value.Frequency) => #25
            #23, #25 -> Zip => #26
            #21, #26 -> WithLatestFrom
            -> WorkflowOutput
        -> GroupBy(KeySelector=Item2, ElementSelector=Item1)
        -> ReplaySubject FrameEvents(BufferSize=nil)
        -> WorkflowOutput

        SubscribeSubject FrameEvents
        -> MemberSelector(Selector=Key)

    GroupWorkflow UndergroundFeeder
        ReplaySubject<System.Reactive.Linq.IGroupedObservable(HtsLoom.FeederName,Bonsai.Harp.HarpMessage)> FeederEvents(BufferSize=nil)
        ReplaySubject<System.Reactive.Linq.IGroupedObservable(HtsLoom.FeederName,Bonsai.Harp.Timestamped(System.Boolean))> FeederPelletDelivered(BufferSize=nil)
        BehaviorSubject<System.Tuple(Feeder.FeederCommand,HtsLoom.FeederName)> FeederTrigger
        ReplaySubject<System.Reactive.Linq.IGroupedObservable(HtsLoom.FeederName,Bonsai.Harp.Timestamped(System.Double))> FeederWheelDisplacement(BufferSize=nil)

        Defer CreateFeeders
            Disable SubscribeSubject FeederTrigger
            -> Disable GroupBy(KeySelector=Item2, ElementSelector=Item1)
            -> Disable ReplaySubject FeederTriggerGroup(BufferSize=nil)

            Disable PublishSubject<System.Tuple(Bonsai.Harp.Timestamped(System.Double),System.Int32)> WheelDisplacement
            -> Disable GroupBy(KeySelector=Item2, ElementSelector=Item1)
            -> Disable MulticastSubject FeederWheelDisplacement

            SubscribeSubject RigConfiguration
            -> MemberSelector(Selector=Feeders)
            -> Merge
            -> SelectMany CreateFeeders
                WorkflowInput Source1
                -> Take(Count=1)
                -> AsyncSubject settings

                BehaviorSubject<Bonsai.Harp.HarpMessage> Commands => #3
                SubscribeSubject settings
                -> MemberSelector(Selector=Value.PortName)
                -> PropertyMapping(PortName(Selector=it)) => #6
                #3, #6 -> Harp.OutputExpander.Device(OperationMode=Active, OperationLed=On, DumpRegisters=true, VisualIndicators=On, Heartbeat=Enabled, IgnoreErrors=false, PortName=COM16)
                -> PublishSubject Events

                ExternalizedMapping(SampleRate) => #9
                SubscribeSubject Events
                -> Take(Count=1) => #11
                #9, #11 -> Harp.OutputExpander.ConfigureMagneticEncoder(SampleRate=SampleRate500Hz)
                -> MulticastSubject Commands

                SubscribeSubject Events
                -> IncludeWorkflow(Path=Extensions\PairSettingsId.bonsai)
                -> WorkflowOutput

                SubscribeSubject Events
                -> Harp.OutputExpander.Parse(Register=Harp.OutputExpander.TimestampedMagneticEncoder) => #18
                SubscribeSubject settings
                -> PropertyMapping(Radius(Selector=Value.WheelRadius)) => #20
                #18, #20 -> Bonsai.Harp.ConvertTimestamped
                    WorkflowInput Source1
                    -> MemberSelector(Selector=Angle) => #1
                    ExternalizedMapping(Radius) => #2
                    #1, #2 -> Aeon.Foraging.WheelDisplacement(Radius=-4)
                    -> WorkflowOutput
                -> IncludeWorkflow(Path=Extensions\PairSettingsId.bonsai)
                -> GroupBy(KeySelector=Item2, ElementSelector=Item1)
                -> MulticastSubject FeederWheelDisplacement

                SubscribeSubject FeederTrigger
                -> Condition ID
                    WorkflowInput Source1
                    -> MemberSelector(Selector=Item2) => #1
                    SubscribeSubject settings
                    -> MemberSelector(Selector=Key) => #3
                    #1, #3 -> WithLatestFrom
                    -> Equal
                    -> WorkflowOutput
                -> MemberSelector(Selector=Item1) => #27
                -> Condition IsDeliver
                    WorkflowInput Source1
                    -> Equal(Operand=WorkflowProperty<Feeder.FeederCommand>(Value=DeliverPellet))
                    -> WorkflowOutput
                -> BehaviorSubject DeliverPellet
                #27 -> Condition IsReset
                    WorkflowInput Source1
                    -> Equal(Operand=WorkflowProperty<Feeder.FeederCommand>(Value=ResetFeeder))
                    -> WorkflowOutput
                -> BehaviorSubject ResetFeeder

                SubscribeSubject ResetFeeder
                -> GroupWorkflow ResetFeeder
                    WorkflowInput Source1
                    -> Harp.OutputExpander.CreateMessage(MessageType=Write, Payload=Harp.OutputExpander.CreateOutputSetPayload(OutputSet=Out0)) => #1
                    -> Delay(DueTime=PT0.5S)
                    -> Harp.OutputExpander.CreateMessage(MessageType=Write, Payload=Harp.OutputExpander.CreateOutputClearPayload(OutputClear=Out0)) => #3
                    #1, #3 -> Merge
                    -> WorkflowOutput
                -> MulticastSubject Commands

                SubscribeSubject DeliverPellet => #35
                PublishSubject<Bonsai.Harp.Timestamped(System.Boolean)> Delivered => #36
                SubscribeSubject settings
                -> PropertyMapping(Count(Selector=Value.PelletDeliveryRetryCount)) => #38
                SubscribeSubject settings
                -> MemberSelector(Selector=Value.PelletDeliveryTimeout)
                -> Bonsai.Scripting.Expressions.ExpressionTransform
                  Expression: TimeSpan.FromSeconds(it)
                -> PropertyMapping(DueTime) => #42
                #35, #36, #38, #42 -> IncludeWorkflow(Path=Aeon.Acquisition:TimedRetryCount.bonsai, DueTime=PT1S, Count=2) => #43
                -> Condition IsRepetition
                    WorkflowInput Source1
                    -> MemberSelector(Selector=Repetition)
                    -> WorkflowOutput
                -> SelectMany PairRepetitions
                    WorkflowInput Source1 => #0
                    SubscribeSubject Events
                    -> Bonsai.Harp.FilterMessageType(FilterType=Include, MessageType=Write)
                    -> Harp.OutputExpander.Parse(Register=Harp.OutputExpander.TimestampedOutputClear)
                    -> Condition
                        WorkflowInput Source1
                        -> MemberSelector(Selector=Value) => #1
                        ExternalizedMapping(Value) => #2
                        #1, #2 -> HasFlag(Operand=WorkflowProperty<Harp.OutputExpander.DigitalOutputs>(Value=Out0))
                        -> WorkflowOutput
                    -> Take(Count=1) => #5
                    #0, #5 -> Zip
                    -> Bonsai.Scripting.Expressions.ExpressionTransform
                      Expression:
                        new(
                        1 as Value,
                        Item2.Seconds as Seconds)
                    -> InputMapping
                    -> Bonsai.Harp.Format(MessageType=Write, Register=Bonsai.Harp.FormatMessagePayload(Address=203, PayloadType=TimestampedU8))
                    -> WorkflowOutput
                -> MulticastSubject Events
                #43 -> MemberSelector(Selector=Value)
                -> GroupWorkflow DeliverPellet
                    WorkflowInput Source1
                    -> Harp.OutputExpander.CreateMessage(MessageType=Write, Payload=Harp.OutputExpander.CreateOutputSetPayload(OutputSet=Out0)) => #1
                    -> Harp.OutputExpander.CreateMessage(MessageType=Write, Payload=Harp.OutputExpander.CreateOutputClearPayload(OutputClear=Out0)) => #2
                    #1, #2 -> Merge
                    -> WorkflowOutput
                -> MulticastSubject Commands

                SubscribeSubject Events
                -> Harp.OutputExpander.Parse(Register=Harp.OutputExpander.TimestampedAuxInState)
                -> Bonsai.Harp.ConvertTimestamped
                    WorkflowInput Source1
                    -> HasFlag(Operand=WorkflowProperty<Harp.OutputExpander.AuxiliaryInputs>(Value=Aux1))
                    -> WorkflowOutput
                -> Condition PelletDelivered
                    WorkflowInput Source1
                    -> MemberSelector(Selector=Value)
                    -> WorkflowOutput
                -> MulticastSubject Delivered
                -> IncludeWorkflow(Path=Extensions\PairSettingsId.bonsai)
                -> MulticastSubject PelletDelivered
            -> GroupBy(KeySelector=Item2, ElementSelector=Item1)
            -> MulticastSubject FeederEvents
            -> WorkflowOutput

            PublishSubject<System.Tuple(Bonsai.Harp.Timestamped(System.Boolean),HtsLoom.FeederName)> PelletDelivered
            -> GroupBy(KeySelector=Item2, ElementSelector=Item1)
            -> MulticastSubject FeederPelletDelivered

    GroupWorkflow Nest
        Defer Nest
            SubscribeSubject RigConfiguration
            -> MemberSelector(Selector=Nests)
            -> Bonsai.Scripting.Expressions.ExpressionCondition
              Expression: it != null
            -> Merge
            -> SelectMany Nests
                WorkflowInput Source1
                -> Take(Count=1)
                -> AsyncSubject NestParameters

                SubscribeSubject NestParameters
                -> PropertyMapping(PortName(Selector=Value.PortName), FilterWindow(Selector=Value.FilterWindow))
                -> GroupWorkflow WeightScale(Description="Contains acquisition functionality for automated arena weighing scales.")
                    ExternalizedMapping(PortName(Description="The name of the serial port used to communicate with the electronic scale.")) => #0
                    -> Bonsai.IO.Ports.CreateSerialPort
                      PortName=COM7
                      BaudRate=9600
                      NewLine=\r\n
                      Parity=None
                      ParityReplace=63
                      DataBits=8
                      StopBits=One
                      Handshake=None
                      DiscardNull=false
                      DtrEnable=false
                      RtsEnable=false
                      ReadBufferSize=4096
                      WriteBufferSize=2048
                      ReceivedBytesThreshold=1
                    #0 -> Bonsai.IO.Ports.SerialReadLine(PortName=COM7)
                    -> Skip(Count=1)
                    -> Parse(Pattern="%s g %s")
                    -> Retry
                    -> Bonsai.Scripting.Expressions.ExpressionTransform => #6
                      Expression:
                        new(
                        single.Parse(Item1) as Weight,
                        Item2.Contains("?") ? 0.0 : 1.0 as Confidence)
                    IncludeWorkflow(Path=Extensions\GetGlobalTrigger.bonsai) => #7
                    #6, #7 -> Sample => #8
                    #8, #7 -> WithLatestFrom
                    -> InputMapping(Selector="Item2,Item1.Weight,Item1.Confidence", TypeMapping=TypeMapping<Aeon.Environment.WeightMeasurement>) => #10
                    SubscribeSubject NestBaselineEvent
                    -> Condition
                        WorkflowInput Source1
                        -> MemberSelector(Selector=Key) => #1
                        SubscribeSubject NestParameters
                        -> MemberSelector(Selector=Key) => #3
                        #1, #3 -> WithLatestFrom
                        -> Equal
                        -> WorkflowOutput
                    -> Merge => #13
                    ExternalizedMapping(FilterWindow) => #14
                    #10, #13, #14 -> Defer ProcessWeight => #15
                        WorkflowInput Source1
                        -> Aeon.Environment.WeightRaw
                        -> PublishSubject RawWeight => #2
                        ExternalizedMapping(Count(DisplayName=FilterWindow)) => #3
                        #2, #3 -> Aeon.Environment.WeightFilter(Count=40)
                        -> PublishSubject FilteredWeight => #5
                        WorkflowInput Source2 => #6
                        #5, #6 -> Aeon.Environment.WeightBaseline
                        -> PublishSubject BaselinedWeight
                        SubscribeSubject RawWeight => #9
                        #3 -> GroupWorkflow SampleOffset
                            ExternalizedMapping(Value(DisplayName=Count))
                            -> PropertySource<Skip,System.Int32>(MemberName=Count, Value=40)
                            -> Subtract(Operand=IntProperty(Value=1))
                            -> WorkflowOutput
                        -> PropertyMapping(Count) => #11
                        #9, #11 -> Skip(Count=39) => #12
                        SubscribeSubject FilteredWeight => #13
                        SubscribeSubject BaselinedWeight => #14
                        #12, #13, #14 -> Zip
                        -> Bonsai.Scripting.Expressions.ExpressionTransform
                          Expression:
                            new(
                            Item1 as RawWeight,
                            Item2 as FilteredWeight,
                            Item3 as BaselinedWeight)
                        -> WorkflowOutput
                    SubscribeSubject NestParameters
                    -> MemberSelector(Selector=Key) => #17
                    #15, #17 -> WithLatestFrom
                    -> WorkflowOutput
                -> WorkflowOutput
            -> WorkflowOutput

            BehaviorSubject<System.Tuple(Bonsai.Harp.Timestamped(System.Byte),System.String)> NestTare
            -> GroupBy(KeySelector=Item2, ElementSelector=Item1)
            -> MulticastSubject NestTareEvents
        -> GroupBy(KeySelector=Item2, ElementSelector=Item1)
        -> ReplaySubject NestWeightData(BufferSize=nil)
        -> WorkflowOutput

        ReplaySubject<System.Reactive.Linq.IGroupedObservable(System.String,Bonsai.Harp.Timestamped(System.Byte))> NestTareEvents(BufferSize=nil)
        ReplaySubject<System.Reactive.Linq.IGroupedObservable(System.String,Bonsai.Harp.Timestamped(System.Double))> NestBaselineEvent(BufferSize=nil)

        SubscribeSubject NestWeightData
        -> Merge

    GroupWorkflow LightCycle
        SubscribeSubject RigConfiguration
        -> MemberSelector(Selector=LightCycle) => #1
        -> PropertyMapping(EventSocket(Selector=EventSocket), RoomName(Selector=RoomName), CommandSocket(Selector=CommandSocket))
        -> GroupWorkflow LightClient(Description="Provides a network client for automated room light control.")
            ExternalizedMapping(ConnectionString(DisplayName=EventSocket)) => #0
            ExternalizedMapping(Topic(DisplayName=RoomName, Description="The name of the room to monitor and control.")) => #1
            #0, #1 -> Bonsai.ZeroMQ.Subscriber(ConnectionString=>tcp://172.24.158.103:4303, Topic=AEON4)
            -> MemberSelector(Selector=Last.Buffer)
            -> Bonsai.Osc.Parse(Address=/channel, TypeTag=ii)
            -> InputMapping(Channel(Selector=Item1), Value(Selector=Item2))
            -> Aeon.Environment.CreateRoomLightMessage(Channel=39, Value=0) => #6
            SubscribeSubject CameraControllerEvents => #7
            #6, #7 -> WithLatestFrom
            -> Bonsai.Harp.CreateTimestamped => #9
            ExternalizedMapping(Name(DisplayName=LightEvents, Description="The name of the output sequence containing all timestamped light events.")) => #10
            #9, #10 -> PublishSubject LightEvents
            -> WorkflowOutput
            ExternalizedMapping(Name(DisplayName=LightCommands, Description="The name of the sequence controlling room light presets."))
            -> PublishSubject<Aeon.Environment.RoomLightPreset> LightCommands
            -> Bonsai.Osc.Format(Address=/preset)
            -> MemberSelector(Selector=Buffer.Array) => #16
            ExternalizedMapping(ConnectionString(DisplayName=CommandSocket)) => #17
            #16, #17, #1 -> Bonsai.ZeroMQ.Publisher(ConnectionString=>tcp://172.24.158.103:4304, Topic=AEON4)
        #1 -> PropertyMapping(ConfigFileName(Selector=ConfigFileName))
        -> IncludeWorkflow(Path=Aeon.Environment:LightCycle.bonsai, ConfigFileName=lightcycle.config)
        -> IncludeWorkflow(Path=Aeon.Environment:EnvironmentCondition.bonsai, Value=Experiment)
        -> MulticastSubject LightCommands

GroupWorkflow SubjectAndEnvironmentState
    BehaviorSubject<Bonsai.Harp.Timestamped(Aeon.Environment.EnvironmentSubjectStateMetadata)> SubjectState => #0
    -> Condition Start
        WorkflowInput Source1
        -> MemberSelector(Selector=Value.Type)
        -> NotEqual(Operand=WorkflowProperty<Aeon.Environment.EnvironmentSubjectChangeType>(Value=Exit))
        -> WorkflowOutput
    -> PublishSubject SubjectStart
    #0 -> Condition End
        WorkflowInput Source1
        -> MemberSelector(Selector=Value.Type)
        -> Equal(Operand=WorkflowProperty<Aeon.Environment.EnvironmentSubjectChangeType>(Value=Exit))
        -> WorkflowOutput
    -> PublishSubject SubjectStop

    BehaviorSubject<Bonsai.Harp.Timestamped(Aeon.Environment.EnvironmentStateMetadata)> EnvironmentState

GroupWorkflow Tracking
    SubscribeSubject RigConfiguration
    -> MemberSelector(Selector=Cameras)
    -> Merge
    -> Condition HasTracking
        WorkflowInput Source1
        -> MemberSelector(Selector=Value.Tracking)
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: it!=null
        -> WorkflowOutput
    -> SelectMany CreateTrackers
        WorkflowInput Source1
        -> Take(Count=1)
        -> AsyncSubject TrackingCameraSettings

        SubscribeSubject FrameEvents
        -> Condition SelectedCamera
            WorkflowInput Source1
            -> MemberSelector(Selector=Key)
            -> MemberSelector(Selector=Item1) => #2
            SubscribeSubject TrackingCameraSettings
            -> MemberSelector(Selector=Key) => #4
            #2, #4 -> WithLatestFrom
            -> Equal
            -> WorkflowOutput
        -> Merge
        -> PublishSubject CameraFrame

        SubscribeSubject TrackingCameraSettings
        -> MemberSelector(Selector=Value.Tracking) => #8
        -> HtsLoom.MatchTracking(Type=TypeMapping<HtsLoom.BlobTracking>)
        -> MemberSelector(Selector=RegionTracking) => #10
        #8 -> HtsLoom.MatchTracking(Type=TypeMapping<HtsLoom.HeadTailTracking>)
        -> MemberSelector(Selector=RegionTracking) => #12
        #10, #12 -> Merge
        -> Merge
        -> MemberSelector(Selector=Value)
        -> CreateObservable MaskAndThreshold
            WorkflowInput Source1
            -> Take(Count=1)
            -> AsyncSubject TrackingParameters

            SubscribeSubject TrackingParameters
            -> MemberSelector(Selector=Regions)
            -> PointArrayConverter
            -> Take(Count=1)
            -> AsyncSubject Regions

            SubscribeSubject CameraFrame
            -> MemberSelector(Selector=Value.Image) => #9
            SubscribeSubject Regions => #10
            #9, #10 -> WithLatestFrom
            -> InputMapping(Selector=Item1, Regions(Selector=Item2))
            -> Bonsai.Vision.MaskPolygon => #13
              Regions
                ArrayOfPoint(Point(X=1263, Y=486), Point(X=1333, Y=486), Point(X=1339, Y=589), Point(X=1267, Y=581))
                ArrayOfPoint(Point(X=1245, Y=487), Point(X=1258, Y=486), Point(X=1259, Y=585), Point(X=1249, Y=587))
              MaskType=ToZero
              FillValue(Val0=255, Val1=0, Val2=0, Val3=0)
            SubscribeSubject TrackingParameters
            -> MemberSelector(Selector=Threshold) => #15
            #13, #15 -> WithLatestFrom
            -> InputMapping(Selector=Item1, ThresholdValue(Selector=Item2))
            -> Bonsai.Vision.Threshold(ThresholdValue=100, MaxValue=255, ThresholdType=BinaryInv)
            -> WorkflowOutput
        -> Zip
        -> Add
        -> Bonsai.Vision.MorphologicalOperator(Size(Width=4, Height=4), Anchor(X=-1, Y=-1), Shape=Rectangle, Iterations=1, Operation=Open)
        -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxSimple, Offset(X=0, Y=0), MinArea=10, MaxArea=nil)
        -> Bonsai.Vision.BinaryRegionAnalysis
        -> Bonsai.Vision.SortBinaryRegions => #22
        SubscribeSubject CameraFrame
        -> MemberSelector(Selector=Seconds) => #24
        #22, #24 -> Zip
        -> Bonsai.Harp.CreateTimestamped => #26
        SubscribeSubject TrackingCameraSettings
        -> MemberSelector(Selector=Key) => #28
        #26, #28 -> WithLatestFrom
        -> WorkflowOutput
    -> GroupBy(KeySelector=Item2, ElementSelector=Item1)
    -> ReplaySubject TrackingEvents(BufferSize=nil)

Disable GroupWorkflow ActivityCenter
    Defer ActivityCenter => #0
        SubscribeSubject RigConfiguration
        -> MemberSelector(Selector=ActivityCenter)
        -> Take(Count=1)
        -> AsyncSubject ActivityCenterSettings

        SubscribeSubject FrameEvents
        -> Condition
            WorkflowInput Source1
            -> MemberSelector(Selector=Key.Item1) => #1
            SubscribeSubject ActivityCenterSettings
            -> MemberSelector(Selector=Camera) => #3
            #1, #3 -> WithLatestFrom
            -> Equal
            -> WorkflowOutput
        -> Take(Count=1)
        -> AsyncSubject CameraFrames

        SubscribeSubject CameraFrames
        -> Merge => #9
        SubscribeSubject ActivityCenterSettings
        -> MemberSelector(Selector=Regions)
        -> PointArrayConverter
        -> PropertyMapping(Regions) => #13
        SubscribeSubject ActivityCenterSettings
        -> MemberSelector(Selector=Threshold)
        -> PropertyMapping(ThresholdValue) => #16
        #9, #13, #16 -> IncludeWorkflow
          Path=Aeon.Vision:ActivityTracking.bonsai
          Regions(ArrayOfPoint(Point(X=490, Y=535), Point(X=818, Y=535), Point(X=818, Y=769), Point(X=490, Y=769)))
          ThresholdValue=10
          TrackingEvents=ActivityCenter
        -> WorkflowOutput
    ExternalizedMapping(Name(DisplayName=TrackingEvents)) => #1
    #0, #1 -> PublishSubject ActivityCenter
    -> WorkflowOutput

GroupWorkflow Weight
    SubscribeSubject RigConfiguration
    -> MemberSelector(Selector=Nests)
    -> Bonsai.Scripting.Expressions.ExpressionCondition
      Expression: it != null
    -> Merge
    -> MemberSelector(Selector=Key) => #4
    -> Aeon.Acquisition.CreateGroup subjectWeight
        WorkflowInput Source1
        -> Take(Count=1)
        -> AsyncSubject NestKey

        SubscribeSubject NestWeightData
        -> Condition IsThisNest
            WorkflowInput Source1
            -> MemberSelector(Selector=Key) => #1
            SubscribeSubject NestKey => #2
            #1, #2 -> WithLatestFrom
            -> Equal
            -> WorkflowOutput
        -> Merge
        -> MemberSelector(Selector=BaselinedWeight)
        -> Condition StableWeight
            WorkflowInput Source1
            -> MemberSelector(Selector=Confidence) => #1
            ExternalizedMapping(Value(DisplayName=ConfidenceThreshold)) => #2
            #1, #2 -> Equal(Operand=FloatProperty(Value=1))
            -> WorkflowOutput
        -> Condition SubjectOnScale
            WorkflowInput Source1
            -> MemberSelector(Selector=Value) => #1
            ExternalizedMapping(Value(DisplayName=WeightThreshold)) => #2
            #1, #2 -> GreaterThan(Operand=FloatProperty(Value=10))
            -> WorkflowOutput
        -> WorkflowOutput
    -> ReplaySubject SubjectWeight(BufferSize=nil)
    #4 -> Aeon.Acquisition.CreateGroup PercentWeightLoss
        WorkflowInput Source1
        -> Take(Count=1)
        -> AsyncSubject NestKey

        SubscribeSubject SubjectWeight
        -> Condition KeyMatch
            WorkflowInput Source1
            -> MemberSelector(Selector=Key) => #1
            SubscribeSubject NestKey => #2
            #1, #2 -> WithLatestFrom
            -> Equal
            -> WorkflowOutput
        -> Merge => #5
        SubscribeSubject SubjectState
        -> Condition Start
            WorkflowInput Source1
            -> MemberSelector(Selector=Value.Type) => #1
            -> Equal(Operand=WorkflowProperty<Aeon.Environment.EnvironmentSubjectChangeType>(Value=Enter)) => #2
            #1 -> Equal(Operand=WorkflowProperty<Aeon.Environment.EnvironmentSubjectChangeType>(Value=Remain)) => #3
            #2, #3 -> Zip
            -> BitwiseOr
            -> WorkflowOutput
        -> MemberSelector(Selector=Value.ReferenceWeight) => #8
        #5, #8 -> WithLatestFrom
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression:
            new(
            Item1.Timestamp as Timestamp,
            Item1.Value as CurrentWeight,
            100 * Item1.Value / Item2 as CurrentPercent)
        -> WorkflowOutput
    -> ReplaySubject PercentWeightLoss(BufferSize=nil)
    Disable Annotation "TODO: NeedToBeReimplemented"(Text="") => #9
    #4, #9 -> Disable Aeon.Acquisition.CreateGroup NestBaseline
        SubscribeSubject ActivityCenter
        -> Condition ActivityCondition => #1
            WorkflowInput Source1
            -> MemberSelector(Selector=Value) => #1
            ExternalizedMapping(Value(DisplayName=BaselineActivityThreshold)) => #2
            #1, #2 -> GreaterThan(Operand=DoubleProperty(Value=1))
            -> WorkflowOutput
        ExternalizedMapping(Interval(DisplayName=BaselineRefractoryPeriod)) => #2
        #1, #2 -> GateInterval(Interval=PT5S)
        -> WorkflowOutput
    -> Disable MulticastSubject NestBaselineEvent

GroupWorkflow WheelFeederDispenser
    ReplaySubject<System.Reactive.Linq.IGroupedObservable(HtsLoom.FeederName,System.Double)> FeederTimeSinceLastVisit(BufferSize=nil)
    ReplaySubject<System.Reactive.Linq.IGroupedObservable(HtsLoom.FeederName,System.Double)> FeederTimeSpentOnWheel(BufferSize=nil)
    ReplaySubject<System.Reactive.Linq.IGroupedObservable(HtsLoom.FeederName,System.Int32)> FeederTotalDeliveredPellets(BufferSize=nil)
    ReplaySubject<System.Reactive.Linq.IGroupedObservable(HtsLoom.FeederName,System.Int32)> FeederTotalMissedPellets(BufferSize=nil)
    ReplaySubject<System.Reactive.Linq.IGroupedObservable(HtsLoom.FeederName,Bonsai.Harp.Timestamped(System.Byte))> FeederPelletMissed(BufferSize=nil)
    BehaviorSubject<System.Tuple(Aeon.Foraging.DispenserEventArgs,HtsLoom.FeederName)> FeederController

    Defer Dispensers
        SubscribeSubject FeederController
        -> GroupBy(KeySelector=Item2, ElementSelector=Item1)
        -> ReplaySubject FeederControllerGroup(BufferSize=nil)

        SubscribeSubject RigConfiguration
        -> MemberSelector(Selector=Feeders)
        -> Merge
        -> MemberSelector(Selector=Key)
        -> Aeon.Acquisition.CreateGroup
            WorkflowInput Source1
            -> Take(Count=1)
            -> AsyncSubject FeederId

            SubscribeSubject FeederEvents
            -> Condition ID
                WorkflowInput Source1
                -> MemberSelector(Selector=Key) => #1
                SubscribeSubject FeederId => #2
                #1, #2 -> Zip
                -> Equal
                -> WorkflowOutput
            -> Take(Count=1)
            -> Merge
            -> PublishSubject PatchEvents

            ExternalizedMapping(FilePrefix) => #8
            -> IncludeWorkflow(Path=Extensions\LoadState.bonsai, FilePrefix=PatchDispenser)
            -> Condition NotNull
                WorkflowInput Source1
                -> Bonsai.Scripting.Expressions.ExpressionTransform
                  Expression: it!=null
                -> WorkflowOutput
            -> Parse(Pattern=%i)
            -> PropertyMapping(Value)
            -> Aeon.Foraging.CreateDispenserEvent(Value=990, EventType=Reset)
            -> Aeon.Foraging.DispenserAccumulate
            -> BehaviorSubject PatchDispenser
            SubscribeSubject PatchDispenser => #16
            #16, #8 -> IncludeWorkflow(Path=Extensions\SaveState.bonsai, FilePrefix=PatchDispenser)

            SubscribeSubject PatchDispenser
            -> WorkflowOutput

            SubscribeSubject FeederPelletDelivered
            -> Condition ID
                WorkflowInput Source1
                -> MemberSelector(Selector=Key) => #1
                SubscribeSubject FeederId => #2
                #1, #2 -> WithLatestFrom
                -> Equal
                -> WorkflowOutput
            -> Merge
            -> PublishSubject PelletDeliver

            SubscribeSubject FeederControllerGroup
            -> Condition ID
                WorkflowInput Source1
                -> MemberSelector(Selector=Key) => #1
                SubscribeSubject FeederId => #2
                #1, #2 -> WithLatestFrom
                -> Equal
                -> WorkflowOutput
            -> Merge
            -> Condition NotDiscount => #27
                WorkflowInput Source1
                -> MemberSelector(Selector=EventType)
                -> NotEqual(Operand=WorkflowProperty<Aeon.Foraging.DispenserEventType>(Value=Discount))
                -> WorkflowOutput
            SubscribeSubject PelletDeliver
            -> Condition RisingEdge
                WorkflowInput Source1
                -> MemberSelector(Selector=Value)
                -> WorkflowOutput
            -> Aeon.Foraging.CreateDispenserEvent(Value=1, EventType=Discount) => #30
            #27, #30 -> Merge => #31
            SubscribeSubject PatchDispenser
            -> First => #33
            #31, #33 -> Aeon.Foraging.DispenserAccumulate
            -> MulticastSubject PatchDispenser

            SubscribeSubject FeederControllerGroup
            -> Condition ID
                WorkflowInput Source1
                -> MemberSelector(Selector=Key) => #1
                SubscribeSubject FeederId => #2
                #1, #2 -> WithLatestFrom
                -> Equal
                -> WorkflowOutput
            -> Merge => #38
            -> Condition Reset
                WorkflowInput Source1
                -> MemberSelector(Selector=EventType)
                -> Equal(Operand=WorkflowProperty<Aeon.Foraging.DispenserEventType>(Value=Reset))
                -> WorkflowOutput
            -> Feeder.CreateFeederCommand(Command=ResetFeeder)
            -> MemberSelector(Selector=Command) => #41
            SubscribeSubject FeederId => #42
            #41, #42 -> WithLatestFrom
            -> MulticastSubject FeederTrigger
            #38 -> Condition Discount
                WorkflowInput Source1
                -> MemberSelector(Selector=EventType)
                -> Equal(Operand=WorkflowProperty<Aeon.Foraging.DispenserEventType>(Value=Discount))
                -> WorkflowOutput
            -> Feeder.CreateFeederCommand(Command=DeliverPellet)
            -> MemberSelector(Selector=Command) => #47
            SubscribeSubject FeederId => #48
            #47, #48 -> WithLatestFrom
            -> MulticastSubject FeederTrigger

            SubscribeSubject FeederWheelDisplacement
            -> Condition ID
                WorkflowInput Source1
                -> MemberSelector(Selector=Key) => #1
                SubscribeSubject FeederId => #2
                #1, #2 -> WithLatestFrom
                -> Equal
                -> WorkflowOutput
            -> Merge
            -> PublishSubject WheelDisplacement

            IncludeWorkflow
              Path=Aeon.Foraging:PelletMissed.bonsai
              PelletDelivered=PelletDeliver
              TimeToMiss=PT2S
              DistanceToMiss=20
              TimeInChute=PT0S
              WheelDisplacement=WheelDisplacement
            -> PublishSubject PelletMisssed => #56
            SubscribeSubject FeederId => #57
            #56, #57 -> WithLatestFrom
            -> GroupBy(KeySelector=Item2, ElementSelector=Item1)
            -> MulticastSubject FeederPelletMissed

            SubscribeSubject FeederId
            -> Aeon.Acquisition.CreateGroup PresistentTotalMissedPellets
                WorkflowInput Source1

                SubscribeSubject PelletMisssed
                -> IncludeWorkflow(Path=Extensions\PressistentCounter.bonsai, FilePrefix=FeederPelletsMissed)
                -> WorkflowOutput
            -> MulticastSubject FeederTotalMissedPellets

            SubscribeSubject FeederId
            -> Aeon.Acquisition.CreateGroup PresistentTotalDeliveredPellets
                WorkflowInput Source1

                SubscribeSubject PelletDeliver
                -> Disable IncludeWorkflow(Path=Aeon.Environment:EnvironmentCondition.bonsai, Value=Experiment)
                -> IncludeWorkflow(Path=Extensions\PressistentCounter.bonsai, FilePrefix=FeederPelletsDelivered)
                -> WorkflowOutput
            -> MulticastSubject FeederTotalDeliveredPellets

            IncludeWorkflow(Path=Aeon.Foraging:TimeSpentOnWheel.bonsai, Patch=PatchEvents, WheelPatch=WheelDisplacement, Threshold=0.0003, LowPass=1) => #67
            SubscribeSubject FeederId => #68
            #67, #68 -> WithLatestFrom
            -> PublishSubject TimeSpentOn
            -> GroupBy(KeySelector=Item2, ElementSelector=Item1)
            -> MulticastSubject FeederTimeSpentOnWheel

            SubscribeSubject TimeSpentOn
            -> Disable IncludeWorkflow(Path=Extensions\RepeatEveryBlock.bonsai)
            -> DistinctUntilChanged
            -> IncludeWorkflow PatchEvents(Path=Extensions\TimeSinceLastEvent.bonsai) => #76
            SubscribeSubject FeederId => #77
            #76, #77 -> WithLatestFrom
            -> GroupBy(KeySelector=Item2, ElementSelector=Item1)
            -> MulticastSubject FeederTimeSinceLastVisit
        -> WorkflowOutput
    -> ReplaySubject FeederDispenser(BufferSize=nil)

GroupWorkflow Heatmap
    SubscribeSubject RigConfiguration
    -> MemberSelector(Selector=Cameras)
    -> Merge
    -> Condition HasTracking
        WorkflowInput Source1
        -> MemberSelector(Selector=Value.Tracking)
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: it!=null
        -> WorkflowOutput
    -> SelectMany
        WorkflowInput Source1
        -> Take(Count=1)
        -> AsyncSubject TrackingCamera

        SubscribeSubject TrackingEvents
        -> Condition
            WorkflowInput Source1
            -> MemberSelector(Selector=Key) => #1
            SubscribeSubject TrackingCamera
            -> MemberSelector(Selector=Key) => #3
            #1, #3 -> WithLatestFrom
            -> Equal
            -> WorkflowOutput
        -> Take(Count=1)
        -> Merge
        -> PublishSubject SelectedTrackingEvents

        SubscribeSubject SelectedTrackingEvents
        -> Condition
            WorkflowInput Source1
            -> MemberSelector(Selector=Value)
            -> MemberSelector(Selector=Count)
            -> GreaterThan(Operand=IntProperty(Value=0))
            -> WorkflowOutput
        -> MemberSelector(Selector=Value[0].Centroid)
        -> Bonsai.Dsp.Histogram2D(MinX=0, MaxX=1440, MinY=0, MaxY=1080, BinsX=288, BinsY=216, Normalize=false, Accumulate=true)
        -> Bonsai.Dsp.ConvertScale(Depth=U8, Scale=20, Shift=0)
        -> IncludeWorkflow(Path=Aeon.Foraging:RepeatEverySubject.bonsai)
        -> SampleInterval(Interval=PT0.03S) => #14
        SubscribeSubject TrackingEvents
        -> MemberSelector(Selector=Key) => #16
        #14, #16 -> WithLatestFrom
        -> WorkflowOutput
    -> GroupBy(KeySelector=Item2, ElementSelector=Item1)
    -> ReplaySubject Heatmap(BufferSize=nil)

GroupWorkflow inputKeys
    Bonsai.Windows.Input.KeyDown(Filter="LButton ShiftKey ControlKey Space Prior PageUp D0 D1 Alt", SuppressRepetitions=false) => #0
    StringProperty(Value=Key1Event) => #1
    #0, #1 -> WithLatestFrom => #2
    Bonsai.Windows.Input.KeyDown(Filter="RButton ShiftKey Menu Space Next PageDown D0 D2 Alt", SuppressRepetitions=false) => #3
    StringProperty(Value=Key2Event) => #4
    #3, #4 -> WithLatestFrom => #5
    Bonsai.Windows.Input.KeyDown(Filter="LButton RButton Cancel ShiftKey ControlKey Menu Pause Space Prior PageUp Next PageDown End D0 D1 D2 D3 Alt", SuppressRepetitions=false) => #6
    StringProperty(Value=Key3Event) => #7
    #6, #7 -> WithLatestFrom => #8
    Bonsai.Windows.Input.KeyDown(Filter="MButton ShiftKey Capital CapsLock Space Home D0 D4 Alt", SuppressRepetitions=false) => #9
    StringProperty(Value=Key4Event) => #10
    #9, #10 -> WithLatestFrom => #11
    #2, #5, #8, #11 -> Merge
    -> GroupBy(KeySelector=Item2, ElementSelector=Item1)
    -> ReplaySubject KeyEvents(BufferSize=nil)

GroupWorkflow MovementBehaviorTracking
    SubscribeSubject RigConfiguration
    -> MemberSelector(Selector=Cameras)
    -> Merge
    -> Condition HasTracking
        WorkflowInput Source1
        -> MemberSelector(Selector=Value.Tracking)
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: it!=null
        -> WorkflowOutput
    -> SelectMany
        WorkflowInput Source1
        -> Take(Count=1) => #1
        -> MemberSelector(Selector=Value.Tracking)
        -> HtsLoom.MatchTracking(Type=TypeMapping<HtsLoom.HeadTailTracking>) => #3
        #1 -> MemberSelector(Selector=Key) => #4
        #3, #4 -> Zip
        -> WorkflowOutput
    -> ToDictionary(KeySelector=Item2, ElementSelector=Item1)
    -> ReplaySubject HeadTailTrackingSettings(BufferSize=nil)

    SubscribeSubject HeadTailTrackingSettings
    -> Merge
    -> SelectMany StreamConnectedComponent
        WorkflowInput Source1
        -> Take(Count=1)
        -> AsyncSubject HeadTailTrackingSettings

        SubscribeSubject TrackingEvents
        -> Condition
            WorkflowInput Source1
            -> MemberSelector(Selector=Key) => #1
            SubscribeSubject HeadTailTrackingSettings
            -> MemberSelector(Selector=Key) => #3
            #1, #3 -> WithLatestFrom
            -> Equal
            -> WorkflowOutput
        -> Merge
        -> SelectMany => #6
            WorkflowInput Source1
            -> Take(Count=1)
            -> AsyncSubject Collection

            SubscribeSubject Collection => #3
            -> MemberSelector(Selector=Value)
            -> Concat => #5
            #3 -> MemberSelector(Selector=Seconds) => #6
            #5, #6 -> WithLatestFrom
            -> Bonsai.Harp.CreateTimestamped
            -> ElementIndex
            -> MemberSelector(Selector="Value,Index")
            -> WorkflowOutput
        SubscribeSubject HeadTailTrackingSettings
        -> MemberSelector(Selector=Key) => #8
        #6, #8 -> WithLatestFrom
        -> WorkflowOutput
    -> GroupBy(KeySelector="Item2,Item1.Item2", ElementSelector=Item1.Item1)
    -> ReplaySubject TrackingIndexed(BufferSize=nil)

    SubscribeSubject TrackingIndexed
    -> SelectMany HeadTailVelocity
        WorkflowInput Source1
        -> Take(Count=1)
        -> AsyncSubject IndexedComponent

        SubscribeSubject IndexedComponent
        -> MemberSelector(Selector=Key)
        -> AsyncSubject IndexedKey

        SubscribeSubject HeadTailTrackingSettings => #6
        SubscribeSubject IndexedKey => #7
        #6, #7 -> Zip
        -> InputMapping(Selector=Item1, Value(Selector=Item2.Item1))
        -> Index(Operand=WorkflowProperty<HtsLoom.CameraName>(Value=CameraNorth))
        -> Take(Count=1)
        -> AsyncSubject Settings

        SubscribeSubject IndexedComponent => #13
        SubscribeSubject Settings => #14
        #13, #14 -> SubscribeWhen
        -> Take(Count=1)
        -> AsyncSubject TrackingSortedPerCamera

        SubscribeSubject TrackingSortedPerCamera
        -> Merge => #19
        SubscribeSubject Settings
        -> PropertyMapping(VelocityThreshold(Selector=VelocityThreshold), BufferLength(Selector=BufferLength)) => #21
        #19, #21 -> Bonsai.Harp.ConvertTimestamped HeadTailVelocity => #22
            WorkflowInput Source1 => #0
            ExternalizedMapping(BufferLength, VelocityThreshold) => #1
            #0, #1 -> GroupWorkflow HeadTail => #2
                WorkflowInput Source1 => #0
                -> Bonsai.Vision.BinaryRegionExtremes(Method=MajorAxis) => #1
                ExternalizedMapping(Count(DisplayName=BufferLength)) => #2
                -> Range(Start=0, Count=10)
                -> Bonsai.Vision.CreatePoint2f(X=NaN, Y=NaN) => #4
                #0 -> MemberSelector(Selector=Centroid) => #5
                #4, #5 -> Concat => #6
                #6, #2 -> BufferCount(Count=10, Skip=1) => #7
                #1, #7 -> WithLatestFrom => #8
                ExternalizedMapping(VelocityThreshold) => #9
                #8, #9 -> HeadTailVelocity(VelocityThreshold=10) => #10
                -> WorkflowOutput
                #10 -> MemberSelector(Selector=Velocity) => #12
                -> Bonsai.Dsp.Norm(NormType=L2)
                #12 -> Take(Count=2)
            #2, #0 -> Zip
            -> WorkflowOutput
        SubscribeSubject TrackingSortedPerCamera
        -> MemberSelector(Selector=Key) => #24
        #22, #24 -> WithLatestFrom
        -> WorkflowOutput
    -> GroupBy(KeySelector=Item2, ElementSelector=Item1)
    -> ReplaySubject HeadTailObservable(BufferSize=nil)
    -> MemberSelector(Selector=Key)
