<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:drw="clr-namespace:Bonsai.Vision.Drawing;assembly=Bonsai.Vision"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="WorkflowInput">
        <Name>Source1</Name>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="ExternalColor" />
      </Expression>
      <Expression xsi:type="rx:CreateObservable">
        <Name>DrawBlob</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>BlobId</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>HeadTails</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>BlobId</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:SubscribeWhen" />
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Key.Item2</Selector>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>BlobId</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="Equal" />
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="3" Label="Source1" />
                  <Edge From="2" To="3" Label="Source2" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>CurrentHeadTail</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Canvas</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>CurrentHeadTail</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Sample" />
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Contour" Selector="Value.Item2.Contour" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="ExternalColor" />
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>AddBlob</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Contour" />
                    <Property Name="ExternalColor" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="drw:DrawContours">
                      <drw:ExternalColor>
                        <drw:Val0>255</drw:Val0>
                        <drw:Val1>0</drw:Val1>
                        <drw:Val2>255</drw:Val2>
                        <drw:Val3>255</drw:Val3>
                      </drw:ExternalColor>
                      <drw:HoleColor>
                        <drw:Val0>0</drw:Val0>
                        <drw:Val1>0</drw:Val1>
                        <drw:Val2>0</drw:Val2>
                        <drw:Val3>0</drw:Val3>
                      </drw:HoleColor>
                      <drw:MaxLevel>0</drw:MaxLevel>
                      <drw:Thickness>2</drw:Thickness>
                      <drw:LineType>Connected8</drw:LineType>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="2" Label="Source1" />
                  <Edge From="1" To="2" Label="Source2" />
                  <Edge From="2" To="3" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Value.Item1.Head</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Center" Selector="it" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="drw:Circle">
                <drw:Center>
                  <drw:X>647</drw:X>
                  <drw:Y>586</drw:Y>
                </drw:Center>
                <drw:Radius>2</drw:Radius>
                <drw:Color>
                  <drw:Val0>0</drw:Val0>
                  <drw:Val1>0</drw:Val1>
                  <drw:Val2>255</drw:Val2>
                  <drw:Val3>255</drw:Val3>
                </drw:Color>
                <drw:Thickness>2</drw:Thickness>
                <drw:LineType>Connected8</drw:LineType>
                <drw:Shift>0</drw:Shift>
              </Combinator>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Value.Item2.Centroid</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Center" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="drw:Circle">
                <drw:Center>
                  <drw:X>732</drw:X>
                  <drw:Y>448</drw:Y>
                </drw:Center>
                <drw:Radius>2</drw:Radius>
                <drw:Color>
                  <drw:Val0>0</drw:Val0>
                  <drw:Val1>255</drw:Val1>
                  <drw:Val2>0</drw:Val2>
                  <drw:Val3>255</drw:Val3>
                </drw:Color>
                <drw:Thickness>2</drw:Thickness>
                <drw:LineType>Connected8</drw:LineType>
                <drw:Shift>0</drw:Shift>
              </Combinator>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Value.Item1.Tail</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Center" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="drw:Circle">
                <drw:Center>
                  <drw:X>767</drw:X>
                  <drw:Y>308</drw:Y>
                </drw:Center>
                <drw:Radius>2</drw:Radius>
                <drw:Color>
                  <drw:Val0>255</drw:Val0>
                  <drw:Val1>255</drw:Val1>
                  <drw:Val2>255</drw:Val2>
                  <drw:Val3>255</drw:Val3>
                </drw:Color>
                <drw:Thickness>2</drw:Thickness>
                <drw:LineType>Connected8</drw:LineType>
                <drw:Shift>0</drw:Shift>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="InputMapping">
              <PropertyMappings>
                <Property Name="Origin" Selector="Item2" />
              </PropertyMappings>
              <Selector>Item1</Selector>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>BlobId</Name>
            </Expression>
            <Expression xsi:type="Format">
              <Format>{0}</Format>
              <Selector>it</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Text" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="drw:AddText">
                <drw:Text>0</drw:Text>
                <drw:Alignment>Center</drw:Alignment>
                <drw:LineAlignment>Center</drw:LineAlignment>
                <drw:TextRenderingHint>AntiAliasGridFit</drw:TextRenderingHint>
                <drw:Color>
                  <drw:Val0>255</drw:Val0>
                  <drw:Val1>255</drw:Val1>
                  <drw:Val2>255</drw:Val2>
                  <drw:Val3>150</drw:Val3>
                </drw:Color>
                <drw:Font>Microsoft Sans Serif, 27.75pt, style=Bold</drw:Font>
                <drw:Origin>
                  <drw:X>732</drw:X>
                  <drw:Y>448</drw:Y>
                </drw:Origin>
              </Combinator>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>Canvas</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>BlobId</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="3" To="5" Label="Source1" />
            <Edge From="4" To="5" Label="Source2" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="8" To="11" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source2" />
            <Edge From="10" To="12" Label="Source1" />
            <Edge From="10" To="15" Label="Source1" />
            <Edge From="10" To="18" Label="Source1" />
            <Edge From="10" To="21" Label="Source1" />
            <Edge From="11" To="14" Label="Source1" />
            <Edge From="12" To="14" Label="Source2" />
            <Edge From="13" To="14" Label="Source3" />
            <Edge From="14" To="17" Label="Source1" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="16" To="17" Label="Source2" />
            <Edge From="17" To="20" Label="Source1" />
            <Edge From="18" To="19" Label="Source1" />
            <Edge From="18" To="24" Label="Source2" />
            <Edge From="19" To="20" Label="Source2" />
            <Edge From="20" To="23" Label="Source1" />
            <Edge From="21" To="22" Label="Source1" />
            <Edge From="22" To="23" Label="Source2" />
            <Edge From="23" To="24" Label="Source1" />
            <Edge From="24" To="25" Label="Source1" />
            <Edge From="25" To="29" Label="Source1" />
            <Edge From="26" To="27" Label="Source1" />
            <Edge From="27" To="28" Label="Source1" />
            <Edge From="28" To="29" Label="Source2" />
            <Edge From="29" To="30" Label="Source1" />
            <Edge From="30" To="32" Label="Source1" />
            <Edge From="31" To="32" Label="Source2" />
            <Edge From="32" To="33" Label="Source1" />
            <Edge From="33" To="34" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Concat" />
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
    </Nodes>
    <Edges>
      <Edge From="0" To="2" Label="Source1" />
      <Edge From="1" To="2" Label="Source2" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>