<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:p1="clr-namespace:;assembly=Extensions"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns:sys="clr-namespace:System;assembly=mscorlib"
                 xmlns:gl="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="WorkflowInput">
        <Name>Source1</Name>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="LocationX" Category="PhotoDiode" />
        <Property Name="LocationY" Category="PhotoDiode" />
        <Property Name="PhotodiodeColor" />
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>NewExecuteLoom</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>LoomStreamPerScreen</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Key</Selector>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>ScreenName</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>DrawScreen</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>ScreenName</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item1.Key</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p1:GetEnumKey" />
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item2</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="Equal" />
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="0" To="3" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="4" Label="Source1" />
                  <Edge From="3" To="4" Label="Source2" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item1</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>Draw</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>LoomStreamPerScreen</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>ScreenName</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item1</Selector>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="PhotodiodeColor" />
            </Expression>
            <Expression xsi:type="rx:CreateObservable">
              <Name>RunLoom</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:AsyncSubject">
                    <Name>LoomingSettings</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>LoomingSettings</Name>
                  </Expression>
                  <Expression xsi:type="rx:SelectMany">
                    <Name>Looming</Name>
                    <Description>Looming</Description>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>DrawScreen</Name>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>ScreenName</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:WithLatestFrom" />
                        </Expression>
                        <Expression xsi:type="rx:Condition">
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="WorkflowInput">
                                <Name>Source1</Name>
                              </Expression>
                              <Expression xsi:type="MemberSelector">
                                <Selector>Item1.Key</Selector>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="p1:GetEnumKey" />
                              </Expression>
                              <Expression xsi:type="MemberSelector">
                                <Selector>Item2</Selector>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:Zip" />
                              </Expression>
                              <Expression xsi:type="Equal" />
                              <Expression xsi:type="WorkflowOutput" />
                            </Nodes>
                            <Edges>
                              <Edge From="0" To="1" Label="Source1" />
                              <Edge From="0" To="3" Label="Source1" />
                              <Edge From="1" To="2" Label="Source1" />
                              <Edge From="2" To="4" Label="Source1" />
                              <Edge From="3" To="4" Label="Source2" />
                              <Edge From="4" To="5" Label="Source1" />
                              <Edge From="5" To="6" Label="Source1" />
                            </Edges>
                          </Workflow>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Item1</Selector>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Merge" />
                        </Expression>
                        <Expression xsi:type="rx:PublishSubject">
                          <Name>Draw</Name>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>LoomingSettings</Name>
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="StartSize" Selector="StartSize" />
                            <Property Name="EndSize" Selector="EndSize" />
                            <Property Name="AnimationDuration" Selector="AnimationDuration" />
                            <Property Name="TimeOnSet" Selector="TimeOnSet" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="GroupWorkflow">
                          <Name>Animation</Name>
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="ExternalizedMapping">
                                <Property Name="Value" DisplayName="StartSize" Category="AnimationSettings" />
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="FloatProperty">
                                  <Value>0.1</Value>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:Take">
                                  <rx:Count>1</rx:Count>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="rx:AsyncSubject">
                                <Name>StartSize</Name>
                              </Expression>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>StartSize</Name>
                              </Expression>
                              <Expression xsi:type="PropertyMapping">
                                <PropertyMappings>
                                  <Property Name="RangeBegin" />
                                </PropertyMappings>
                              </Expression>
                              <Expression xsi:type="ExternalizedMapping">
                                <Property Name="RangeEnd" DisplayName="EndSize" Category="AnimationSettings" />
                                <Property Name="Duration" DisplayName="AnimationDuration" Category="StimulusSettings" />
                              </Expression>
                              <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.RangeAnimation.bonsai">
                                <Duration>0.17</Duration>
                                <RangeBegin>0.10000000149011612</RangeBegin>
                                <RangeEnd>2</RangeEnd>
                              </Expression>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>StartSize</Name>
                              </Expression>
                              <Expression xsi:type="ExternalizedMapping">
                                <Property Name="Value" DisplayName="TimeOnSet" Category="StimulusSettings" />
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="DoubleProperty">
                                  <Value>0.25</Value>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="scr:ExpressionTransform">
                                <scr:Expression>TimeSpan.FromSeconds(it)</scr:Expression>
                              </Expression>
                              <Expression xsi:type="PropertyMapping">
                                <PropertyMappings>
                                  <Property Name="DueTime" />
                                </PropertyMappings>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:Delay">
                                  <rx:DueTime>PT0.25S</rx:DueTime>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:Take">
                                  <rx:Count>1</rx:Count>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:Concat" />
                              </Expression>
                              <Expression xsi:type="WorkflowOutput" />
                            </Nodes>
                            <Edges>
                              <Edge From="0" To="1" Label="Source1" />
                              <Edge From="1" To="2" Label="Source1" />
                              <Edge From="2" To="3" Label="Source1" />
                              <Edge From="4" To="5" Label="Source1" />
                              <Edge From="5" To="7" Label="Source1" />
                              <Edge From="6" To="7" Label="Source2" />
                              <Edge From="7" To="15" Label="Source1" />
                              <Edge From="8" To="13" Label="Source1" />
                              <Edge From="9" To="10" Label="Source1" />
                              <Edge From="10" To="11" Label="Source1" />
                              <Edge From="11" To="12" Label="Source1" />
                              <Edge From="12" To="13" Label="Source2" />
                              <Edge From="13" To="14" Label="Source1" />
                              <Edge From="14" To="15" Label="Source2" />
                              <Edge From="15" To="16" Label="Source1" />
                            </Edges>
                          </Workflow>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                        <Expression xsi:type="SubscribeSubject">
                          <Name>Draw</Name>
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="Diameter" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>LoomingSettings</Name>
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="ColorR" Selector="LoomingColor" />
                            <Property Name="ColorG" Selector="LoomingColor" />
                            <Property Name="ColorB" Selector="LoomingColor" />
                            <Property Name="LocationX" Selector="Location.X" />
                            <Property Name="LocationY" Selector="Location.Y" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawCircle.bonsai">
                          <Diameter>0.1</Diameter>
                          <LocationX>0</LocationX>
                          <LocationY>0</LocationY>
                          <Layer>0</Layer>
                          <ColorR>0</ColorR>
                          <ColorG>0</ColorG>
                          <ColorB>0</ColorB>
                          <ColorA>1</ColorA>
                        </Expression>
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="2" Label="Source1" />
                        <Edge From="1" To="2" Label="Source2" />
                        <Edge From="2" To="3" Label="Source1" />
                        <Edge From="3" To="4" Label="Source1" />
                        <Edge From="4" To="5" Label="Source1" />
                        <Edge From="5" To="6" Label="Source1" />
                        <Edge From="7" To="8" Label="Source1" />
                        <Edge From="8" To="9" Label="Source1" />
                        <Edge From="9" To="10" Label="Source1" />
                        <Edge From="9" To="12" Label="Source1" />
                        <Edge From="11" To="15" Label="Source1" />
                        <Edge From="12" To="15" Label="Source2" />
                        <Edge From="13" To="14" Label="Source1" />
                        <Edge From="14" To="15" Label="Source3" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="PhotodiodeColor" />
                  </Expression>
                  <Expression xsi:type="GroupWorkflow">
                    <Name>StimulusBehavior</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>LoomingSettings</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>NumberOfPulses</Selector>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Take">
                            <rx:Count>1</rx:Count>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="rx:AsyncSubject">
                          <Name>NumberOfPulses</Name>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>LoomingSettings</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>InitialDelay</Selector>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Take">
                            <rx:Count>1</rx:Count>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="rx:BehaviorSubject">
                          <Name>InitialDelay</Name>
                        </Expression>
                        <Expression xsi:type="rx:BehaviorSubject" TypeArguments="sys:Object">
                          <rx:Name>StopPulse</rx:Name>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>InitialDelay</Name>
                        </Expression>
                        <Expression xsi:type="IncludeWorkflow" Path="Extensions\RenderFrameDelay.bonsai" />
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Take">
                            <rx:Count>1</rx:Count>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="rx:BehaviorSubject">
                          <Name>Start</Name>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>Start</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Take">
                            <rx:Count>1</rx:Count>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="Value" DisplayName="PhotodiodeColor" />
                        </Expression>
                        <Expression xsi:type="rx:Sink">
                          <Name>PhotoDiode</Name>
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="WorkflowInput">
                                <Name>Source1</Name>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:Take">
                                  <rx:Count>1</rx:Count>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="ExternalizedMapping">
                                <Property Name="Value" />
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="FloatProperty">
                                  <Value>1</Value>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="MulticastSubject">
                                <Name>PhotoDiodeColor</Name>
                              </Expression>
                              <Expression xsi:type="WorkflowOutput" />
                            </Nodes>
                            <Edges>
                              <Edge From="0" To="1" Label="Source1" />
                              <Edge From="1" To="3" Label="Source1" />
                              <Edge From="2" To="3" Label="Source2" />
                              <Edge From="3" To="4" Label="Source1" />
                              <Edge From="4" To="5" Label="Source1" />
                            </Edges>
                          </Workflow>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="IntProperty">
                            <Value>1</Value>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="rx:BehaviorSubject">
                          <Name>count</Name>
                        </Expression>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>Start</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:SubscribeWhen" />
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>StopPulse</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:TakeUntil" />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:LastOrDefault" />
                        </Expression>
                        <Expression xsi:type="rx:Sink">
                          <Name>InitialDelay</Name>
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="WorkflowInput">
                                <Name>Source1</Name>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="DoubleProperty">
                                  <Value>0</Value>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="MulticastSubject">
                                <Name>InitialDelay</Name>
                              </Expression>
                            </Nodes>
                            <Edges>
                              <Edge From="0" To="1" Label="Source1" />
                              <Edge From="1" To="2" Label="Source1" />
                            </Edges>
                          </Workflow>
                        </Expression>
                        <Expression xsi:type="rx:SelectMany">
                          <Name>InterPulse</Name>
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="WorkflowInput">
                                <Name>Source1</Name>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:Take">
                                  <rx:Count>1</rx:Count>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="rx:AsyncSubject">
                                <Name>SourceTrigger</Name>
                              </Expression>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>SourceTrigger</Name>
                              </Expression>
                              <Expression xsi:type="rx:Condition">
                                <Name>IsLast</Name>
                                <Workflow>
                                  <Nodes>
                                    <Expression xsi:type="WorkflowInput">
                                      <Name>Source1</Name>
                                    </Expression>
                                    <Expression xsi:type="SubscribeSubject">
                                      <Name>count</Name>
                                    </Expression>
                                    <Expression xsi:type="Combinator">
                                      <Combinator xsi:type="rx:Take">
                                        <rx:Count>1</rx:Count>
                                      </Combinator>
                                    </Expression>
                                    <Expression xsi:type="Combinator">
                                      <Combinator xsi:type="rx:WithLatestFrom" />
                                    </Expression>
                                    <Expression xsi:type="MemberSelector">
                                      <Selector>Item2</Selector>
                                    </Expression>
                                    <Expression xsi:type="SubscribeSubject">
                                      <Name>LoomingSettings</Name>
                                    </Expression>
                                    <Expression xsi:type="MemberSelector">
                                      <Selector>NumberOfPulses</Selector>
                                    </Expression>
                                    <Expression xsi:type="Combinator">
                                      <Combinator xsi:type="rx:WithLatestFrom" />
                                    </Expression>
                                    <Expression xsi:type="GreaterThanOrEqual" />
                                    <Expression xsi:type="WorkflowOutput" />
                                  </Nodes>
                                  <Edges>
                                    <Edge From="0" To="3" Label="Source1" />
                                    <Edge From="1" To="2" Label="Source1" />
                                    <Edge From="2" To="3" Label="Source2" />
                                    <Edge From="3" To="4" Label="Source1" />
                                    <Edge From="4" To="7" Label="Source1" />
                                    <Edge From="5" To="6" Label="Source1" />
                                    <Edge From="6" To="7" Label="Source2" />
                                    <Edge From="7" To="8" Label="Source1" />
                                    <Edge From="8" To="9" Label="Source1" />
                                  </Edges>
                                </Workflow>
                              </Expression>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>SourceTrigger</Name>
                              </Expression>
                              <Expression xsi:type="rx:Condition">
                                <Name>NotLast</Name>
                                <Workflow>
                                  <Nodes>
                                    <Expression xsi:type="WorkflowInput">
                                      <Name>Source1</Name>
                                    </Expression>
                                    <Expression xsi:type="SubscribeSubject">
                                      <Name>count</Name>
                                    </Expression>
                                    <Expression xsi:type="Combinator">
                                      <Combinator xsi:type="rx:Take">
                                        <rx:Count>1</rx:Count>
                                      </Combinator>
                                    </Expression>
                                    <Expression xsi:type="Combinator">
                                      <Combinator xsi:type="rx:WithLatestFrom" />
                                    </Expression>
                                    <Expression xsi:type="MemberSelector">
                                      <Selector>Item2</Selector>
                                    </Expression>
                                    <Expression xsi:type="SubscribeSubject">
                                      <Name>LoomingSettings</Name>
                                    </Expression>
                                    <Expression xsi:type="MemberSelector">
                                      <Selector>NumberOfPulses</Selector>
                                    </Expression>
                                    <Expression xsi:type="Combinator">
                                      <Combinator xsi:type="rx:WithLatestFrom" />
                                    </Expression>
                                    <Expression xsi:type="LessThan" />
                                    <Expression xsi:type="WorkflowOutput" />
                                  </Nodes>
                                  <Edges>
                                    <Edge From="0" To="3" Label="Source1" />
                                    <Edge From="1" To="2" Label="Source1" />
                                    <Edge From="2" To="3" Label="Source2" />
                                    <Edge From="3" To="4" Label="Source1" />
                                    <Edge From="4" To="7" Label="Source1" />
                                    <Edge From="5" To="6" Label="Source1" />
                                    <Edge From="6" To="7" Label="Source2" />
                                    <Edge From="7" To="8" Label="Source1" />
                                    <Edge From="8" To="9" Label="Source1" />
                                  </Edges>
                                </Workflow>
                              </Expression>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>LoomingSettings</Name>
                              </Expression>
                              <Expression xsi:type="MemberSelector">
                                <Selector>InterPulseInterval</Selector>
                              </Expression>
                              <Expression xsi:type="IncludeWorkflow" Path="Extensions\RenderFrameDelay.bonsai" />
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:Zip" />
                              </Expression>
                              <Expression xsi:type="MemberSelector">
                                <Selector>Item1</Selector>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:Merge" />
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:Take">
                                  <rx:Count>1</rx:Count>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>count</Name>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:WithLatestFrom" />
                              </Expression>
                              <Expression xsi:type="MemberSelector">
                                <Selector>Item2</Selector>
                              </Expression>
                              <Expression xsi:type="Add">
                                <Operand xsi:type="IntProperty">
                                  <Value>1</Value>
                                </Operand>
                              </Expression>
                              <Expression xsi:type="MulticastSubject">
                                <Name>count</Name>
                              </Expression>
                              <Expression xsi:type="WorkflowOutput" />
                            </Nodes>
                            <Edges>
                              <Edge From="0" To="1" Label="Source1" />
                              <Edge From="1" To="2" Label="Source1" />
                              <Edge From="3" To="4" Label="Source1" />
                              <Edge From="4" To="12" Label="Source1" />
                              <Edge From="5" To="6" Label="Source1" />
                              <Edge From="6" To="10" Label="Source1" />
                              <Edge From="7" To="8" Label="Source1" />
                              <Edge From="8" To="9" Label="Source1" />
                              <Edge From="9" To="10" Label="Source2" />
                              <Edge From="10" To="11" Label="Source1" />
                              <Edge From="11" To="12" Label="Source2" />
                              <Edge From="12" To="13" Label="Source1" />
                              <Edge From="13" To="15" Label="Source1" />
                              <Edge From="14" To="15" Label="Source2" />
                              <Edge From="15" To="16" Label="Source1" />
                              <Edge From="16" To="17" Label="Source1" />
                              <Edge From="17" To="18" Label="Source1" />
                              <Edge From="18" To="19" Label="Source1" />
                            </Edges>
                          </Workflow>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>NumberOfPulses</Name>
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="Count" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:RepeatCount">
                            <rx:Count>3</rx:Count>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="Annotation">
                          <Text><![CDATA[WithLatestFrom pattern doen't work]]></Text>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>NumberOfPulses</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:SubscribeWhen" />
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>StopPulse</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:TakeUntil" />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:LastOrDefault" />
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="2" To="3" Label="Source1" />
                        <Edge From="4" To="5" Label="Source1" />
                        <Edge From="5" To="6" Label="Source1" />
                        <Edge From="6" To="7" Label="Source1" />
                        <Edge From="9" To="10" Label="Source1" />
                        <Edge From="10" To="11" Label="Source1" />
                        <Edge From="11" To="12" Label="Source1" />
                        <Edge From="13" To="14" Label="Source1" />
                        <Edge From="14" To="16" Label="Source1" />
                        <Edge From="15" To="16" Label="Source2" />
                        <Edge From="17" To="18" Label="Source1" />
                        <Edge From="19" To="21" Label="Source1" />
                        <Edge From="20" To="21" Label="Source2" />
                        <Edge From="21" To="23" Label="Source1" />
                        <Edge From="22" To="23" Label="Source2" />
                        <Edge From="23" To="24" Label="Source1" />
                        <Edge From="24" To="25" Label="Source1" />
                        <Edge From="25" To="26" Label="Source1" />
                        <Edge From="26" To="29" Label="Source1" />
                        <Edge From="27" To="28" Label="Source1" />
                        <Edge From="28" To="29" Label="Source2" />
                        <Edge From="29" To="32" Label="Source1" />
                        <Edge From="30" To="31" Label="Source1" />
                        <Edge From="31" To="32" Label="Source2" />
                        <Edge From="32" To="34" Label="Source1" />
                        <Edge From="33" To="34" Label="Source2" />
                        <Edge From="34" To="35" Label="Source1" />
                        <Edge From="35" To="36" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="rx:SelectMany">
                    <Name>Photodiode</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>BackgroundColor</Name>
                        </Expression>
                        <Expression xsi:type="MulticastSubject">
                          <Name>PhotoDiodeColor</Name>
                        </Expression>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:WithLatestFrom" />
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Item2</Selector>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Take">
                            <rx:Count>1</rx:Count>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="3" Label="Source1" />
                        <Edge From="2" To="3" Label="Source2" />
                        <Edge From="3" To="4" Label="Source1" />
                        <Edge From="4" To="5" Label="Source1" />
                        <Edge From="5" To="6" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="6" Label="Source1" />
                  <Edge From="5" To="6" Label="Source2" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Concat" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="SubscribeSubject">
              <Name>Draw</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="LocationX" />
              <Property Name="LocationY" />
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>DrawSyncQuad</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="FloatProperty">
                      <Value>1</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:BehaviorSubject" TypeArguments="sys:Single">
                    <rx:Name>PhotoDiodeColor</rx:Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="gl:Delay">
                      <gl:DueTime>PT0S</gl:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Concat" />
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="ColorR" />
                      <Property Name="ColorG" />
                      <Property Name="ColorB" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="LocationX" />
                    <Property Name="LocationY" />
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawQuad.bonsai">
                    <ExtentX>0.1</ExtentX>
                    <ExtentY>0.1</ExtentY>
                    <LocationX>-1.65</LocationX>
                    <LocationY>-0.82</LocationY>
                    <Layer>20</Layer>
                    <Angle>0</Angle>
                    <ColorR>0.21</ColorR>
                    <ColorG>0.21</ColorG>
                    <ColorB>0.21</ColorB>
                    <ColorA>1</ColorA>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="8" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="5" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source2" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="8" Label="Source2" />
                  <Edge From="7" To="8" Label="Source3" />
                  <Edge From="8" To="9" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="5" To="7" Label="Source1" />
            <Edge From="6" To="7" Label="Source2" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="15" Label="Source1" />
            <Edge From="14" To="15" Label="Source2" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="16" To="18" Label="Source1" />
            <Edge From="17" To="18" Label="Source2" />
            <Edge From="18" To="19" Label="Source1" />
            <Edge From="19" To="20" Label="Source1" />
            <Edge From="21" To="23" Label="Source1" />
            <Edge From="22" To="23" Label="Source2" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
    </Nodes>
    <Edges>
      <Edge From="0" To="2" Label="Source1" />
      <Edge From="1" To="2" Label="Source2" />
      <Edge From="2" To="3" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>