WorkflowBuilder(Version=2.9.1)
ReplaySubject<System.Reactive.Linq.IGroupedObservable(System.Tuple(HtsLoom.FeederName,System.String),System.Tuple(System.Double,System.Double))> FeederStateDistanceGroup(BufferSize=nil)
ReplaySubject<System.Reactive.Linq.IGroupedObservable(System.String,HtsLoom.FeederABCTransition)> PlayerTransitionGroup(BufferSize=nil)
ReplaySubject<System.Reactive.Linq.IGroupedObservable(System.Tuple(System.String,HtsLoom.FeederName),FeederInStateReward)> FeederInStateRewardGroup(BufferSize=nil)

Defer Task
    GetCurrentDir
    -> Take(Count=1)
    -> AsyncSubject WorkingDir

    PublishSubject<System.Tuple(HtsLoom.FeederABCTransition,System.String)> PlayerTransition
    -> MemberSelector(Selector=Item2)
    -> Distinct
    -> Aeon.Acquisition.CreateGroup
        WorkflowInput Source1
        -> Take(Count=1)
        -> AsyncSubject key

        SubscribeSubject PlayerTransition => #3
        SubscribeSubject key => #4
        #3, #4 -> WithLatestFrom
        -> Bonsai.Scripting.Expressions.ExpressionCondition
          Expression: Item1.Item2.Contains(Item2)
        -> MemberSelector(Selector=Item1.Item1)
        -> WorkflowOutput
    -> MulticastSubject PlayerTransitionGroup

    PublishSubject<FeederInStateReward> FeederInStateReward
    -> MemberSelector(Selector="Player,Feeder")
    -> Distinct
    -> Aeon.Acquisition.CreateGroup
        WorkflowInput Source1
        -> Take(Count=1)
        -> AsyncSubject key

        SubscribeSubject FeederInStateReward => #3
        SubscribeSubject key => #4
        #3, #4 -> WithLatestFrom
        -> Bonsai.Scripting.Expressions.ExpressionCondition
          Expression: Item1.Feeder == Item2.Item2 && Item1.Player.Contains(Item2.Item1)
        -> MemberSelector(Selector=Item1)
        -> WorkflowOutput
    -> MulticastSubject FeederInStateRewardGroup

    PublishSubject<System.Tuple(System.Tuple(System.Double,System.Double),System.Tuple(HtsLoom.FeederName,System.String))> FeederStateDistance
    -> MemberSelector(Selector=Item2)
    -> Distinct
    -> Aeon.Acquisition.CreateGroup
        WorkflowInput Source1
        -> Take(Count=1)
        -> AsyncSubject key

        SubscribeSubject FeederStateDistance => #3
        SubscribeSubject key => #4
        #3, #4 -> WithLatestFrom
        -> Bonsai.Scripting.Expressions.ExpressionCondition
          Expression: Item1.Item2.Item1 == Item2.Item1 && Item1.Item2.Item2.Contains(Item2.Item2)
        -> MemberSelector(Selector=Item1.Item1)
        -> WorkflowOutput
    -> MulticastSubject FeederStateDistanceGroup

    SubscribeSubject TaskConfiguration
    -> MemberSelector(Selector=FeederTask)
    -> Merge
    -> MemberSelector(Selector=Key)
    -> Aeon.Acquisition.CreateGroup StateMachinePlayer
        WorkflowInput Source1
        -> Take(Count=1)
        -> AsyncSubject PlayerId

        SubscribeSubject TaskConfiguration
        -> MemberSelector(Selector=FeederTask) => #4
        SubscribeSubject PlayerId
        -> PropertyMapping(Value) => #6
        #4, #6 -> Index(Operand=StringProperty(Value=ScreenWest)) => #7
        -> MemberSelector(Selector=MetaStates)
        -> AsyncSubject MetaStates => #9
        #7 -> MemberSelector(Selector=StartState) => #10
        #9, #10 -> Zip
        -> InputMapping(Selector=Item1, Value(Selector=Item2))
        -> Index(Operand=StringProperty(Value=State_1)) => #13
        #13, #10 -> WithLatestFrom
        -> BehaviorSubject CurrentMetaState

        GroupWorkflow TopStatesPlayer
            PublishSubject<System.Double> MetaStateCurrentTimeInterval
            BehaviorSubject<System.Int32> MetaStateEatenPelletsCount
            BehaviorSubject<System.Int32> MetaStateStateCounter
            PublishSubject<HtsLoom.FeederABCTransition> MetaStateSelectedTransition
            BehaviorSubject<System.Collections.Generic.IList(HtsLoom.FeederName)> PlayerFeeders

            SubscribeSubject CurrentMetaState
            -> SelectMany TopStatePlayer
                GroupWorkflow ABCDStatePlayer => #0
                    BehaviorSubject<System.Collections.Generic.Dictionary(System.String,HtsLoom.ForagingState)> States
                    ReplaySubject<System.Reactive.Linq.IGroupedObservable(HtsLoom.FeederName,Bonsai.Harp.Timestamped(System.Double))> InStateWheelDisplacement(BufferSize=nil)
                    ReplaySubject<System.Reactive.Linq.IGroupedObservable(HtsLoom.FeederName,Bonsai.Harp.Timestamped(System.Double))> InStateWheelDeltaDisplacement(BufferSize=nil)
                    ReplaySubject<System.Reactive.Linq.IGroupedObservable(HtsLoom.FeederName,Bonsai.Harp.Timestamped(System.Double))> InStateResetWheelDisplacement(BufferSize=nil)
                    BehaviorSubject<System.String> FeederCurrentStateKey

                    SubscribeSubject States
                    -> GetLaneFeeders
                    -> MulticastSubject PlayerFeeders

                    ExternalizedMapping
                    -> Defer StatePlayer
                        BehaviorSubject<System.Tuple(Bonsai.Harp.Timestamped(System.Double),HtsLoom.FeederName)> WheelDisplacement
                        -> GroupBy(KeySelector=Item2, ElementSelector=Item1)
                        -> MulticastSubject InStateWheelDisplacement

                        BehaviorSubject<System.Tuple(Bonsai.Harp.Timestamped(System.Double),HtsLoom.FeederName)> ResetWheelDisplacement
                        -> GroupBy(KeySelector=Item2, ElementSelector=Item1)
                        -> MulticastSubject InStateResetWheelDisplacement

                        BehaviorSubject<System.Tuple(Bonsai.Harp.Timestamped(System.Double),HtsLoom.FeederName)> StateWheelDelta
                        -> GroupBy(KeySelector=Item2, ElementSelector=Item1)
                        -> MulticastSubject InStateWheelDeltaDisplacement

                        SubscribeSubject CurrentMetaState
                        -> MemberSelector(Selector=Item1.StateFile) => #10
                        SubscribeSubject WorkingDir => #11
                        #10, #11 -> WithLatestFrom
                        -> Format(Format={0}\{1}, Selector="Item2,Item1")
                        -> CreateObservable PLayMetaState
                            WorkflowInput Source1
                            -> Take(Count=1)
                            -> AsyncSubject FileName

                            SubscribeSubject FileName
                            -> PropertyMapping(Path)
                            -> Bonsai.IO.ReadAllText(Path=C:\ProjectAeon\aeon_exp_htsloom\src\ScreenWest_Rule.yaml)
                            -> Take(Count=1)
                            -> HtsLoom.DeserializeFromYaml(Type=TypeMapping<HtsLoom.ForagingController>) => #7
                            -> MemberSelector(Selector=States)
                            -> MulticastSubject States => #9
                            #7 -> MemberSelector(Selector=StartState) => #10
                            #9, #10 -> WithLatestFrom
                            -> MemberSelector(Selector=Item2)
                            -> MulticastSubject FeederCurrentStateKey

                            ExternalizedMapping(StateSwitchDelay)
                            -> Defer StatePlayer
                                SubscribeSubject FeederCurrentStateKey => #0
                                SubscribeSubject States => #1
                                #0, #1 -> WithLatestFrom => #2
                                ExternalizedMapping(StateSwitchDelay) => #3
                                #2, #3 -> CreateObservable PlayState
                                    WorkflowInput Source1
                                    -> Take(Count=1)
                                    -> AsyncSubject State
                                    -> InputMapping(Selector=Item2, Value(Selector=Item1))
                                    -> Index(Operand=StringProperty(Value=ScreenWest_State1))
                                    -> AsyncSubject RunningState

                                    SubscribeSubject RunningState
                                    -> MemberSelector(Selector=PatchStates)
                                    -> Merge
                                    -> SelectMany WheelDisplacement
                                        WorkflowInput Source1
                                        -> Take(Count=1) => #1
                                        -> MemberSelector(Selector=Key)
                                        -> AsyncSubject FeederId
                                        #1 -> MemberSelector(Selector=Value)
                                        -> AsyncSubject PatchStateSettings

                                        SubscribeSubject FeederWheelDisplacement => #6
                                        SubscribeSubject FeederId => #7
                                        #6, #7 -> SubscribeWhen
                                        -> IncludeWorkflow(Path=Extensions\MatchId.bonsai, IdSubjectToMatch=FeederId)
                                        -> Merge => #10
                                        GroupWorkflow MaintenanceGain
                                            SubscribeSubject EnvironmentState
                                            -> MemberSelector(Selector=Value.Type)
                                            -> Equal(Operand=WorkflowProperty<Aeon.Environment.EnvironmentStateType>(Value=Experiment))
                                            -> Bonsai.Scripting.Expressions.ExpressionTransform
                                              Expression: it ? 1.0 : 0.0
                                            -> WorkflowOutput
                                        -> PropertyMapping(Gain) => #12
                                        #10, #12 -> Bonsai.Harp.ConvertTimestamped
                                            WorkflowInput Source1 => #0
                                            ExternalizedMapping(Value(DisplayName=Gain, Description="A factor used to increase or decrease the speed of integration.")) => #1
                                            #0, #1 -> Multiply(Operand=DoubleProperty(Value=1))
                                            -> Accumulate
                                            -> WorkflowOutput
                                        -> PublishSubject WheelDisplacement => #14
                                        SubscribeSubject FeederId => #15
                                        #14, #15 -> WithLatestFrom
                                        -> WorkflowOutput
                                    -> IncludeWorkflow(Path=Aeon.Environment:EnvironmentCondition.bonsai, Value=Experiment)
                                    -> MulticastSubject WheelDisplacement

                                    SubscribeSubject RunningState
                                    -> MemberSelector(Selector=PatchStates)
                                    -> Merge
                                    -> MemberSelector(Selector=Key)
                                    -> SelectMany WheelDeltaDisplacementGroup
                                        WorkflowInput Source1
                                        -> Take(Count=1)
                                        -> AsyncSubject FeederId

                                        SubscribeSubject RunningState
                                        -> MemberSelector(Selector=PatchStates) => #4
                                        SubscribeSubject FeederId
                                        -> PropertyMapping(Value) => #6
                                        #4, #6 -> Index(Operand=WorkflowProperty<HtsLoom.FeederName>(Value=Feeder4))
                                        -> Take(Count=1)
                                        -> AsyncSubject CurrentWheelState

                                        SubscribeSubject FeederTimeSinceLastVisit => #10
                                        SubscribeSubject CurrentWheelState
                                        -> MemberSelector(Selector=RewardRule.InactivityTimeout)
                                        -> Condition GreaterThanZero => #13
                                            WorkflowInput Source1
                                            -> GreaterThan(Operand=DoubleProperty(Value=0))
                                            -> WorkflowOutput
                                        #10, #13 -> SubscribeWhen
                                        -> IncludeWorkflow(Path=Extensions\MatchId.bonsai, IdSubjectToMatch=FeederId)
                                        -> Merge
                                        -> IncludeWorkflow(Path=Aeon.Environment:EnvironmentCondition.bonsai, Value=Experiment)
                                        -> MemberSelector(Selector=Value) => #18
                                        SubscribeSubject CurrentWheelState
                                        -> MemberSelector(Selector=RewardRule.InactivityTimeout) => #20
                                        #18, #20 -> WithLatestFrom
                                        -> GreaterThan
                                        -> DistinctUntilChanged
                                        -> Condition => #24
                                            WorkflowInput Source1
                                            -> WorkflowOutput
                                        BehaviorSubject<Bonsai.Harp.Timestamped(System.Double)> WheelDisplacement => #25
                                        #24, #25 -> WithLatestFrom => #26
                                        ExternalizedMapping(MinimumDistThreshold) => #27
                                        #26, #27 -> Condition
                                            WorkflowInput Source1
                                            -> MemberSelector(Selector=Item2.Value) => #1
                                            ExternalizedMapping(Value(DisplayName=MinimumDistThreshold)) => #2
                                            #1, #2 -> GreaterThan(Operand=DoubleProperty(Value=0.1))
                                            -> WorkflowOutput
                                        -> MemberSelector(Selector=Item2)
                                        -> Bonsai.Harp.ConvertTimestamped
                                            WorkflowInput Source1
                                            -> Multiply(Operand=DoubleProperty(Value=-1))
                                            -> WorkflowOutput
                                        -> PublishSubject TriggerReset

                                        SubscribeSubject FeederWheelDisplacement
                                        -> IncludeWorkflow(Path=Extensions\MatchId.bonsai, IdSubjectToMatch=FeederId)
                                        -> Merge
                                        -> IncludeWorkflow(Path=Aeon.Environment:EnvironmentCondition.bonsai, Value=Experiment) => #35
                                        ExternalizedMapping(Gain) => #36
                                        #35, #36 -> Bonsai.Harp.ConvertTimestamped ApplyGain => #37
                                            WorkflowInput Source1 => #0
                                            ExternalizedMapping(Value(DisplayName=Gain, Description="A factor used to increase or decrease the speed of integration.")) => #1
                                            #0, #1 -> Multiply(Operand=DoubleProperty(Value=1))
                                            -> WorkflowOutput
                                        SubscribeSubject TriggerReset => #38
                                        #37, #38 -> Merge
                                        -> Bonsai.Harp.ConvertTimestamped Accumulate
                                            WorkflowInput Source1
                                            -> Accumulate
                                            -> WorkflowOutput
                                        -> MulticastSubject WheelDisplacement => #41
                                        SubscribeSubject FeederId => #42
                                        #41, #42 -> WithLatestFrom
                                        -> WorkflowOutput

                                        SubscribeSubject TriggerReset => #45
                                        SubscribeSubject FeederId => #46
                                        #45, #46 -> WithLatestFrom
                                        -> MulticastSubject ResetWheelDisplacement
                                    -> MulticastSubject StateWheelDelta

                                    SubscribeSubject RunningState
                                    -> MemberSelector(Selector=PatchStates)
                                    -> Merge
                                    -> MemberSelector(Selector=Key) => #21
                                    ExternalizedMapping(StateSwitchDelay) => #22
                                    #21, #22 -> SelectMany RewardThreshold
                                        WorkflowInput Source1
                                        -> Take(Count=1)
                                        -> AsyncSubject FeederId

                                        SubscribeSubject RunningState
                                        -> MemberSelector(Selector=PatchStates)
                                        -> Merge
                                        -> Condition ID
                                            WorkflowInput Source1
                                            -> MemberSelector(Selector=Key) => #1
                                            SubscribeSubject FeederId => #2
                                            #1, #2 -> WithLatestFrom
                                            -> Equal
                                            -> WorkflowOutput
                                        -> Take(Count=1)
                                        -> AsyncSubject CurrentWheelState

                                        SubscribeSubject InStateWheelDisplacement
                                        -> IncludeWorkflow(Path=Extensions\MatchId.bonsai, IdSubjectToMatch=FeederId)
                                        -> Merge
                                        -> MemberSelector(Selector=Value)
                                        -> PublishSubject CurrentDistance

                                        SubscribeSubject CurrentDistance => #14
                                        SubscribeSubject CurrentWheelState
                                        -> MemberSelector(Selector=Value.RewardRule.DistanceThreshold)
                                        -> Condition => #17
                                            WorkflowInput Source1
                                            -> GreaterThan(Operand=DoubleProperty(Value=0))
                                            -> WorkflowOutput
                                        #14, #17 -> WithLatestFrom
                                        -> GreaterThan
                                        -> Condition
                                            WorkflowInput Source1
                                            -> WorkflowOutput
                                        -> Take(Count=1) => #21
                                        -> Condition WheelState
                                            SubscribeSubject CurrentWheelState
                                            -> MemberSelector(Selector=Value.Behavior) => #1
                                            ExternalizedMapping(Value) => #2
                                            #1, #2 -> Equal(Operand=WorkflowProperty<HtsLoom.PatchBehavior>(Value=Reward))
                                            -> WorkflowOutput
                                        -> Feeder.CreateFeederCommand(Command=DeliverPellet)
                                        -> MemberSelector(Selector=Command) => #24
                                        SubscribeSubject FeederId => #25
                                        #24, #25 -> WithLatestFrom
                                        -> MulticastSubject FeederTrigger
                                        ExternalizedMapping(DueTime(DisplayName=StateSwitchDelay)) => #28
                                        #21, #28 -> Delay(DueTime=PT0S)
                                        -> Condition WheelNotState
                                            SubscribeSubject CurrentWheelState
                                            -> MemberSelector(Selector=Value.Behavior)
                                            -> NotEqual(Operand=WorkflowProperty<HtsLoom.PatchBehavior>(Value=Inactive))
                                            -> GroupWorkflow "not equal inactive"
                                                WorkflowInput Source1
                                                -> WorkflowOutput
                                            -> WorkflowOutput
                                        -> CreateObservable
                                            SubscribeSubject CurrentWheelState
                                            -> MemberSelector(Selector=Value.RewardRule.NextState)
                                            -> WorkflowOutput
                                        -> Merge
                                        -> Take(Count=1)
                                        -> WorkflowOutput

                                        SubscribeSubject CurrentDistance => #35
                                        SubscribeSubject CurrentWheelState
                                        -> MemberSelector(Selector=Value.RewardRule.DistanceThreshold) => #37
                                        #35, #37 -> WithLatestFrom => #38
                                        SubscribeSubject FeederId => #39
                                        SubscribeSubject FeederCurrentStateKey => #40
                                        #39, #40 -> Zip => #41
                                        #38, #41 -> WithLatestFrom
                                        -> MulticastSubject FeederStateDistance
                                    -> Take(Count=1)
                                    -> WorkflowOutput

                                    SubscribeSubject State
                                    -> MemberSelector(Selector=Item1) => #27
                                    SubscribeSubject RunningState => #28
                                    #27, #28 -> Zip
                                    -> MulticastSubject ABCRunningState
                                -> Switch
                                -> MulticastSubject FeederCurrentStateKey
                                -> WorkflowOutput
                            -> WorkflowOutput
                        -> Switch
                        -> WorkflowOutput
                    -> WorkflowOutput
                SubscribeSubject End => #1
                #0, #1 -> TakeUntil

                GroupWorkflow StateCounter => #3
                    SubscribeSubject FeederCurrentStateKey
                    -> ElementIndex
                    -> MemberSelector(Selector=Index)
                    -> MulticastSubject MetaStateStateCounter
                    -> WorkflowOutput
                SubscribeSubject End => #4
                #3, #4 -> TakeUntil

                GroupWorkflow TimeCounter => #6
                    SubscribeSubject CameraControllerEvents
                    -> Bonsai.Harp.Parse(Register=Bonsai.Harp.ParseMessagePayload(PayloadType=Timestamp, IsArray=false)) => #1
                    -> Take(Count=1) => #2
                    #1, #2 -> WithLatestFrom
                    -> Subtract
                    -> MulticastSubject MetaStateCurrentTimeInterval
                    -> WorkflowOutput
                SubscribeSubject End => #7
                #6, #7 -> TakeUntil

                GroupWorkflow EatenPelletsCounter => #9
                    IntProperty(Value=0)
                    -> MulticastSubject MetaStateEatenPelletsCount

                    SubscribeSubject FeederTotalDeliveredPellets => #2
                    SubscribeSubject RigConfiguration
                    -> MemberSelector(Selector=Feeders.Count)
                    -> PropertyMapping(Count) => #5
                    #2, #5 -> Take(Count=4)
                    -> CreateObservable
                        WorkflowInput Source1
                        -> Take(Count=1)
                        -> AsyncSubject TotalPellets

                        SubscribeSubject TotalPellets
                        -> Merge
                        -> MemberSelector(Selector=Value) => #5
                        ExternalizedMapping(Name(DisplayName=IGroupObservableSubject, Category=Subject))
                        -> SubscribeSubject FeederTotalMissedPellets => #7
                        SubscribeSubject TotalPellets => #8
                        #7, #8 -> WithLatestFrom
                        -> Condition EqualKeys
                            WorkflowInput Source1
                            -> MemberSelector(Selector="Item1.Key,Item2.Key")
                            -> Equal
                            -> WorkflowOutput
                        -> MemberSelector(Selector=Item1)
                        -> Merge
                        -> MemberSelector(Selector=Value) => #13
                        #5, #13 -> CombineLatest
                        -> Subtract => #15
                        -> WorkflowOutput
                        #15 -> Materialize
                    -> CombineLatest
                    -> Add => #9
                    -> Take(Count=1) => #10
                    #9, #10 -> WithLatestFrom
                    -> Subtract
                    -> MulticastSubject MetaStateEatenPelletsCount
                    -> WorkflowOutput
                SubscribeSubject End => #10
                #9, #10 -> TakeUntil

                GroupWorkflow FeederInStateRewardCounter => #12
                    SubscribeSubject PlayerFeeders
                    -> CreateObservable
                        WorkflowInput Source1
                        -> Take(Count=1)
                        -> AsyncSubject ActiveFeeders

                        SubscribeSubject FeederTotalDeliveredPellets
                        -> Condition InLane
                            WorkflowInput Source1
                            -> MemberSelector(Selector=Key) => #1
                            SubscribeSubject ActiveFeeders => #2
                            #1, #2 -> WithLatestFrom
                            -> MemberSelector(Selector="Item2,Item1")
                            -> Contains
                            -> WorkflowOutput
                        -> SelectMany PerFeederReward
                            WorkflowInput Source1
                            -> Take(Count=1)
                            -> AsyncSubject FeederPelletsDelivered

                            SubscribeSubject Delivered
                            -> Take(Count=1)
                            -> AsyncSubject BaselineDelivered

                            SubscribeSubject FeederPelletsDelivered
                            -> Merge
                            -> MemberSelector(Selector=Value)
                            -> PublishSubject Delivered

                            SubscribeSubject Delivered => #10
                            SubscribeSubject BaselineDelivered => #11
                            #10, #11 -> WithLatestFrom
                            -> Subtract => #13
                            SubscribeSubject Missed => #14
                            SubscribeSubject BaselineMissed => #15
                            #14, #15 -> WithLatestFrom
                            -> Subtract => #17
                            #13, #17 -> CombineLatest => #18
                            SubscribeSubject FeederWheelDisplacement => #19
                            SubscribeSubject FeederPelletsDelivered => #20
                            #19, #20 -> WithLatestFrom
                            -> Condition EqualKeys
                                WorkflowInput Source1
                                -> MemberSelector(Selector="Item1.Key,Item2.Key")
                                -> Equal
                                -> WorkflowOutput
                            -> MemberSelector(Selector=Item1)
                            -> Merge
                            -> MemberSelector(Selector=Value) => #25
                            GroupWorkflow MaintenanceGain => #26
                                SubscribeSubject EnvironmentState
                                -> MemberSelector(Selector=Value.Type)
                                -> Equal(Operand=WorkflowProperty<Aeon.Environment.EnvironmentStateType>(Value=Experiment))
                                -> Bonsai.Scripting.Expressions.ExpressionTransform
                                  Expression: it ? 1.0 : 0.0
                                -> WorkflowOutput
                            #25, #26 -> WithLatestFrom
                            -> Multiply
                            -> Accumulate => #29
                            #18, #29 -> WithLatestFrom => #30
                            SubscribeSubject FeederPelletsDelivered
                            -> MemberSelector(Selector=Key) => #32
                            #30, #32 -> WithLatestFrom => #33
                            SubscribeSubject CurrentMetaState
                            -> MemberSelector(Selector=Item2) => #35
                            #33, #35 -> WithLatestFrom => #36
                            SubscribeSubject PlayerId => #37
                            #36, #37 -> WithLatestFrom
                            -> CreateFeederInStateReward
                            -> MulticastSubject FeederInStateReward
                            -> WorkflowOutput

                            SubscribeSubject FeederTotalMissedPellets => #42
                            SubscribeSubject FeederPelletsDelivered => #43
                            #42, #43 -> WithLatestFrom
                            -> Condition EqualKeys
                                WorkflowInput Source1
                                -> MemberSelector(Selector="Item1.Key,Item2.Key")
                                -> Equal
                                -> WorkflowOutput
                            -> MemberSelector(Selector=Item1)
                            -> Merge
                            -> MemberSelector(Selector=Value)
                            -> PublishSubject Missed

                            SubscribeSubject Missed
                            -> Take(Count=1)
                            -> AsyncSubject BaselineMissed
                        -> WorkflowOutput
                    -> Switch
                    -> WorkflowOutput
                SubscribeSubject End => #13
                #12, #13 -> TakeUntil

                WorkflowInput Source1
                -> MemberSelector(Selector=Item1.Transitions)
                -> Merge
                -> SelectMany TransitionPlayer
                    WorkflowInput Source1
                    -> Take(Count=1)
                    -> AsyncSubject TransitionSettings

                    GroupWorkflow DurationTrigger => #3
                        SubscribeSubject TransitionSettings
                        -> MemberSelector(Selector=ActivationInterval)
                        -> MemberSelector(Selector=TotalSeconds)
                        -> Take(Count=1)
                        -> AsyncSubject Duration

                        SubscribeSubject MetaStateCurrentTimeInterval => #5
                        SubscribeSubject Duration => #6
                        #5, #6 -> WithLatestFrom
                        -> GreaterThanOrEqual
                        -> Condition
                            WorkflowInput Source1
                            -> WorkflowOutput
                        -> Take(Count=1)
                        -> WorkflowOutput
                    GroupWorkflow EatenPelletsCount => #4
                        SubscribeSubject MetaStateEatenPelletsCount => #0
                        SubscribeSubject TransitionSettings
                        -> MemberSelector(Selector=ActivationRewards) => #2
                        #0, #2 -> WithLatestFrom
                        -> GreaterThanOrEqual
                        -> Condition
                            WorkflowInput Source1
                            -> WorkflowOutput
                        -> Take(Count=1)
                        -> WorkflowOutput
                    GroupWorkflow KeyEvents => #5
                        SubscribeSubject TransitionSettings
                        -> MemberSelector(Selector=ActivationEvent)
                        -> Take(Count=1)
                        -> AsyncSubject KeySettings

                        SubscribeSubject KeyEvents => #4
                        SubscribeSubject KeySettings => #5
                        #4, #5 -> WithLatestFrom
                        -> Condition
                            WorkflowInput Source1
                            -> MemberSelector(Selector="Item1.Key,Item2")
                            -> Equal
                            -> WorkflowOutput
                        -> MemberSelector(Selector=Item1)
                        -> Merge
                        -> BooleanProperty(Value=true) => #10
                        SubscribeSubject KeySettings
                        -> Condition
                            WorkflowInput Source1 => #0
                            ExternalizedMapping(Value) => #1
                            #0, #1 -> Equal(Operand=WorkflowProperty<HtsLoom.EventName>(Value=None))
                            -> WorkflowOutput
                        -> BooleanProperty(Value=false) => #13
                        #10, #13 -> Merge
                        -> Take(Count=1)
                        -> WorkflowOutput
                    GroupWorkflow StateTransitions => #6
                        SubscribeSubject TransitionSettings
                        -> MemberSelector(Selector=ActivationTransitions)
                        -> Take(Count=1)
                        -> AsyncSubject StateTransitionsCount

                        SubscribeSubject MetaStateStateCounter => #4
                        SubscribeSubject StateTransitionsCount => #5
                        #4, #5 -> WithLatestFrom
                        -> GreaterThanOrEqual
                        -> Condition
                            WorkflowInput Source1
                            -> WorkflowOutput
                        -> BooleanProperty(Value=true)
                        -> WorkflowOutput
                    #3, #4, #5, #6 -> Zip => #7
                    SubscribeSubject TransitionSettings => #8
                    #7, #8 -> WithLatestFrom
                    -> MemberSelector(Selector=Item2)
                    -> WorkflowOutput
                -> MulticastSubject MetaStateSelectedTransition
                -> SelectMany GetMetaState
                    WorkflowInput Source1
                    -> Take(Count=1)
                    -> AsyncSubject NewMetaStateTransition

                    SubscribeSubject MetaStates => #3
                    SubscribeSubject NewMetaStateTransition => #4
                    #3, #4 -> WithLatestFrom
                    -> InputMapping(Selector=Item1, Value(Selector=Item2.TargetState))
                    -> Index(Operand=StringProperty(Value=State_1)) => #7
                    SubscribeSubject NewMetaStateTransition
                    -> MemberSelector(Selector=TargetState) => #9
                    #7, #9 -> WithLatestFrom
                    -> WorkflowOutput
                -> Take(Count=1)
                -> BehaviorSubject End
                -> WorkflowOutput
            -> WorkflowOutput

            SubscribeSubject MetaStateSelectedTransition => #8
            SubscribeSubject PlayerId => #9
            #8, #9 -> WithLatestFrom
            -> MulticastSubject PlayerTransition
        -> MulticastSubject CurrentMetaState

        BehaviorSubject<System.Tuple(System.String,HtsLoom.ForagingState)> ABCRunningState
        -> Delay(DueTime=PT0.01S) => #19
        SubscribeSubject CurrentMetaState => #20
        #19, #20 -> WithLatestFrom
        -> WorkflowOutput
    -> WorkflowOutput
-> ReplaySubject FeedersTask(BufferSize=nil)
