WorkflowBuilder(Version=2.9.0)
GroupWorkflow MetaStateController
    PublishSubject<System.Double> MetaStateCurrentTimeInterval
    BehaviorSubject<System.Int32> MetaStateEatenPelletsCount
    BehaviorSubject<System.Int32> MetaStateStateCounter
    BehaviorSubject<HtsLoom.FeederABCTransition> MetaStateSelectedTransition

    SubscribeSubject CurrentMetaState
    -> SelectMany MetaStatePlayer
        GroupWorkflow StateCounter => #0
            SubscribeSubject CurrentState
            -> ElementIndex
            -> MemberSelector(Selector=Index)
            -> MulticastSubject MetaStateStateCounter
            -> WorkflowOutput
        SubscribeSubject End => #1
        #0, #1 -> TakeUntil

        GroupWorkflow TimeCounter => #3
            SubscribeSubject CameraControllerEvents
            -> Bonsai.Harp.Parse(Register=Bonsai.Harp.ParseMessagePayload(PayloadType=Timestamp, IsArray=false)) => #1
            -> Take(Count=1) => #2
            #1, #2 -> WithLatestFrom
            -> Subtract
            -> MulticastSubject MetaStateCurrentTimeInterval
            -> WorkflowOutput
        SubscribeSubject End => #4
        #3, #4 -> TakeUntil

        GroupWorkflow EatenPelletsCounter => #6
            SubscribeSubject FeederTotalDeliveredPellets => #0
            SubscribeSubject RigConfiguration
            -> MemberSelector(Selector=Feeders.Count)
            -> PropertyMapping(Count) => #3
            #0, #3 -> Take(Count=2)
            -> CreateObservable
                WorkflowInput Source1
                -> Take(Count=1)
                -> AsyncSubject TotalPellets

                SubscribeSubject TotalPellets
                -> Merge
                -> MemberSelector(Selector=Value) => #5
                ExternalizedMapping(Name(DisplayName=IGroupObservableSubject, Category=Subject))
                -> SubscribeSubject FeederTotalMissedPellets => #7
                SubscribeSubject TotalPellets => #8
                #7, #8 -> WithLatestFrom
                -> Condition EqualKeys
                    WorkflowInput Source1
                    -> MemberSelector(Selector="Item1.Key,Item2.Key")
                    -> Equal
                    -> WorkflowOutput
                -> MemberSelector(Selector=Item1)
                -> Merge
                -> MemberSelector(Selector=Value) => #13
                #5, #13 -> CombineLatest
                -> Subtract => #15
                -> WorkflowOutput
                #15 -> Materialize
            -> CombineLatest
            -> Add => #7
            -> Take(Count=1) => #8
            #7, #8 -> WithLatestFrom
            -> Subtract
            -> MulticastSubject MetaStateEatenPelletsCount
            -> WorkflowOutput

            IntProperty(Value=0)
            -> MulticastSubject MetaStateEatenPelletsCount
        SubscribeSubject End => #7
        #6, #7 -> TakeUntil

        WorkflowInput Source1
        -> MemberSelector(Selector=Item1.Transitions)
        -> Merge
        -> SelectMany TransitionPlayer
            WorkflowInput Source1
            -> Take(Count=1)
            -> AsyncSubject TransitionSettings

            GroupWorkflow DurationTrigger => #3
                SubscribeSubject TransitionSettings
                -> MemberSelector(Selector=ActivationInterval)
                -> MemberSelector(Selector=TotalSeconds)
                -> Take(Count=1)
                -> AsyncSubject Duration

                SubscribeSubject MetaStateCurrentTimeInterval => #5
                SubscribeSubject Duration => #6
                #5, #6 -> WithLatestFrom
                -> GreaterThanOrEqual
                -> Condition
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> Take(Count=1)
                -> WorkflowOutput
            GroupWorkflow EatenPelletsCount => #4
                SubscribeSubject MetaStateEatenPelletsCount => #0
                SubscribeSubject TransitionSettings
                -> MemberSelector(Selector=ActivationRewards) => #2
                #0, #2 -> WithLatestFrom
                -> GreaterThanOrEqual
                -> Condition
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> Take(Count=1)
                -> WorkflowOutput
            GroupWorkflow KeyEvents => #5
                SubscribeSubject TransitionSettings
                -> MemberSelector(Selector=ActivationEvent)
                -> Take(Count=1)
                -> AsyncSubject KeySettings

                SubscribeSubject KeyEvents => #4
                SubscribeSubject KeySettings => #5
                #4, #5 -> WithLatestFrom
                -> Condition
                    WorkflowInput Source1
                    -> MemberSelector(Selector="Item1.Key,Item2")
                    -> Equal
                    -> WorkflowOutput
                -> MemberSelector(Selector=Item1)
                -> Merge
                -> BooleanProperty(Value=true) => #10
                SubscribeSubject KeySettings => #11
                -> PropertySource<WorkflowProperty(HtsLoom.EventName),HtsLoom.EventName>(MemberName=Value, Value=None) => #12
                #12, #11 -> Zip
                -> Equal
                -> Condition
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> BooleanProperty(Value=false) => #16
                #10, #16 -> Merge
                -> Take(Count=1)
                -> WorkflowOutput
            GroupWorkflow StateTransitions => #6
                SubscribeSubject TransitionSettings
                -> MemberSelector(Selector=ActivationTransitions)
                -> Take(Count=1)
                -> AsyncSubject StateTransitionsCount

                SubscribeSubject MetaStateStateCounter => #4
                SubscribeSubject StateTransitionsCount => #5
                #4, #5 -> WithLatestFrom
                -> GreaterThanOrEqual
                -> Condition
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> BooleanProperty(Value=true)
                -> WorkflowOutput
            #3, #4, #5, #6 -> Zip => #7
            SubscribeSubject TransitionSettings => #8
            #7, #8 -> WithLatestFrom
            -> MemberSelector(Selector=Item2)
            -> WorkflowOutput
        -> MulticastSubject MetaStateSelectedTransition
        -> SelectMany GetMetaState
            WorkflowInput Source1
            -> Take(Count=1)
            -> AsyncSubject NewMetaStateTransition

            SubscribeSubject MetaStates => #3
            SubscribeSubject NewMetaStateTransition => #4
            #3, #4 -> WithLatestFrom
            -> InputMapping(Selector=Item1, Value(Selector=Item2.TargetState))
            -> Index(Operand=StringProperty(Value=State_2)) => #7
            SubscribeSubject NewMetaStateTransition
            -> MemberSelector(Selector=TargetState) => #9
            #7, #9 -> WithLatestFrom
            -> WorkflowOutput
        -> Take(Count=1)
        -> BehaviorSubject End
        -> WorkflowOutput
    -> WorkflowOutput
-> MulticastSubject CurrentMetaState

SubscribeSubject TaskConfiguration => #2
-> MemberSelector(Selector=FeederTask.MetaStates)
-> AsyncSubject MetaStates => #4
#2 -> MemberSelector(Selector=FeederTask.StartState) => #5
#4, #5 -> Zip
-> InputMapping(Selector=Item1, Value(Selector=Item2))
-> Index(Operand=StringProperty(Value=State_1)) => #8
#8, #5 -> WithLatestFrom
-> BehaviorSubject CurrentMetaState
-> DelaySubscription(DueTime=PT1S)

SubscribeSubject CurrentMetaState
-> GroupWorkflow ABCDStatePlayer
    BehaviorSubject<System.Collections.Generic.Dictionary(System.String,HtsLoom.ForagingState)> States
    BehaviorSubject<System.String> CurrentState
    ReplaySubject<System.Reactive.Linq.IGroupedObservable(HtsLoom.FeederName,Bonsai.Harp.Timestamped(System.Double))> InStateWheelDisplacement(BufferSize=nil)
    ReplaySubject<System.Reactive.Linq.IGroupedObservable(HtsLoom.FeederName,Bonsai.Harp.Timestamped(System.Double))> InStateWheelDeltaDisplacement(BufferSize=nil)
    ReplaySubject<System.Reactive.Linq.IGroupedObservable(HtsLoom.FeederName,Bonsai.Harp.Timestamped(System.Double))> InStateResetWheelDisplacement(BufferSize=nil)

    WorkflowInput Source1
    -> CreateObservable
        WorkflowInput Source1
        -> Take(Count=1)
        -> AsyncSubject MetaState

        SubscribeSubject MetaState
        -> MemberSelector(Selector=Item1.StateFile)
        -> PropertyMapping(Path)
        -> Bonsai.IO.ReadAllText(Path=Rule1_AllActive.yaml)
        -> Take(Count=1)
        -> HtsLoom.DeserializeFromYaml(Type=TypeMapping<HtsLoom.ForagingController>) => #8
        -> MemberSelector(Selector=States)
        -> MulticastSubject States => #10
        #8 -> MemberSelector(Selector=StartState) => #11
        #10, #11 -> WithLatestFrom
        -> MemberSelector(Selector=Item2)
        -> MulticastSubject CurrentState

        ExternalizedMapping(StateSwitchDelay)
        -> Defer StatePlayer
            BehaviorSubject<System.Tuple(Bonsai.Harp.Timestamped(System.Double),HtsLoom.FeederName)> WheelDisplacement
            -> GroupBy(KeySelector=Item2, ElementSelector=Item1)
            -> MulticastSubject InStateWheelDisplacement

            BehaviorSubject<System.Tuple(Bonsai.Harp.Timestamped(System.Double),HtsLoom.FeederName)> ResetWheelDisplacement
            -> GroupBy(KeySelector=Item2, ElementSelector=Item1)
            -> MulticastSubject InStateResetWheelDisplacement

            SubscribeSubject CurrentState
            -> Delay(DueTime=PT1S) => #7
            ExternalizedMapping(StateSwitchDelay) => #8
            #7, #8 -> CreateObservable PlayState
                WorkflowInput Source1
                -> Take(Count=1)
                -> AsyncSubject CurrentStateName

                SubscribeSubject States => #3
                SubscribeSubject CurrentStateName
                -> PropertyMapping(Value) => #5
                #3, #5 -> Index(Operand=StringProperty(Value=AllActive_State1))
                -> Take(Count=1)
                -> AsyncSubject CurrentRunningState

                SubscribeSubject CurrentRunningState
                -> MemberSelector(Selector=PatchStates)
                -> Merge
                -> SelectMany WheelDisplacement
                    WorkflowInput Source1
                    -> Take(Count=1) => #1
                    -> MemberSelector(Selector=Key)
                    -> AsyncSubject FeederId
                    #1 -> MemberSelector(Selector=Value)
                    -> AsyncSubject PatchStateSettings

                    SubscribeSubject FeederWheelDisplacement => #6
                    SubscribeSubject FeederId => #7
                    #6, #7 -> SubscribeWhen
                    -> IncludeWorkflow(Path=Extensions\MatchId.bonsai, IdSubjectToMatch=FeederId)
                    -> Merge => #10
                    GroupWorkflow MaintenanceGain
                        SubscribeSubject EnvironmentState
                        -> MemberSelector(Selector=Value.Type)
                        -> Equal(Operand=WorkflowProperty<Aeon.Environment.EnvironmentStateType>(Value=Experiment))
                        -> Bonsai.Scripting.Expressions.ExpressionTransform
                          Expression: it ? 1.0 : 0.0
                        -> WorkflowOutput
                    -> PropertyMapping(Gain) => #12
                    #10, #12 -> Bonsai.Harp.ConvertTimestamped
                        WorkflowInput Source1 => #0
                        ExternalizedMapping(Value(DisplayName=Gain, Description="A factor used to increase or decrease the speed of integration.")) => #1
                        #0, #1 -> Multiply(Operand=DoubleProperty(Value=1))
                        -> Accumulate
                        -> WorkflowOutput
                    -> PublishSubject WheelDisplacement => #14
                    SubscribeSubject FeederId => #15
                    #14, #15 -> WithLatestFrom
                    -> WorkflowOutput
                -> IncludeWorkflow(Path=Aeon.Environment:EnvironmentCondition.bonsai, Value=Experiment)
                -> MulticastSubject WheelDisplacement

                SubscribeSubject CurrentRunningState
                -> MemberSelector(Selector=PatchStates)
                -> Merge
                -> MemberSelector(Selector=Key)
                -> Aeon.Acquisition.CreateGroup WheelDeltaDisplacementGroup
                    WorkflowInput Source1
                    -> Take(Count=1)
                    -> AsyncSubject FeederId

                    SubscribeSubject CurrentRunningState
                    -> MemberSelector(Selector=PatchStates) => #4
                    SubscribeSubject FeederId
                    -> PropertyMapping(Value) => #6
                    #4, #6 -> Index(Operand=WorkflowProperty<HtsLoom.FeederName>(Value=Feeder1))
                    -> Take(Count=1)
                    -> AsyncSubject CurrentWheelState

                    SubscribeSubject FeederTimeSinceLastVisit => #10
                    SubscribeSubject CurrentWheelState
                    -> MemberSelector(Selector=RewardRule.InactivityTimeout)
                    -> Condition GreaterThanZero => #13
                        WorkflowInput Source1
                        -> GreaterThan(Operand=DoubleProperty(Value=0))
                        -> WorkflowOutput
                    #10, #13 -> SubscribeWhen
                    -> IncludeWorkflow(Path=Extensions\MatchId.bonsai, IdSubjectToMatch=FeederId)
                    -> Merge
                    -> IncludeWorkflow(Path=Aeon.Environment:EnvironmentCondition.bonsai, Value=Experiment)
                    -> MemberSelector(Selector=Value) => #18
                    SubscribeSubject CurrentWheelState
                    -> MemberSelector(Selector=RewardRule.InactivityTimeout) => #20
                    #18, #20 -> WithLatestFrom
                    -> GreaterThan
                    -> DistinctUntilChanged
                    -> Condition => #24
                        WorkflowInput Source1
                        -> WorkflowOutput
                    BehaviorSubject<Bonsai.Harp.Timestamped(System.Double)> WheelDisplacement => #25
                    #24, #25 -> WithLatestFrom => #26
                    ExternalizedMapping(MinimumDistThreshold) => #27
                    #26, #27 -> Condition
                        WorkflowInput Source1
                        -> MemberSelector(Selector=Item2.Value) => #1
                        ExternalizedMapping(Value(DisplayName=MinimumDistThreshold)) => #2
                        #1, #2 -> GreaterThan(Operand=DoubleProperty(Value=0.1))
                        -> WorkflowOutput
                    -> MemberSelector(Selector=Item2)
                    -> Bonsai.Harp.ConvertTimestamped
                        WorkflowInput Source1
                        -> Multiply(Operand=DoubleProperty(Value=-1))
                        -> WorkflowOutput
                    -> PublishSubject TriggerReset

                    SubscribeSubject FeederWheelDisplacement
                    -> IncludeWorkflow(Path=Extensions\MatchId.bonsai, IdSubjectToMatch=FeederId)
                    -> Merge => #34
                    ExternalizedMapping(Gain) => #35
                    #34, #35 -> Bonsai.Harp.ConvertTimestamped ApplyGain => #36
                        WorkflowInput Source1 => #0
                        ExternalizedMapping(Value(DisplayName=Gain, Description="A factor used to increase or decrease the speed of integration.")) => #1
                        #0, #1 -> Multiply(Operand=DoubleProperty(Value=1))
                        -> WorkflowOutput
                    SubscribeSubject TriggerReset => #37
                    #36, #37 -> Merge
                    -> Bonsai.Harp.ConvertTimestamped Accumulate
                        WorkflowInput Source1
                        -> Accumulate
                        -> WorkflowOutput
                    -> IncludeWorkflow(Path=Aeon.Environment:EnvironmentCondition.bonsai, Value=Experiment)
                    -> MulticastSubject WheelDisplacement
                    -> WorkflowOutput

                    SubscribeSubject TriggerReset => #43
                    SubscribeSubject FeederId => #44
                    #43, #44 -> WithLatestFrom
                    -> MulticastSubject ResetWheelDisplacement
                -> MulticastSubject InStateWheelDeltaDisplacement

                SubscribeSubject CurrentRunningState
                -> MemberSelector(Selector=PatchStates)
                -> Merge
                -> MemberSelector(Selector=Key) => #24
                ExternalizedMapping(StateSwitchDelay) => #25
                #24, #25 -> SelectMany RewardThreshold
                    WorkflowInput Source1
                    -> Take(Count=1)
                    -> AsyncSubject FeederId

                    SubscribeSubject CurrentRunningState
                    -> MemberSelector(Selector=PatchStates)
                    -> Merge
                    -> Condition ID
                        WorkflowInput Source1
                        -> MemberSelector(Selector=Key) => #1
                        SubscribeSubject FeederId => #2
                        #1, #2 -> WithLatestFrom
                        -> Equal
                        -> WorkflowOutput
                    -> Take(Count=1)
                    -> AsyncSubject CurrentWheelState

                    SubscribeSubject InStateWheelDeltaDisplacement
                    -> IncludeWorkflow(Path=Extensions\MatchId.bonsai, IdSubjectToMatch=FeederId)
                    -> Merge
                    -> MemberSelector(Selector=Value)
                    -> PublishSubject CurrentDistance

                    SubscribeSubject CurrentDistance => #14
                    SubscribeSubject CurrentWheelState
                    -> MemberSelector(Selector=Value.RewardRule.DistanceThreshold)
                    -> Condition => #17
                        WorkflowInput Source1
                        -> GreaterThan(Operand=DoubleProperty(Value=0))
                        -> WorkflowOutput
                    #14, #17 -> WithLatestFrom
                    -> GreaterThan
                    -> Condition
                        WorkflowInput Source1
                        -> WorkflowOutput
                    -> Take(Count=1) => #21
                    -> Condition WheelState
                        SubscribeSubject CurrentWheelState
                        -> MemberSelector(Selector=Value.Behavior) => #1
                        ExternalizedMapping(Value) => #2
                        #1, #2 -> Equal(Operand=WorkflowProperty<HtsLoom.PatchBehavior>(Value=Reward))
                        -> WorkflowOutput
                    -> Feeder.CreateFeederCommand(Command=DeliverPellet)
                    -> MemberSelector(Selector=Command) => #24
                    SubscribeSubject FeederId => #25
                    #24, #25 -> WithLatestFrom
                    -> MulticastSubject FeederTrigger
                    ExternalizedMapping(DueTime(DisplayName=StateSwitchDelay)) => #28
                    #21, #28 -> Delay(DueTime=PT2S)
                    -> Condition WheelNotState
                        SubscribeSubject CurrentWheelState
                        -> MemberSelector(Selector=Value.Behavior)
                        -> NotEqual(Operand=WorkflowProperty<HtsLoom.PatchBehavior>(Value=Inactive))
                        -> GroupWorkflow "not equal inactive"
                            WorkflowInput Source1
                            -> WorkflowOutput
                        -> WorkflowOutput
                    -> CreateObservable
                        SubscribeSubject CurrentWheelState
                        -> MemberSelector(Selector=Value.RewardRule.NextState)
                        -> WorkflowOutput
                    -> Merge
                    -> Take(Count=1)
                    -> WorkflowOutput
                -> Take(Count=1)
                -> WorkflowOutput
            -> Switch
            -> MulticastSubject CurrentState
    -> Switch
    -> WorkflowOutput
