<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="SubscribeSubject">
        <Name>RigConfiguration</Name>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Cameras</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Merge" />
      </Expression>
      <Expression xsi:type="rx:Condition">
        <Name>HasTracking</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Value.Tracking</Selector>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>it!=null</scr:Expression>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>TrackingCamera</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>TrackingEvents</Name>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Key</Selector>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>TrackingCamera</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Key</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="Equal" />
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="4" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source2" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>SelectedTrackingEvents</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>SelectedTrackingEvents</Name>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Value.Item1</Selector>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Count</Selector>
                  </Expression>
                  <Expression xsi:type="GreaterThan">
                    <Operand xsi:type="IntProperty">
                      <Value>0</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Value.Item1[0].Centroid</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:Histogram2D">
                <dsp:MinX>0</dsp:MinX>
                <dsp:MaxX>1440</dsp:MaxX>
                <dsp:MinY>0</dsp:MinY>
                <dsp:MaxY>1080</dsp:MaxY>
                <dsp:BinsX>288</dsp:BinsX>
                <dsp:BinsY>216</dsp:BinsY>
                <dsp:Normalize>false</dsp:Normalize>
                <dsp:Accumulate>true</dsp:Accumulate>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:ConvertScale">
                <dsp:Depth>U8</dsp:Depth>
                <dsp:Scale>20</dsp:Scale>
                <dsp:Shift>0</dsp:Shift>
              </Combinator>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="IncludeWorkflow" Path="Aeon.Foraging:RepeatEverySubject.bonsai" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:SampleInterval">
                <rx:Interval>PT0.03S</rx:Interval>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>TrackingCamera</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Key</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="14" To="17" Label="Source1" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="16" To="17" Label="Source2" />
            <Edge From="17" To="18" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="rx:GroupBy">
        <rx:KeySelector>Item2</rx:KeySelector>
        <rx:ElementSelector>Item1</rx:ElementSelector>
      </Expression>
      <Expression xsi:type="rx:ReplaySubject">
        <Name>Heatmap</Name>
        <rx:BufferSize xsi:nil="true" />
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>