<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns:p1="clr-namespace:Harp.InputExpander;assembly=Harp.InputExpander"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="rx:BehaviorSubject" TypeArguments="harp:HarpMessage">
        <rx:Name>InputExpanderCommands</rx:Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>RigConfiguration</Name>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>InputExpander</Selector>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>InputExpander</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>ControllerSettings</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>InputExpanderCommands</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>ControllerSettings</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="PortName" Selector="PortName" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:Device">
                <harp:OperationMode>Active</harp:OperationMode>
                <harp:OperationLed>On</harp:OperationLed>
                <harp:DumpRegisters>true</harp:DumpRegisters>
                <harp:VisualIndicators>On</harp:VisualIndicators>
                <harp:Heartbeat>Enabled</harp:Heartbeat>
                <harp:IgnoreErrors>false</harp:IgnoreErrors>
                <harp:PortName>COM11</harp:PortName>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="3" To="6" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source2" />
            <Edge From="6" To="7" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>InputExpanderEvents</Name>
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
    </Nodes>
    <Edges>
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>