<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:aeon="clr-namespace:Aeon.Acquisition;assembly=Aeon.Acquisition"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="SubscribeSubject">
        <Name>RigConfiguration</Name>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Cameras</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Merge" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Key</Selector>
      </Expression>
      <Expression xsi:type="aeon:CreateGroup">
        <Name>LagGroup</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>CameraName</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>CameraName</Name>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>SelectStream</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Name" />
                  </Expression>
                  <Expression xsi:type="rx:CreateObservable">
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Take">
                            <rx:Count>1</rx:Count>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="rx:AsyncSubject">
                          <Name>SelectedCamera</Name>
                        </Expression>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="Name" />
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>HeadTailObservable</Name>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>SelectedCamera</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:WithLatestFrom" />
                        </Expression>
                        <Expression xsi:type="rx:Condition">
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="WorkflowInput">
                                <Name>Source1</Name>
                              </Expression>
                              <Expression xsi:type="MemberSelector">
                                <Selector>Item1.Key.Item1,Item2</Selector>
                              </Expression>
                              <Expression xsi:type="Equal" />
                              <Expression xsi:type="WorkflowOutput" />
                            </Nodes>
                            <Edges>
                              <Edge From="0" To="1" Label="Source1" />
                              <Edge From="1" To="2" Label="Source1" />
                              <Edge From="2" To="3" Label="Source1" />
                            </Edges>
                          </Workflow>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Item1</Selector>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Merge" />
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="3" To="4" Label="Source1" />
                        <Edge From="4" To="6" Label="Source1" />
                        <Edge From="5" To="6" Label="Source2" />
                        <Edge From="6" To="7" Label="Source1" />
                        <Edge From="7" To="8" Label="Source1" />
                        <Edge From="8" To="9" Label="Source1" />
                        <Edge From="9" To="10" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Switch" />
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="2" Label="Source1" />
                  <Edge From="1" To="2" Label="Source2" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Seconds</Selector>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>FeederWheelDisplacement</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Seconds</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item2,Item1</Selector>
            </Expression>
            <Expression xsi:type="Subtract" />
            <Expression xsi:type="MemberSelector">
              <Selector>Item2</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:CreateTimestamped" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="9" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source2" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="10" To="12" Label="Source1" />
            <Edge From="11" To="13" Label="Source1" />
            <Edge From="12" To="13" Label="Source2" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="14" To="15" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="rx:ReplaySubject">
        <Name>HeadTailLag</Name>
        <rx:BufferSize xsi:nil="true" />
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>
