<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns:aeon-vision="clr-namespace:Aeon.Vision;assembly=Aeon.Vision"
                 xmlns:p1="clr-namespace:;assembly=Extensions"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="WorkflowInput">
        <Name>Source1</Name>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>LogBinaryRegions</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>trackingEvents</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>trackingEvents</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="harp:ConvertTimestamped">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item1</Selector>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="aeon-vision:FormatBinaryRegions" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>trackingEvents</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Key</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:GetEnumKey" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Extensions\LogHarpState.bonsai" />
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="10" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source2" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>