<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.1"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns:aeon="clr-namespace:Aeon.Acquisition;assembly=Aeon.Acquisition"
                 xmlns:p1="clr-namespace:HtsLoom.Extensions;assembly=Extensions"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="SubscribeSubject">
        <Name>FeedersTask</Name>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>LogStatesLane</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>StateGroup</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>StateGroup</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>LoggerTimestamp</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:CreateTimestamped" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>StateGroup</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Key</Selector>
            </Expression>
            <Expression xsi:type="Format">
              <Format>StateLog_{0}_States_Events</Format>
              <Selector>it</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>LogData</Name>
              <Description>Chunks and logs a generic timestamped data stream into the base data log.</Description>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item1</Selector>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Name" DisplayName="Heartbeats" Description="The source of heartbeat signals used as a timing signal for closing groups." Category="GroupClosing" />
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Heartbeats</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>ChunkSize</Name>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="ChunkSize" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="ClosingDuration" Category="GroupClosing" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="aeon:GroupByTime">
                      <aeon:ChunkSize>1</aeon:ChunkSize>
                      <aeon:ClosingDuration>PT2S</aeon:ClosingDuration>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item2</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Selector" />
                  </Expression>
                  <Expression xsi:type="rx:CreateObservable">
                    <Name>LogData</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="rx:AsyncSubject">
                          <Name>Data</Name>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>Data</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Item1</Selector>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Merge" />
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>Data</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Item1.Key,Item2</Selector>
                        </Expression>
                        <Expression xsi:type="GroupWorkflow">
                          <Name>FormatFileName</Name>
                          <Description>Generates a log filename based on the input timestamp.</Description>
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>PathPrefix</Name>
                              </Expression>
                              <Expression xsi:type="WorkflowInput">
                                <Name>Source1</Name>
                              </Expression>
                              <Expression xsi:type="MemberSelector">
                                <Selector>Item2</Selector>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:Take">
                                  <rx:Count>1</rx:Count>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="MemberSelector">
                                <Selector>Item1</Selector>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="aeon:FormatDateTimeIso8601" />
                              </Expression>
                              <Expression xsi:type="ExternalizedMapping">
                                <Property Name="Value" DisplayName="Extension" Description="The file extension" />
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="StringProperty">
                                  <Value>csv</Value>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:Take">
                                  <rx:Count>1</rx:Count>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="aeon:StripSubstring">
                                  <aeon:Separator>_</aeon:Separator>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:Zip" />
                              </Expression>
                              <Expression xsi:type="Format">
                                <Format>{0}\{4}\{1}_{2}.{3}</Format>
                                <Selector>Item1,Item2,Item3,Item4,Item5</Selector>
                              </Expression>
                              <Expression xsi:type="WorkflowOutput" />
                            </Nodes>
                            <Edges>
                              <Edge From="0" To="10" Label="Source1" />
                              <Edge From="1" To="2" Label="Source1" />
                              <Edge From="1" To="4" Label="Source1" />
                              <Edge From="2" To="3" Label="Source1" />
                              <Edge From="3" To="9" Label="Source1" />
                              <Edge From="3" To="10" Label="Source2" />
                              <Edge From="4" To="5" Label="Source1" />
                              <Edge From="5" To="10" Label="Source3" />
                              <Edge From="6" To="7" Label="Source1" />
                              <Edge From="7" To="8" Label="Source1" />
                              <Edge From="8" To="10" Label="Source4" />
                              <Edge From="9" To="10" Label="Source5" />
                              <Edge From="10" To="11" Label="Source1" />
                              <Edge From="11" To="12" Label="Source1" />
                            </Edges>
                          </Workflow>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:WithLatestFrom" />
                        </Expression>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="Selector" />
                        </Expression>
                        <Expression xsi:type="p1:CsvFileWriter">
                          <io:Append>false</io:Append>
                          <io:Overwrite>false</io:Overwrite>
                          <io:Suffix>None</io:Suffix>
                          <io:IncludeHeader>false</io:IncludeHeader>
                          <io:Selector>Seconds,Value.Item2.Item2,Value.Item2.Item1.StateFile,Value.Item1.Item1</io:Selector>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="2" To="3" Label="Source1" />
                        <Edge From="3" To="4" Label="Source1" />
                        <Edge From="4" To="8" Label="Source1" />
                        <Edge From="5" To="6" Label="Source1" />
                        <Edge From="6" To="7" Label="Source1" />
                        <Edge From="7" To="8" Label="Source2" />
                        <Edge From="8" To="10" Label="Source1" />
                        <Edge From="9" To="10" Label="Source2" />
                        <Edge From="10" To="11" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Switch" />
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="0" To="8" Label="Source1" />
                  <Edge From="1" To="7" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="7" Label="Source2" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="7" Label="Source3" />
                  <Edge From="6" To="7" Label="Source4" />
                  <Edge From="7" To="9" Label="Source1" />
                  <Edge From="8" To="9" Label="Source2" />
                  <Edge From="9" To="11" Label="Source1" />
                  <Edge From="10" To="11" Label="Source2" />
                  <Edge From="11" To="12" Label="Source1" />
                  <Edge From="12" To="13" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="MemberSelector">
              <Selector>Item2</Selector>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="6" Label="Source1" />
            <Edge From="5" To="6" Label="Source2" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="11" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source2" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="11" To="14" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>PlayerTransitionGroup</Name>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>LogMetaStateLane</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>TransitionGroup</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>TransitionGroup</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>LoggerTimestamp</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:CreateTimestamped" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>TransitionGroup</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Key</Selector>
            </Expression>
            <Expression xsi:type="Format">
              <Format>StateLog_{0}_MetaState_Events</Format>
              <Selector>it</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Extensions\LogData.bonsai">
              <Heartbeats>Heartbeats</Heartbeats>
              <ClosingDuration>PT2S</ClosingDuration>
              <Selector>Seconds,Value.TargetState,Value.ActivationInterval,Value.ActivationRewards,Value.ActivationTransitions,Value.ActivationEvent</Selector>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="6" Label="Source1" />
            <Edge From="5" To="6" Label="Source2" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="11" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source2" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>FeederStateDistanceGroup</Name>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>LogWheelLane</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>WheelGroup</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>WheelGroup</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>new(
Item1 as Distance, 
Item2 as Threshold)</scr:Expression>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>LoggerTimestamp</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:CreateTimestamped" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>WheelGroup</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Key</Selector>
            </Expression>
            <Expression xsi:type="Format">
              <Format>FeederLog_{0}_{1}_Wheel_Events</Format>
              <Selector>Item1,Item2</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Extensions\LogData.bonsai">
              <Heartbeats>Heartbeats</Heartbeats>
              <ClosingDuration>PT2S</ClosingDuration>
              <Selector xsi:nil="true" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="7" Label="Source1" />
            <Edge From="6" To="7" Label="Source2" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="12" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source2" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Key</Selector>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>FeederInStateRewardGroup</Name>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>LogPelletLane</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>PelletGroup</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>PelletGroup</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>LoggerTimestamp</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:CreateTimestamped" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>PelletGroup</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Key</Selector>
            </Expression>
            <Expression xsi:type="Format">
              <Format>StateLog_{0}_{1}_Reward_Events</Format>
              <Selector>Item1,Item2</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Extensions\LogData.bonsai">
              <Heartbeats>Heartbeats</Heartbeats>
              <ClosingDuration>PT2S</ClosingDuration>
              <Selector>Seconds,Value.Feeder,Value.MetaState,Value.Distance,Value.DistanceThreshold,Value.EatenPellets,Value.MissedPellets</Selector>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="6" Label="Source1" />
            <Edge From="5" To="6" Label="Source2" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="11" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source2" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="4" To="6" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>