<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:aeon="clr-namespace:Aeon.Acquisition;assembly=Aeon.Acquisition"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:p1="clr-namespace:HtsLoom.Extensions;assembly=Extensions"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Description>Chunks and logs a timestamped harp data stream into the base data log.</Description>
  <Workflow>
    <Nodes>
      <Expression xsi:type="WorkflowInput">
        <Name>Source1</Name>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Item1</Selector>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Name" DisplayName="Heartbeats" Description="The source of heartbeat signals used as a timing signal for closing groups." Category="GroupClosing" />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Heartbeats</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>ChunkSize</Name>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="ChunkSize" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="ClosingDuration" Category="GroupClosing" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="aeon:GroupByTime">
          <aeon:ChunkSize>1</aeon:ChunkSize>
          <aeon:ClosingDuration>PT2S</aeon:ClosingDuration>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Item2</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:WithLatestFrom" />
      </Expression>
      <Expression xsi:type="rx:CreateObservable">
        <Name>LogHarp</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>Data</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Data</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item1</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>MessageBytes</Selector>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Data</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item1.Key,Item2</Selector>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Extensions\FormatFileName.bonsai">
              <Extension>bin</Extension>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:MatrixFileWriter">
                <Suffix xmlns="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp">None</Suffix>
                <Overwrite xmlns="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp">false</Overwrite>
                <Layout xmlns="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp">ColumnMajor</Layout>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="9" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source2" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Switch" />
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="0" To="8" Label="Source1" />
      <Edge From="1" To="7" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="7" Label="Source2" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="7" Label="Source3" />
      <Edge From="6" To="7" Label="Source4" />
      <Edge From="7" To="9" Label="Source1" />
      <Edge From="8" To="9" Label="Source2" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>