<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="WorkflowInput">
        <Name>Source1</Name>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>LogHarpObservable</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Extensions\SourceStreamID.bonsai" />
            <Expression xsi:type="Disable">
              <Builder xsi:type="ExternalizedMapping">
                <Property Name="Value" DisplayName="LogName" />
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
                <Combinator xsi:type="StringProperty">
                  <Value />
                </Combinator>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
                <Combinator xsi:type="rx:Take">
                  <rx:Count>1</rx:Count>
                </Combinator>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="rx:AsyncSubject">
                <Name>LogName</Name>
              </Builder>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>StreamId</Name>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>it.ToString()</scr:Expression>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="SubscribeSubject">
                <Name>LogName</Name>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
                <Combinator xsi:type="rx:Zip" />
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="scr:ExpressionTransform">
                <scr:Expression>item2+item1.ToString()</scr:Expression>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
                <Combinator xsi:type="rx:Take">
                  <rx:Count>1</rx:Count>
                </Combinator>
              </Builder>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>InstanceLogName</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>source</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>InstanceLogName</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:AsyncSubject">
                    <Name>source</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>source</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item1</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Merge" />
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>source</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item2</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="Extensions\LogHarpState.bonsai" />
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="8" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source2" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="9" To="10" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="9" Label="Source1" />
            <Edge From="8" To="9" Label="Source2" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="13" To="15" Label="Source1" />
            <Edge From="14" To="15" Label="Source2" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="16" To="17" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>