<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns:p1="clr-namespace:;assembly=Extensions"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="WorkflowInput">
        <Name>Source1</Name>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>HeadTail</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>HeadTail</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="harp:ConvertTimestamped">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>HeadTail</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Key.Item2</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item2,Item1.Item1,Item1.Item2</Selector>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="3" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source2" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>HeadTail</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Key.Item1</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="8" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source2" />
            <Edge From="8" To="9" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="rx:GroupBy">
        <rx:KeySelector>Item2</rx:KeySelector>
        <rx:ElementSelector>Item1</rx:ElementSelector>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>IndexedHeadTail</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>IndexedHeadTail</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:IndexedHeadtTailFormatHarp">
                <p1:Address>201</p1:Address>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>IndexedHeadTail</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Key</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:GetEnumKey" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="InputMapping">
              <PropertyMappings>
                <Property Name="LogName" Selector="Item2" />
              </PropertyMappings>
              <Selector>Item1</Selector>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Aeon.Acquisition:LogHarpState.bonsai">
              <LogName>CameraTop</LogName>
              <Heartbeats>Heartbeats</Heartbeats>
              <ClosingDuration>PT2S</ClosingDuration>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="9" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source2" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>