<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:p1="clr-namespace:System.Reactive.Linq;assembly=System.Reactive.Interfaces"
                 xmlns:sys="clr-namespace:System;assembly=mscorlib"
                 xmlns:p2="clr-namespace:HtsLoom;assembly=Extensions"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns:p3="clr-namespace:;assembly=Extensions"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="rx:ReplaySubject" TypeArguments="p1:IGroupedObservable(sys:Tuple(p2:CameraName,sys:Int32,sys:Int32),harp:Timestamped(sys:Double))">
        <rx:Name>LoomInRegionTimeObservable</rx:Name>
        <rx:BufferSize xsi:nil="true" />
      </Expression>
      <Expression xsi:type="rx:ReplaySubject" TypeArguments="p1:IGroupedObservable(sys:Tuple(p2:CameraName,sys:Int32,sys:Int32),harp:Timestamped(sys:Double))">
        <rx:Name>LoomAngleObservable</rx:Name>
        <rx:BufferSize xsi:nil="true" />
      </Expression>
      <Expression xsi:type="rx:ReplaySubject" TypeArguments="p1:IGroupedObservable(sys:Tuple(p2:CameraName,sys:Int32,sys:Int32),harp:Timestamped(sys:Boolean))">
        <rx:Name>LoomRegionStateObservable</rx:Name>
        <rx:BufferSize xsi:nil="true" />
      </Expression>
      <Expression xsi:type="rx:Defer">
        <Name>LoomRegions</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="sys:Tuple(harp:Timestamped(sys:Double),sys:Tuple(p2:CameraName,sys:Int32,sys:Int32))">
              <rx:Name>LoomAngleStream</rx:Name>
            </Expression>
            <Expression xsi:type="rx:GroupBy">
              <rx:KeySelector>Item2</rx:KeySelector>
              <rx:ElementSelector>Item1</rx:ElementSelector>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>LoomAngleObservable</Name>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="sys:Tuple(harp:Timestamped(sys:Double),sys:Tuple(p2:CameraName,sys:Int32,sys:Int32))">
              <rx:Name>LoomInRegionStream</rx:Name>
            </Expression>
            <Expression xsi:type="rx:GroupBy">
              <rx:KeySelector>Item2</rx:KeySelector>
              <rx:ElementSelector>Item1</rx:ElementSelector>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>LoomInRegionTimeObservable</Name>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="sys:Tuple(harp:Timestamped(sys:Boolean),sys:Tuple(p2:CameraName,sys:Int32,sys:Int32))">
              <rx:Name>LoomRegionState</rx:Name>
            </Expression>
            <Expression xsi:type="rx:GroupBy">
              <rx:KeySelector>Item2</rx:KeySelector>
              <rx:ElementSelector>Item1</rx:ElementSelector>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>LoomRegionStateObservable</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>HeadTailTrackingSettings</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Name>HasZones</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Value.Zones</Selector>
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Expression>it!=null</scr:Expression>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Value.Zones</Selector>
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Name>ZoneIndex</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Merge" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:ElementIndex" />
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Key</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Name>CreateZoneStreams</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item1.Value.Regions</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p3:PointArrayConverter" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:AsyncSubject">
                    <Name>Settings</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>HeadTailObservable</Name>
                  </Expression>
                  <Expression xsi:type="rx:Condition">
                    <Name>CameraMatch</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Key.Item1</Selector>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>Settings</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Item1.Item2</Selector>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:WithLatestFrom" />
                        </Expression>
                        <Expression xsi:type="Equal" />
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="4" Label="Source1" />
                        <Edge From="2" To="3" Label="Source1" />
                        <Edge From="3" To="4" Label="Source2" />
                        <Edge From="4" To="5" Label="Source1" />
                        <Edge From="5" To="6" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="rx:ReplaySubject">
                    <Name>SelectedBlobs</Name>
                    <rx:BufferSize xsi:nil="true" />
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>SelectedBlobs</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Settings</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="InputMapping">
                    <PropertyMappings>
                      <Property Name="Regions" Selector="Item2.Item2" />
                    </PropertyMappings>
                    <Selector>Item1</Selector>
                  </Expression>
                  <Expression xsi:type="rx:SelectMany">
                    <Name>LoomRegion</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Take">
                            <rx:Count>1</rx:Count>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Key</Selector>
                        </Expression>
                        <Expression xsi:type="rx:AsyncSubject">
                          <Name>BlobId</Name>
                        </Expression>
                        <Expression xsi:type="rx:AsyncSubject">
                          <Name>Source</Name>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>Settings</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Item1.Item1.Index</Selector>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>BlobId</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Zip" />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Take">
                            <rx:Count>1</rx:Count>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Item2.Item1,Item2.Item2,Item1</Selector>
                        </Expression>
                        <Expression xsi:type="rx:AsyncSubject">
                          <Name>key</Name>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>Source</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Merge" />
                        </Expression>
                        <Expression xsi:type="harp:ConvertTimestamped">
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="WorkflowInput">
                                <Name>Source1</Name>
                              </Expression>
                              <Expression xsi:type="MemberSelector">
                                <Selector>Item1.Head</Selector>
                              </Expression>
                              <Expression xsi:type="WorkflowOutput" />
                            </Nodes>
                            <Edges>
                              <Edge From="0" To="1" Label="Source1" />
                              <Edge From="1" To="2" Label="Source1" />
                            </Edges>
                          </Workflow>
                        </Expression>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="Regions" />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="p3:RegionContainsPoint">
                            <p3:Regions>
                              <p3:ArrayOfPoint>
                                <p3:Point>
                                  <p3:X>1440</p3:X>
                                  <p3:Y>1080</p3:Y>
                                </p3:Point>
                                <p3:Point>
                                  <p3:X>1440</p3:X>
                                  <p3:Y>680</p3:Y>
                                </p3:Point>
                                <p3:Point>
                                  <p3:X>1000</p3:X>
                                  <p3:Y>680</p3:Y>
                                </p3:Point>
                                <p3:Point>
                                  <p3:X>100</p3:X>
                                  <p3:Y>1080</p3:Y>
                                </p3:Point>
                              </p3:ArrayOfPoint>
                            </p3:Regions>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>key</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:WithLatestFrom" />
                        </Expression>
                        <Expression xsi:type="MulticastSubject">
                          <Name>LoomRegionState</Name>
                        </Expression>
                        <Expression xsi:type="rx:Condition">
                          <Name>Inside</Name>
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="WorkflowInput">
                                <Name>Source1</Name>
                              </Expression>
                              <Expression xsi:type="MemberSelector">
                                <Selector>Value</Selector>
                              </Expression>
                              <Expression xsi:type="WorkflowOutput" />
                            </Nodes>
                            <Edges>
                              <Edge From="0" To="1" Label="Source1" />
                              <Edge From="1" To="2" Label="Source1" />
                            </Edges>
                          </Workflow>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Seconds</Selector>
                        </Expression>
                        <Expression xsi:type="rx:Condition">
                          <Name>Outside</Name>
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="WorkflowInput">
                                <Name>Source1</Name>
                              </Expression>
                              <Expression xsi:type="MemberSelector">
                                <Selector>Value</Selector>
                              </Expression>
                              <Expression xsi:type="BitwiseNot" />
                              <Expression xsi:type="WorkflowOutput" />
                            </Nodes>
                            <Edges>
                              <Edge From="0" To="1" Label="Source1" />
                              <Edge From="1" To="2" Label="Source1" />
                              <Edge From="2" To="3" Label="Source1" />
                            </Edges>
                          </Workflow>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Seconds</Selector>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Take">
                            <rx:Count>1</rx:Count>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Seconds</Selector>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Merge" />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:WithLatestFrom" />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Zip" />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="harp:CreateTimestamped" />
                        </Expression>
                        <Expression xsi:type="harp:ConvertTimestamped">
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="WorkflowInput">
                                <Name>Source1</Name>
                              </Expression>
                              <Expression xsi:type="MemberSelector">
                                <Selector>Item1</Selector>
                              </Expression>
                              <Expression xsi:type="MemberSelector">
                                <Selector>Item2</Selector>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:WithLatestFrom" />
                              </Expression>
                              <Expression xsi:type="Subtract" />
                              <Expression xsi:type="WorkflowOutput" />
                            </Nodes>
                            <Edges>
                              <Edge From="0" To="1" Label="Source1" />
                              <Edge From="0" To="2" Label="Source1" />
                              <Edge From="1" To="3" Label="Source1" />
                              <Edge From="2" To="3" Label="Source2" />
                              <Edge From="3" To="4" Label="Source1" />
                              <Edge From="4" To="5" Label="Source1" />
                            </Edges>
                          </Workflow>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>key</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:WithLatestFrom" />
                        </Expression>
                        <Expression xsi:type="MulticastSubject">
                          <Name>LoomInRegionStream</Name>
                        </Expression>
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="1" To="4" Label="Source1" />
                        <Edge From="2" To="3" Label="Source1" />
                        <Edge From="5" To="6" Label="Source1" />
                        <Edge From="6" To="8" Label="Source1" />
                        <Edge From="7" To="8" Label="Source2" />
                        <Edge From="8" To="9" Label="Source1" />
                        <Edge From="9" To="10" Label="Source1" />
                        <Edge From="10" To="11" Label="Source1" />
                        <Edge From="12" To="13" Label="Source1" />
                        <Edge From="13" To="14" Label="Source1" />
                        <Edge From="14" To="16" Label="Source1" />
                        <Edge From="15" To="16" Label="Source2" />
                        <Edge From="16" To="18" Label="Source1" />
                        <Edge From="16" To="20" Label="Source1" />
                        <Edge From="16" To="22" Label="Source1" />
                        <Edge From="16" To="24" Label="Source1" />
                        <Edge From="17" To="18" Label="Source2" />
                        <Edge From="18" To="19" Label="Source1" />
                        <Edge From="20" To="21" Label="Source1" />
                        <Edge From="21" To="27" Label="Source1" />
                        <Edge From="21" To="28" Label="Source2" />
                        <Edge From="22" To="23" Label="Source1" />
                        <Edge From="23" To="26" Label="Source1" />
                        <Edge From="24" To="25" Label="Source1" />
                        <Edge From="25" To="26" Label="Source2" />
                        <Edge From="26" To="27" Label="Source2" />
                        <Edge From="27" To="28" Label="Source1" />
                        <Edge From="28" To="29" Label="Source1" />
                        <Edge From="29" To="30" Label="Source1" />
                        <Edge From="30" To="32" Label="Source1" />
                        <Edge From="31" To="32" Label="Source2" />
                        <Edge From="32" To="33" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>SelectedBlobs</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Settings</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="rx:SelectMany">
                    <Name>LoomAngle</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Item1</Selector>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Take">
                            <rx:Count>1</rx:Count>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Key</Selector>
                        </Expression>
                        <Expression xsi:type="rx:AsyncSubject">
                          <Name>Id</Name>
                        </Expression>
                        <Expression xsi:type="rx:AsyncSubject">
                          <Name>Source</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Item2.Item1.Item1.Value.Position</Selector>
                        </Expression>
                        <Expression xsi:type="InputMapping">
                          <PropertyMappings>
                            <Property Name="X" Selector="X" />
                            <Property Name="Y" Selector="Y" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="cv:CreatePoint2f">
                            <cv:X>1400</cv:X>
                            <cv:Y>1000</cv:Y>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="rx:AsyncSubject">
                          <Name>Point</Name>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>Source</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Merge" />
                        </Expression>
                        <Expression xsi:type="harp:ConvertTimestamped">
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="WorkflowInput">
                                <Name>Source1</Name>
                              </Expression>
                              <Expression xsi:type="MemberSelector">
                                <Selector>Item1.Heading,Item1.Centroid</Selector>
                              </Expression>
                              <Expression xsi:type="MemberSelector">
                                <Selector>Item1</Selector>
                              </Expression>
                              <Expression xsi:type="MemberSelector">
                                <Selector>Item2</Selector>
                              </Expression>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>Point</Name>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:WithLatestFrom" />
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="p3:AngleCalculator" />
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:Zip" />
                              </Expression>
                              <Expression xsi:type="Subtract" />
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="p3:NormalizeAngle" />
                              </Expression>
                              <Expression xsi:type="WorkflowOutput" />
                            </Nodes>
                            <Edges>
                              <Edge From="0" To="1" Label="Source1" />
                              <Edge From="1" To="2" Label="Source1" />
                              <Edge From="1" To="3" Label="Source1" />
                              <Edge From="2" To="7" Label="Source1" />
                              <Edge From="3" To="5" Label="Source1" />
                              <Edge From="4" To="5" Label="Source2" />
                              <Edge From="5" To="6" Label="Source1" />
                              <Edge From="6" To="7" Label="Source2" />
                              <Edge From="7" To="8" Label="Source1" />
                              <Edge From="8" To="9" Label="Source1" />
                              <Edge From="9" To="10" Label="Source1" />
                            </Edges>
                          </Workflow>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>Settings</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Item1.Item1.Index</Selector>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>Id</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Zip" />
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Item2.Item1,Item2.Item2,Item1</Selector>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:WithLatestFrom" />
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="0" To="6" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="2" To="3" Label="Source1" />
                        <Edge From="2" To="5" Label="Source1" />
                        <Edge From="3" To="4" Label="Source1" />
                        <Edge From="6" To="7" Label="Source1" />
                        <Edge From="7" To="8" Label="Source1" />
                        <Edge From="8" To="9" Label="Source1" />
                        <Edge From="10" To="11" Label="Source1" />
                        <Edge From="11" To="12" Label="Source1" />
                        <Edge From="12" To="18" Label="Source1" />
                        <Edge From="13" To="14" Label="Source1" />
                        <Edge From="14" To="16" Label="Source1" />
                        <Edge From="15" To="16" Label="Source2" />
                        <Edge From="16" To="17" Label="Source1" />
                        <Edge From="17" To="18" Label="Source2" />
                        <Edge From="18" To="19" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>LoomAngleStream</Name>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="0" To="3" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source2" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="9" To="11" Label="Source1" />
                  <Edge From="10" To="11" Label="Source2" />
                  <Edge From="11" To="12" Label="Source1" />
                  <Edge From="12" To="13" Label="Source1" />
                  <Edge From="14" To="16" Label="Source1" />
                  <Edge From="15" To="16" Label="Source2" />
                  <Edge From="16" To="17" Label="Source1" />
                  <Edge From="17" To="18" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="11" To="14" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="15" Label="Source1" />
            <Edge From="14" To="15" Label="Source2" />
            <Edge From="15" To="16" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
    </Nodes>
    <Edges />
  </Workflow>
</WorkflowBuilder>