<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns:p1="clr-namespace:HtsLoom;assembly=Extensions"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns:aeon="clr-namespace:Aeon.Acquisition;assembly=Aeon.Acquisition"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns:sys="clr-namespace:System;assembly=mscorlib"
                 xmlns:p2="clr-namespace:;assembly=Extensions"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="SubscribeSubject">
        <Name>RigConfiguration</Name>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Cameras</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Merge" />
      </Expression>
      <Expression xsi:type="rx:Condition">
        <Name>HasTracking</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Value.Tracking</Selector>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>it!=null</scr:Expression>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>HeadTailTrackingCondition</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Value.Tracking</Selector>
            </Expression>
            <Expression xsi:type="p1:MatchTracking">
              <p1:Type xsi:type="TypeMapping" TypeArguments="p1:HeadTailTracking" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Key</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="1" To="4" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="5" Label="Source1" />
            <Edge From="4" To="5" Label="Source2" />
            <Edge From="5" To="6" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="rx:ToDictionary">
        <rx:KeySelector>Item2</rx:KeySelector>
        <rx:ElementSelector>Item1</rx:ElementSelector>
      </Expression>
      <Expression xsi:type="rx:ReplaySubject">
        <Name>HeadTailTrackingSettings</Name>
        <rx:BufferSize xsi:nil="true" />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>HeadTailTrackingSettings</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Merge" />
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>StreamConnectedComponent</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>HeadTailTrackingSettings</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>TrackingEvents</Name>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Key</Selector>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>HeadTailTrackingSettings</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Key</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="Equal" />
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="4" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source2" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:AsyncSubject">
                    <Name>Collection</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Collection</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Value.Item1</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Concat" />
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Seconds</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="harp:CreateTimestamped" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:ElementIndex" />
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Value,Index</Selector>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="3" To="6" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="7" Label="Source1" />
                  <Edge From="6" To="7" Label="Source2" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="10" To="11" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>HeadTailTrackingSettings</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Key</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="9" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source2" />
            <Edge From="9" To="10" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="rx:GroupBy">
        <rx:KeySelector>Item2,Item1.Item2</rx:KeySelector>
        <rx:ElementSelector>Item1.Item1</rx:ElementSelector>
      </Expression>
      <Expression xsi:type="rx:ReplaySubject">
        <Name>TrackingIndexed</Name>
        <rx:BufferSize xsi:nil="true" />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>TrackingIndexed</Name>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Key</Selector>
      </Expression>
      <Expression xsi:type="aeon:CreateGroup">
        <Name>HeadTailGroup</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>IndexedKey</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>HeadTailTrackingSettings</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>IndexedKey</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="InputMapping">
              <PropertyMappings>
                <Property Name="Value" Selector="Item2.Item1" />
              </PropertyMappings>
              <Selector>Item1</Selector>
            </Expression>
            <Expression xsi:type="Index">
              <Operand xsi:type="WorkflowProperty" TypeArguments="p1:CameraName">
                <Value>CameraEast</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>Settings</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>TrackingIndexed</Name>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Key</Selector>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>IndexedKey</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Expression>(it.Item1.Item1 == it.Item2.Item1) &amp;&amp; (it.Item1.Item2 == it.Item2.Item2)
</scr:Expression>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="3" Label="Source1" />
                  <Edge From="2" To="3" Label="Source2" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Settings</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:SubscribeWhen" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>TrackingSortedPerCamera</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>TrackingSortedPerCamera</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="harp:ConvertTimestamped">
              <Name>HeadTailVelocity</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="BufferLength" />
                  </Expression>
                  <Expression xsi:type="GroupWorkflow">
                    <Name>HeadTail</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="rx:BehaviorSubject">
                          <Name>Contour</Name>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>Contour</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="cv:BinaryRegionExtremes">
                            <cv:Method>MajorAxis</cv:Method>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="Value" DisplayName="BufferLength" />
                        </Expression>
                        <Expression xsi:type="PropertySource" TypeArguments="rx:Range,sys:Int32">
                          <MemberName>Count</MemberName>
                          <Value>10</Value>
                        </Expression>
                        <Expression xsi:type="Subtract">
                          <Operand xsi:type="IntProperty">
                            <Value>1</Value>
                          </Operand>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Take">
                            <rx:Count>1</rx:Count>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="InputMapping">
                          <PropertyMappings>
                            <Property Name="Count" Selector="it" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Range">
                            <rx:Start>0</rx:Start>
                            <rx:Count>9</rx:Count>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="cv:CreatePoint2f">
                            <cv:X>NaN</cv:X>
                            <cv:Y>NaN</cv:Y>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>Contour</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Centroid</Selector>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Concat" />
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="Count" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:BufferCount">
                            <rx:Count>10</rx:Count>
                            <rx:Skip>1</rx:Skip>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:WithLatestFrom" />
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>Settings</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>VelocityThreshold</Selector>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:WithLatestFrom" />
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Item1.Item1.Item1,Item1.Item1.Item2,Item1.Item2,Item2</Selector>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="p2:HeadTailVelocity">
                            <p2:VelocityThreshold>10</p2:VelocityThreshold>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="2" To="3" Label="Source1" />
                        <Edge From="3" To="16" Label="Source1" />
                        <Edge From="4" To="5" Label="Source1" />
                        <Edge From="5" To="6" Label="Source1" />
                        <Edge From="5" To="14" Label="Source1" />
                        <Edge From="6" To="7" Label="Source1" />
                        <Edge From="7" To="8" Label="Source1" />
                        <Edge From="8" To="9" Label="Source1" />
                        <Edge From="9" To="10" Label="Source1" />
                        <Edge From="10" To="13" Label="Source1" />
                        <Edge From="11" To="12" Label="Source1" />
                        <Edge From="12" To="13" Label="Source2" />
                        <Edge From="13" To="15" Label="Source1" />
                        <Edge From="14" To="15" Label="Source2" />
                        <Edge From="15" To="16" Label="Source2" />
                        <Edge From="16" To="19" Label="Source1" />
                        <Edge From="17" To="18" Label="Source1" />
                        <Edge From="18" To="19" Label="Source2" />
                        <Edge From="19" To="20" Label="Source1" />
                        <Edge From="20" To="21" Label="Source1" />
                        <Edge From="21" To="22" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="2" Label="Source1" />
                  <Edge From="0" To="3" Label="Source2" />
                  <Edge From="1" To="2" Label="Source2" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="3" To="5" Label="Source1" />
            <Edge From="4" To="5" Label="Source2" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="13" Label="Source1" />
            <Edge From="12" To="13" Label="Source2" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="16" To="17" Label="Source1" />
            <Edge From="17" To="18" Label="Source1" />
            <Edge From="18" To="19" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="rx:ReplaySubject">
        <Name>HeadTailObservable</Name>
        <rx:BufferSize xsi:nil="true" />
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="Extensions\LoomRegions.bonsai" />
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="14" To="15" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>