<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:p1="clr-namespace:System.Reactive.Linq;assembly=System.Reactive.Interfaces"
                 xmlns:p2="clr-namespace:HtsLoom;assembly=Extensions"
                 xmlns:p3="clr-namespace:OpenTK;assembly=OpenTK"
                 xmlns:gl="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders"
                 xmlns:res="clr-namespace:Bonsai.Resources;assembly=Bonsai.System"
                 xmlns:p4="clr-namespace:Bonsai.Numerics.Distributions;assembly=Bonsai.Numerics"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns:sys="clr-namespace:System;assembly=mscorlib"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="rx:ReplaySubject" TypeArguments="p1:IGroupedObservable(p2:ScreenName,p3:Matrix4)">
        <rx:Name>DrawScreen</rx:Name>
        <rx:BufferSize xsi:nil="true" />
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="DisplayDevice" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:CreateWindow">
          <gl:Width>1920</gl:Width>
          <gl:Height>270</gl:Height>
          <gl:VSync>On</gl:VSync>
          <gl:SwapSync>false</gl:SwapSync>
          <gl:ClearColor>Black</gl:ClearColor>
          <gl:ClearMask>DepthBufferBit ColorBufferBit</gl:ClearMask>
          <gl:CursorVisible>true</gl:CursorVisible>
          <gl:Location xsi:nil="true" />
          <gl:WindowBorder>Resizable</gl:WindowBorder>
          <gl:WindowState>Fullscreen</gl:WindowState>
          <gl:DisplayDevice>First</gl:DisplayDevice>
          <gl:TargetRenderFrequency>60</gl:TargetRenderFrequency>
          <gl:TargetUpdateFrequency>120</gl:TargetUpdateFrequency>
          <gl:RenderState />
          <gl:GraphicsMode>
            <gl:ColorFormat>
              <gl:Red>8</gl:Red>
              <gl:Green>8</gl:Green>
              <gl:Blue>8</gl:Blue>
              <gl:Alpha>8</gl:Alpha>
            </gl:ColorFormat>
            <gl:Depth>16</gl:Depth>
            <gl:Stencil>0</gl:Stencil>
            <gl:Samples>0</gl:Samples>
            <gl:AccumulatorFormat>
              <gl:Red>0</gl:Red>
              <gl:Green>0</gl:Green>
              <gl:Blue>0</gl:Blue>
              <gl:Alpha>0</gl:Alpha>
            </gl:AccumulatorFormat>
            <gl:Buffers>2</gl:Buffers>
            <gl:Stereo>false</gl:Stereo>
          </gl:GraphicsMode>
        </Combinator>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.BonVisionResources.bonsai" />
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Textures" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:TextureResources">
          <gl:Textures />
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="res:LoadResources" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:DelaySubscription">
          <rx:DueTime>PT1S</rx:DueTime>
        </Combinator>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="LowerSeconds" />
        <Property Name="UpperSeconds" />
        <Property Name="BackGroundColorLowerValue" />
        <Property Name="DueTime" />
        <Property Name="BackGroundColorHighValue" />
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>PseudoRandom</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Lower" DisplayName="LowerSeconds" />
              <Property Name="Upper" DisplayName="UpperSeconds" />
            </Expression>
            <Expression xsi:type="rx:Defer">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Lower" />
                    <Property Name="Upper" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p4:CreateContinuousUniform">
                      <p4:Lower>60</p4:Lower>
                      <p4:Upper>90</p4:Upper>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p4:Sample" />
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Expression>TimeSpan.FromSeconds(it)
</scr:Expression>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="DueTime" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="gl:Timer">
                      <gl:DueTime>PT13.04S</gl:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Repeat" />
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>SynchPulse</Name>
            </Expression>
            <Expression xsi:type="rx:PublishSubject" TypeArguments="sys:Int64">
              <rx:Name>SynchPulse</rx:Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="BackGroundColorLowerValue" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>0.49</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>BackgroundColor</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="DueTime" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Delay">
                <rx:DueTime>PT1S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="BackGroundColorHighValue" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>0.5</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>BackgroundColor</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>0.5</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>BackgroundColor</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="4" To="6" Label="Source1" />
            <Edge From="5" To="6" Label="Source2" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="9" Label="Source1" />
            <Edge From="8" To="9" Label="Source2" />
            <Edge From="9" To="11" Label="Source1" />
            <Edge From="10" To="11" Label="Source2" />
            <Edge From="10" To="13" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:RenderFrame" />
      </Expression>
      <Expression xsi:type="rx:Defer">
        <Name>ViewPorts</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="sys:Tuple(p3:Matrix4,p2:ScreenName)">
              <rx:Name>DrawScreenStream</rx:Name>
            </Expression>
            <Expression xsi:type="rx:GroupBy">
              <rx:KeySelector>Item2</rx:KeySelector>
              <rx:ElementSelector>Item1</rx:ElementSelector>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>DrawScreen</Name>
            </Expression>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.OrthographicView.bonsai">
              <Left>-1</Left>
              <Right>1</Right>
              <Bottom>-1</Bottom>
              <Top>1</Top>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Extensions\ViewPortScreen.bonsai">
              <Left>-1.7</Left>
              <Right>1.7</Right>
              <Bottom>-1</Bottom>
              <Top>1</Top>
              <Value>ScreenEast</Value>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.DrawViewport.bonsai">
              <X>0</X>
              <Y>0</Y>
              <Width>1</Width>
              <Height>1</Height>
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Name>Background</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item1</Selector>
                  </Expression>
                  <Expression xsi:type="GroupWorkflow">
                    <Name>DrawQuad</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="FloatProperty">
                            <Value>1</Value>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Take">
                            <rx:Count>1</rx:Count>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>BackgroundColor</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="gl:Delay">
                            <gl:DueTime>PT0S</gl:DueTime>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Concat" />
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="ColorR" />
                            <Property Name="ColorG" />
                            <Property Name="ColorB" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="LocationX" />
                          <Property Name="LocationY" />
                        </Expression>
                        <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawQuad.bonsai">
                          <ExtentX>4</ExtentX>
                          <ExtentY>4</ExtentY>
                          <LocationX>0</LocationX>
                          <LocationY>0</LocationY>
                          <Layer>-20</Layer>
                          <Angle>0</Angle>
                          <ColorR>0.5</ColorR>
                          <ColorG>0.5</ColorG>
                          <ColorB>0.5</ColorB>
                          <ColorA>1</ColorA>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="8" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="2" To="5" Label="Source1" />
                        <Edge From="3" To="4" Label="Source1" />
                        <Edge From="4" To="5" Label="Source2" />
                        <Edge From="5" To="6" Label="Source1" />
                        <Edge From="6" To="8" Label="Source2" />
                        <Edge From="7" To="8" Label="Source3" />
                        <Edge From="8" To="9" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Extensions\ViewPortScreen.bonsai">
              <Left>-1.7</Left>
              <Right>1.7</Right>
              <Bottom>-1</Bottom>
              <Top>1</Top>
              <Value>ScreenSouth</Value>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="IncludeWorkflow" Path="BonVision:Environment.DrawViewport.bonsai">
                <X>0.25</X>
                <Y>0</Y>
                <Width>0.25</Width>
                <Height>1</Height>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="rx:SelectMany">
                <Name>Background</Name>
                <Workflow>
                  <Nodes>
                    <Expression xsi:type="WorkflowInput">
                      <Name>Source1</Name>
                    </Expression>
                    <Expression xsi:type="MemberSelector">
                      <Selector>Item1</Selector>
                    </Expression>
                    <Expression xsi:type="GroupWorkflow">
                      <Name>DrawQuad</Name>
                      <Workflow>
                        <Nodes>
                          <Expression xsi:type="WorkflowInput">
                            <Name>Source1</Name>
                          </Expression>
                          <Expression xsi:type="Combinator">
                            <Combinator xsi:type="FloatProperty">
                              <Value>1</Value>
                            </Combinator>
                          </Expression>
                          <Expression xsi:type="Combinator">
                            <Combinator xsi:type="rx:Take">
                              <rx:Count>1</rx:Count>
                            </Combinator>
                          </Expression>
                          <Expression xsi:type="SubscribeSubject">
                            <Name>BackgroundColor</Name>
                          </Expression>
                          <Expression xsi:type="Combinator">
                            <Combinator xsi:type="gl:Delay">
                              <gl:DueTime>PT0S</gl:DueTime>
                            </Combinator>
                          </Expression>
                          <Expression xsi:type="Combinator">
                            <Combinator xsi:type="rx:Concat" />
                          </Expression>
                          <Expression xsi:type="PropertyMapping">
                            <PropertyMappings>
                              <Property Name="ColorR" />
                              <Property Name="ColorG" />
                              <Property Name="ColorB" />
                            </PropertyMappings>
                          </Expression>
                          <Expression xsi:type="ExternalizedMapping">
                            <Property Name="LocationX" />
                            <Property Name="LocationY" />
                          </Expression>
                          <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawQuad.bonsai">
                            <ExtentX>4</ExtentX>
                            <ExtentY>4</ExtentY>
                            <LocationX>0</LocationX>
                            <LocationY>0</LocationY>
                            <Layer>-20</Layer>
                            <Angle>0</Angle>
                            <ColorR>0.5</ColorR>
                            <ColorG>0.5</ColorG>
                            <ColorB>0.5</ColorB>
                            <ColorA>1</ColorA>
                          </Expression>
                          <Expression xsi:type="WorkflowOutput" />
                        </Nodes>
                        <Edges>
                          <Edge From="0" To="8" Label="Source1" />
                          <Edge From="1" To="2" Label="Source1" />
                          <Edge From="2" To="5" Label="Source1" />
                          <Edge From="3" To="4" Label="Source1" />
                          <Edge From="4" To="5" Label="Source2" />
                          <Edge From="5" To="6" Label="Source1" />
                          <Edge From="6" To="8" Label="Source2" />
                          <Edge From="7" To="8" Label="Source3" />
                          <Edge From="8" To="9" Label="Source1" />
                        </Edges>
                      </Workflow>
                    </Expression>
                    <Expression xsi:type="WorkflowOutput" />
                  </Nodes>
                  <Edges>
                    <Edge From="0" To="1" Label="Source1" />
                    <Edge From="1" To="2" Label="Source1" />
                    <Edge From="2" To="3" Label="Source1" />
                  </Edges>
                </Workflow>
              </Builder>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Extensions\ViewPortScreen.bonsai">
              <Left>-1.7</Left>
              <Right>1.7</Right>
              <Bottom>-1</Bottom>
              <Top>1</Top>
              <Value>ScreenWest</Value>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="IncludeWorkflow" Path="BonVision:Environment.DrawViewport.bonsai">
                <X>0.5</X>
                <Y>0</Y>
                <Width>0.25</Width>
                <Height>1</Height>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="rx:SelectMany">
                <Name>Background</Name>
                <Workflow>
                  <Nodes>
                    <Expression xsi:type="WorkflowInput">
                      <Name>Source1</Name>
                    </Expression>
                    <Expression xsi:type="MemberSelector">
                      <Selector>Item1</Selector>
                    </Expression>
                    <Expression xsi:type="GroupWorkflow">
                      <Name>DrawQuad</Name>
                      <Workflow>
                        <Nodes>
                          <Expression xsi:type="WorkflowInput">
                            <Name>Source1</Name>
                          </Expression>
                          <Expression xsi:type="Combinator">
                            <Combinator xsi:type="FloatProperty">
                              <Value>1</Value>
                            </Combinator>
                          </Expression>
                          <Expression xsi:type="Combinator">
                            <Combinator xsi:type="rx:Take">
                              <rx:Count>1</rx:Count>
                            </Combinator>
                          </Expression>
                          <Expression xsi:type="SubscribeSubject">
                            <Name>BackgroundColor</Name>
                          </Expression>
                          <Expression xsi:type="Combinator">
                            <Combinator xsi:type="gl:Delay">
                              <gl:DueTime>PT0S</gl:DueTime>
                            </Combinator>
                          </Expression>
                          <Expression xsi:type="Combinator">
                            <Combinator xsi:type="rx:Concat" />
                          </Expression>
                          <Expression xsi:type="PropertyMapping">
                            <PropertyMappings>
                              <Property Name="ColorR" />
                              <Property Name="ColorG" />
                              <Property Name="ColorB" />
                            </PropertyMappings>
                          </Expression>
                          <Expression xsi:type="ExternalizedMapping">
                            <Property Name="LocationX" />
                            <Property Name="LocationY" />
                          </Expression>
                          <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawQuad.bonsai">
                            <ExtentX>4</ExtentX>
                            <ExtentY>4</ExtentY>
                            <LocationX>0</LocationX>
                            <LocationY>0</LocationY>
                            <Layer>-20</Layer>
                            <Angle>0</Angle>
                            <ColorR>0.5</ColorR>
                            <ColorG>0.5</ColorG>
                            <ColorB>0.5</ColorB>
                            <ColorA>1</ColorA>
                          </Expression>
                          <Expression xsi:type="WorkflowOutput" />
                        </Nodes>
                        <Edges>
                          <Edge From="0" To="8" Label="Source1" />
                          <Edge From="1" To="2" Label="Source1" />
                          <Edge From="2" To="5" Label="Source1" />
                          <Edge From="3" To="4" Label="Source1" />
                          <Edge From="4" To="5" Label="Source2" />
                          <Edge From="5" To="6" Label="Source1" />
                          <Edge From="6" To="8" Label="Source2" />
                          <Edge From="7" To="8" Label="Source3" />
                          <Edge From="8" To="9" Label="Source1" />
                        </Edges>
                      </Workflow>
                    </Expression>
                    <Expression xsi:type="WorkflowOutput" />
                  </Nodes>
                  <Edges>
                    <Edge From="0" To="1" Label="Source1" />
                    <Edge From="1" To="2" Label="Source1" />
                    <Edge From="2" To="3" Label="Source1" />
                  </Edges>
                </Workflow>
              </Builder>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Extensions\ViewPortScreen.bonsai">
              <Left>-1.7</Left>
              <Right>1.7</Right>
              <Bottom>-1</Bottom>
              <Top>1</Top>
              <Value>ScreenNorth</Value>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="IncludeWorkflow" Path="BonVision:Environment.DrawViewport.bonsai">
                <X>0.75</X>
                <Y>0</Y>
                <Width>0.25</Width>
                <Height>1</Height>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="rx:SelectMany">
                <Name>Background</Name>
                <Workflow>
                  <Nodes>
                    <Expression xsi:type="WorkflowInput">
                      <Name>Source1</Name>
                    </Expression>
                    <Expression xsi:type="MemberSelector">
                      <Selector>Item1</Selector>
                    </Expression>
                    <Expression xsi:type="GroupWorkflow">
                      <Name>DrawQuad</Name>
                      <Workflow>
                        <Nodes>
                          <Expression xsi:type="WorkflowInput">
                            <Name>Source1</Name>
                          </Expression>
                          <Expression xsi:type="Combinator">
                            <Combinator xsi:type="FloatProperty">
                              <Value>1</Value>
                            </Combinator>
                          </Expression>
                          <Expression xsi:type="Combinator">
                            <Combinator xsi:type="rx:Take">
                              <rx:Count>1</rx:Count>
                            </Combinator>
                          </Expression>
                          <Expression xsi:type="SubscribeSubject">
                            <Name>BackgroundColor</Name>
                          </Expression>
                          <Expression xsi:type="Combinator">
                            <Combinator xsi:type="gl:Delay">
                              <gl:DueTime>PT0S</gl:DueTime>
                            </Combinator>
                          </Expression>
                          <Expression xsi:type="Combinator">
                            <Combinator xsi:type="rx:Concat" />
                          </Expression>
                          <Expression xsi:type="PropertyMapping">
                            <PropertyMappings>
                              <Property Name="ColorR" />
                              <Property Name="ColorG" />
                              <Property Name="ColorB" />
                            </PropertyMappings>
                          </Expression>
                          <Expression xsi:type="ExternalizedMapping">
                            <Property Name="LocationX" />
                            <Property Name="LocationY" />
                          </Expression>
                          <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawQuad.bonsai">
                            <ExtentX>4</ExtentX>
                            <ExtentY>4</ExtentY>
                            <LocationX>0</LocationX>
                            <LocationY>0</LocationY>
                            <Layer>-20</Layer>
                            <Angle>0</Angle>
                            <ColorR>0.5</ColorR>
                            <ColorG>0.5</ColorG>
                            <ColorB>0.5</ColorB>
                            <ColorA>1</ColorA>
                          </Expression>
                          <Expression xsi:type="WorkflowOutput" />
                        </Nodes>
                        <Edges>
                          <Edge From="0" To="8" Label="Source1" />
                          <Edge From="1" To="2" Label="Source1" />
                          <Edge From="2" To="5" Label="Source1" />
                          <Edge From="3" To="4" Label="Source1" />
                          <Edge From="4" To="5" Label="Source2" />
                          <Edge From="5" To="6" Label="Source1" />
                          <Edge From="6" To="8" Label="Source2" />
                          <Edge From="7" To="8" Label="Source3" />
                          <Edge From="8" To="9" Label="Source1" />
                        </Edges>
                      </Workflow>
                    </Expression>
                    <Expression xsi:type="WorkflowOutput" />
                  </Nodes>
                  <Edges>
                    <Edge From="0" To="1" Label="Source1" />
                    <Edge From="1" To="2" Label="Source1" />
                    <Edge From="2" To="3" Label="Source1" />
                  </Edges>
                </Workflow>
              </Builder>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="4" To="8" Label="Source1" />
            <Edge From="4" To="11" Label="Source1" />
            <Edge From="4" To="14" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="17" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="17" Label="Source2" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="17" Label="Source3" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="16" To="17" Label="Source4" />
            <Edge From="17" To="18" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>PostRender</Name>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="5" Label="Source1" />
      <Edge From="4" To="5" Label="Source2" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>