<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns:aeon-env="clr-namespace:Aeon.Environment;assembly=Aeon.Environment"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="rx:BehaviorSubject" TypeArguments="harp:Timestamped(aeon-env:EnvironmentSubjectStateMetadata)">
        <rx:Name>SubjectState</rx:Name>
      </Expression>
      <Expression xsi:type="rx:Condition">
        <Name>Start</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Value.Type</Selector>
            </Expression>
            <Expression xsi:type="NotEqual">
              <Operand xsi:type="WorkflowProperty" TypeArguments="aeon-env:EnvironmentSubjectChangeType">
                <Value>Exit</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>SubjectStart</Name>
      </Expression>
      <Expression xsi:type="rx:Condition">
        <Name>End</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Value.Type</Selector>
            </Expression>
            <Expression xsi:type="Equal">
              <Operand xsi:type="WorkflowProperty" TypeArguments="aeon-env:EnvironmentSubjectChangeType">
                <Value>Exit</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>SubjectStop</Name>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject" TypeArguments="harp:Timestamped(aeon-env:EnvironmentStateMetadata)">
        <rx:Name>EnvironmentState</rx:Name>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="0" To="3" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>