<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:p1="clr-namespace:System.Reactive.Linq;assembly=System.Reactive.Interfaces"
                 xmlns:p2="clr-namespace:HtsLoom;assembly=Extensions"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns:sys="clr-namespace:System;assembly=mscorlib"
                 xmlns:p3="clr-namespace:Feeder;assembly=Extensions"
                 xmlns:p4="clr-namespace:Harp.OutputExpander;assembly=Harp.OutputExpander"
                 xmlns:aeon-frg="clr-namespace:Aeon.Foraging;assembly=Aeon.Foraging"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="rx:ReplaySubject" TypeArguments="p1:IGroupedObservable(p2:FeederName,harp:HarpMessage)">
        <rx:Name>FeederEvents</rx:Name>
        <rx:BufferSize xsi:nil="true" />
      </Expression>
      <Expression xsi:type="rx:ReplaySubject" TypeArguments="p1:IGroupedObservable(p2:FeederName,harp:Timestamped(sys:Boolean))">
        <rx:Name>FeederPelletDelivered</rx:Name>
        <rx:BufferSize xsi:nil="true" />
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject" TypeArguments="sys:Tuple(p3:FeederCommand,p2:FeederName)">
        <rx:Name>FeederTrigger</rx:Name>
      </Expression>
      <Expression xsi:type="rx:ReplaySubject" TypeArguments="p1:IGroupedObservable(p2:FeederName,harp:Timestamped(sys:Double))">
        <rx:Name>FeederWheelDisplacement</rx:Name>
        <rx:BufferSize xsi:nil="true" />
      </Expression>
      <Expression xsi:type="rx:Defer">
        <Name>CreateFeeders</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Disable">
              <Builder xsi:type="SubscribeSubject">
                <Name>FeederTrigger</Name>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="rx:GroupBy">
                <rx:KeySelector>Item2</rx:KeySelector>
                <rx:ElementSelector>Item1</rx:ElementSelector>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="rx:ReplaySubject">
                <Name>FeederTriggerGroup</Name>
                <rx:BufferSize xsi:nil="true" />
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="rx:PublishSubject" TypeArguments="sys:Tuple(harp:Timestamped(sys:Double),sys:Int32)">
                <rx:Name>WheelDisplacement</rx:Name>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="rx:GroupBy">
                <rx:KeySelector>Item2</rx:KeySelector>
                <rx:ElementSelector>Item1</rx:ElementSelector>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="MulticastSubject">
                <Name>FeederWheelDisplacement</Name>
              </Builder>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>RigConfiguration</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Feeders</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Name>CreateFeeders</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:AsyncSubject">
                    <Name>settings</Name>
                  </Expression>
                  <Expression xsi:type="rx:BehaviorSubject" TypeArguments="harp:HarpMessage">
                    <rx:Name>Commands</rx:Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>settings</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Value.PortName</Selector>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="PortName" Selector="it" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p4:Device">
                      <harp:OperationMode>Active</harp:OperationMode>
                      <harp:OperationLed>On</harp:OperationLed>
                      <harp:DumpRegisters>true</harp:DumpRegisters>
                      <harp:VisualIndicators>On</harp:VisualIndicators>
                      <harp:Heartbeat>Enabled</harp:Heartbeat>
                      <harp:IgnoreErrors>false</harp:IgnoreErrors>
                      <harp:PortName>COM16</harp:PortName>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:PublishSubject">
                    <Name>Events</Name>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="SampleRate" />
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Events</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p4:ConfigureMagneticEncoder">
                      <p4:SampleRate>SampleRate500Hz</p4:SampleRate>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>Commands</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Events</Name>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="Extensions\PairSettingsId.bonsai" />
                  <Expression xsi:type="WorkflowOutput" />
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Events</Name>
                  </Expression>
                  <Expression xsi:type="p4:Parse">
                    <harp:Register xsi:type="p4:TimestampedMagneticEncoder" />
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>settings</Name>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Radius" Selector="Value.WheelRadius" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="harp:ConvertTimestamped">
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Angle</Selector>
                        </Expression>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="Radius" />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="aeon-frg:WheelDisplacement">
                            <aeon-frg:Radius>-4</aeon-frg:Radius>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="3" Label="Source1" />
                        <Edge From="2" To="3" Label="Source2" />
                        <Edge From="3" To="4" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="Extensions\PairSettingsId.bonsai" />
                  <Expression xsi:type="rx:GroupBy">
                    <rx:KeySelector>Item2</rx:KeySelector>
                    <rx:ElementSelector>Item1</rx:ElementSelector>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>FeederWheelDisplacement</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>FeederTrigger</Name>
                  </Expression>
                  <Expression xsi:type="rx:Condition">
                    <Name>ID</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Item2</Selector>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>settings</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Key</Selector>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:WithLatestFrom" />
                        </Expression>
                        <Expression xsi:type="Equal" />
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="4" Label="Source1" />
                        <Edge From="2" To="3" Label="Source1" />
                        <Edge From="3" To="4" Label="Source2" />
                        <Edge From="4" To="5" Label="Source1" />
                        <Edge From="5" To="6" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item1</Selector>
                  </Expression>
                  <Expression xsi:type="rx:Condition">
                    <Name>IsDeliver</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="Equal">
                          <Operand xsi:type="WorkflowProperty" TypeArguments="p3:FeederCommand">
                            <Value>DeliverPellet</Value>
                          </Operand>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="rx:BehaviorSubject">
                    <Name>DeliverPellet</Name>
                  </Expression>
                  <Expression xsi:type="rx:Condition">
                    <Name>IsReset</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="Equal">
                          <Operand xsi:type="WorkflowProperty" TypeArguments="p3:FeederCommand">
                            <Value>ResetFeeder</Value>
                          </Operand>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="rx:BehaviorSubject">
                    <Name>ResetFeeder</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>ResetFeeder</Name>
                  </Expression>
                  <Expression xsi:type="GroupWorkflow">
                    <Name>ResetFeeder</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="p4:CreateMessage">
                          <harp:MessageType>Write</harp:MessageType>
                          <harp:Payload xsi:type="p4:CreateOutputSetPayload">
                            <p4:OutputSet>Out0</p4:OutputSet>
                          </harp:Payload>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Delay">
                            <rx:DueTime>PT0.5S</rx:DueTime>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="p4:CreateMessage">
                          <harp:MessageType>Write</harp:MessageType>
                          <harp:Payload xsi:type="p4:CreateOutputClearPayload">
                            <p4:OutputClear>Out0</p4:OutputClear>
                          </harp:Payload>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Merge" />
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="1" To="4" Label="Source1" />
                        <Edge From="2" To="3" Label="Source1" />
                        <Edge From="3" To="4" Label="Source2" />
                        <Edge From="4" To="5" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>Commands</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>DeliverPellet</Name>
                  </Expression>
                  <Expression xsi:type="rx:PublishSubject" TypeArguments="harp:Timestamped(sys:Boolean)">
                    <rx:Name>Delivered</rx:Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>settings</Name>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Count" Selector="Value.PelletDeliveryRetryCount" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>settings</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Value.PelletDeliveryTimeout</Selector>
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Expression>TimeSpan.FromSeconds(it)</scr:Expression>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="DueTime" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="Aeon.Acquisition:TimedRetryCount.bonsai">
                    <DueTime>PT1S</DueTime>
                    <Count>2</Count>
                  </Expression>
                  <Expression xsi:type="rx:Condition">
                    <Name>IsRepetition</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Repetition</Selector>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="rx:SelectMany">
                    <Name>PairRepetitions</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>Events</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="harp:FilterMessageType">
                            <harp:FilterType>Include</harp:FilterType>
                            <harp:MessageType>Write</harp:MessageType>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="p4:Parse">
                          <harp:Register xsi:type="p4:TimestampedOutputClear" />
                        </Expression>
                        <Expression xsi:type="rx:Condition">
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="WorkflowInput">
                                <Name>Source1</Name>
                              </Expression>
                              <Expression xsi:type="MemberSelector">
                                <Selector>Value</Selector>
                              </Expression>
                              <Expression xsi:type="ExternalizedMapping">
                                <Property Name="Value" />
                              </Expression>
                              <Expression xsi:type="HasFlag">
                                <Operand xsi:type="WorkflowProperty" TypeArguments="p4:DigitalOutputs">
                                  <Value>Out0</Value>
                                </Operand>
                              </Expression>
                              <Expression xsi:type="WorkflowOutput" />
                            </Nodes>
                            <Edges>
                              <Edge From="0" To="1" Label="Source1" />
                              <Edge From="1" To="3" Label="Source1" />
                              <Edge From="2" To="3" Label="Source2" />
                              <Edge From="3" To="4" Label="Source1" />
                            </Edges>
                          </Workflow>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Take">
                            <rx:Count>1</rx:Count>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Zip" />
                        </Expression>
                        <Expression xsi:type="scr:ExpressionTransform">
                          <scr:Expression>new(
1 as Value,
Item2.Seconds as Seconds)</scr:Expression>
                        </Expression>
                        <Expression xsi:type="InputMapping">
                          <PropertyMappings />
                        </Expression>
                        <Expression xsi:type="harp:Format">
                          <harp:MessageType>Write</harp:MessageType>
                          <harp:Register xsi:type="harp:FormatMessagePayload">
                            <harp:Address>203</harp:Address>
                            <harp:PayloadType>TimestampedU8</harp:PayloadType>
                          </harp:Register>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="6" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="2" To="3" Label="Source1" />
                        <Edge From="3" To="4" Label="Source1" />
                        <Edge From="4" To="5" Label="Source1" />
                        <Edge From="5" To="6" Label="Source2" />
                        <Edge From="6" To="7" Label="Source1" />
                        <Edge From="7" To="8" Label="Source1" />
                        <Edge From="8" To="9" Label="Source1" />
                        <Edge From="9" To="10" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>Events</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Value</Selector>
                  </Expression>
                  <Expression xsi:type="GroupWorkflow">
                    <Name>DeliverPellet</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="p4:CreateMessage">
                          <harp:MessageType>Write</harp:MessageType>
                          <harp:Payload xsi:type="p4:CreateOutputSetPayload">
                            <p4:OutputSet>Out0</p4:OutputSet>
                          </harp:Payload>
                        </Expression>
                        <Expression xsi:type="p4:CreateMessage">
                          <harp:MessageType>Write</harp:MessageType>
                          <harp:Payload xsi:type="p4:CreateOutputClearPayload">
                            <p4:OutputClear>Out0</p4:OutputClear>
                          </harp:Payload>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Merge" />
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="1" To="3" Label="Source1" />
                        <Edge From="2" To="3" Label="Source2" />
                        <Edge From="3" To="4" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>Commands</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Events</Name>
                  </Expression>
                  <Expression xsi:type="p4:Parse">
                    <harp:Register xsi:type="p4:TimestampedAuxInState" />
                  </Expression>
                  <Expression xsi:type="harp:ConvertTimestamped">
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="HasFlag">
                          <Operand xsi:type="WorkflowProperty" TypeArguments="p4:AuxiliaryInputs">
                            <Value>Aux1</Value>
                          </Operand>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="rx:Condition">
                    <Name>PelletDelivered</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Value</Selector>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>Delivered</Name>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="Extensions\PairSettingsId.bonsai" />
                  <Expression xsi:type="MulticastSubject">
                    <Name>PelletDelivered</Name>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="3" To="7" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source2" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="9" To="12" Label="Source1" />
                  <Edge From="10" To="11" Label="Source1" />
                  <Edge From="11" To="12" Label="Source2" />
                  <Edge From="12" To="13" Label="Source1" />
                  <Edge From="14" To="15" Label="Source1" />
                  <Edge From="15" To="16" Label="Source1" />
                  <Edge From="17" To="18" Label="Source1" />
                  <Edge From="18" To="21" Label="Source1" />
                  <Edge From="19" To="20" Label="Source1" />
                  <Edge From="20" To="21" Label="Source2" />
                  <Edge From="21" To="22" Label="Source1" />
                  <Edge From="22" To="23" Label="Source1" />
                  <Edge From="23" To="24" Label="Source1" />
                  <Edge From="25" To="26" Label="Source1" />
                  <Edge From="26" To="27" Label="Source1" />
                  <Edge From="27" To="28" Label="Source1" />
                  <Edge From="27" To="30" Label="Source1" />
                  <Edge From="28" To="29" Label="Source1" />
                  <Edge From="30" To="31" Label="Source1" />
                  <Edge From="32" To="33" Label="Source1" />
                  <Edge From="33" To="34" Label="Source1" />
                  <Edge From="35" To="43" Label="Source1" />
                  <Edge From="36" To="43" Label="Source2" />
                  <Edge From="37" To="38" Label="Source1" />
                  <Edge From="38" To="43" Label="Source3" />
                  <Edge From="39" To="40" Label="Source1" />
                  <Edge From="40" To="41" Label="Source1" />
                  <Edge From="41" To="42" Label="Source1" />
                  <Edge From="42" To="43" Label="Source4" />
                  <Edge From="43" To="44" Label="Source1" />
                  <Edge From="43" To="47" Label="Source1" />
                  <Edge From="44" To="45" Label="Source1" />
                  <Edge From="45" To="46" Label="Source1" />
                  <Edge From="47" To="48" Label="Source1" />
                  <Edge From="48" To="49" Label="Source1" />
                  <Edge From="50" To="51" Label="Source1" />
                  <Edge From="51" To="52" Label="Source1" />
                  <Edge From="52" To="53" Label="Source1" />
                  <Edge From="53" To="54" Label="Source1" />
                  <Edge From="54" To="55" Label="Source1" />
                  <Edge From="55" To="56" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="rx:GroupBy">
              <rx:KeySelector>Item2</rx:KeySelector>
              <rx:ElementSelector>Item1</rx:ElementSelector>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>FeederEvents</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="rx:PublishSubject" TypeArguments="sys:Tuple(harp:Timestamped(sys:Boolean),p2:FeederName)">
              <rx:Name>PelletDelivered</rx:Name>
            </Expression>
            <Expression xsi:type="rx:GroupBy">
              <rx:KeySelector>Item2</rx:KeySelector>
              <rx:ElementSelector>Item1</rx:ElementSelector>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>FeederPelletDelivered</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="14" To="15" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
    </Nodes>
    <Edges />
  </Workflow>
</WorkflowBuilder>