<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns:p1="clr-namespace:Harp.CameraControllerGen2;assembly=Harp.CameraControllerGen2"
                 xmlns:p2="clr-namespace:HtsLoom;assembly=Extensions"
                 xmlns:sys="clr-namespace:System;assembly=mscorlib"
                 xmlns:p3="clr-namespace:System.Reactive.Linq;assembly=System.Reactive.Interfaces"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="SubscribeSubject">
        <Name>RigConfiguration</Name>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>CameraSynchronizer</Selector>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>CameraControllerGen2</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>ControllerSettings</Name>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="harp:HarpMessage">
              <rx:Name>Commands</rx:Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>ControllerSettings</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="PortName" Selector="PortName" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:Device">
                <harp:OperationMode>Active</harp:OperationMode>
                <harp:OperationLed>On</harp:OperationLed>
                <harp:DumpRegisters>true</harp:DumpRegisters>
                <harp:VisualIndicators>On</harp:VisualIndicators>
                <harp:Heartbeat>Enabled</harp:Heartbeat>
                <harp:IgnoreErrors>false</harp:IgnoreErrors>
                <harp:PortName>COM6</harp:PortName>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>Events</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="GroupWorkflow">
              <Name>ConfigureTriggersCam0</Name>
              <Description />
              <Workflow>
                <Nodes>
                  <Expression xsi:type="p1:CreateMessage">
                    <harp:MessageType>Write</harp:MessageType>
                    <harp:Payload xsi:type="p1:CreateConfigureCam0EventPayload">
                      <p1:ConfigureCam0Event>EventOnTrigger</p1:ConfigureCam0Event>
                    </harp:Payload>
                  </Expression>
                  <Expression xsi:type="p1:CreateMessage">
                    <harp:MessageType>Write</harp:MessageType>
                    <harp:Payload xsi:type="p1:CreateTriggerConfigCam0Payload">
                      <p1:TriggerConfigCam0>Internal</p1:TriggerConfigCam0>
                    </harp:Payload>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>ControllerSettings</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Triggers</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Merge" />
                  </Expression>
                  <Expression xsi:type="rx:Condition">
                    <Name>Trigger0</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Key</Selector>
                        </Expression>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="Value" />
                        </Expression>
                        <Expression xsi:type="Equal">
                          <Operand xsi:type="WorkflowProperty" TypeArguments="p2:TriggerName">
                            <Value>Trigger0</Value>
                          </Operand>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="3" Label="Source1" />
                        <Edge From="2" To="3" Label="Source2" />
                        <Edge From="3" To="4" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:AsyncSubject">
                    <Name>Trigger0</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Value.Frequency</Selector>
                  </Expression>
                  <Expression xsi:type="p1:Format">
                    <harp:MessageType>Write</harp:MessageType>
                    <harp:Register xsi:type="p1:TriggerFrequencyCam0" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Concat" />
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="10" Label="Source1" />
                  <Edge From="1" To="10" Label="Source2" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="9" To="10" Label="Source3" />
                  <Edge From="10" To="11" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:DelaySubscription">
                <rx:DueTime>PT1S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>ConfigureTroggersCam1</Name>
              <Description />
              <Workflow>
                <Nodes>
                  <Expression xsi:type="p1:CreateMessage">
                    <harp:MessageType>Write</harp:MessageType>
                    <harp:Payload xsi:type="p1:CreateConfigureCam1EventPayload">
                      <p1:ConfigureCam1Event>EventOnTrigger</p1:ConfigureCam1Event>
                    </harp:Payload>
                  </Expression>
                  <Expression xsi:type="p1:CreateMessage">
                    <harp:MessageType>Write</harp:MessageType>
                    <harp:Payload xsi:type="p1:CreateTriggerConfigCam1Payload">
                      <p1:TriggerConfigCam1>Internal</p1:TriggerConfigCam1>
                    </harp:Payload>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>ControllerSettings</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Triggers</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Merge" />
                  </Expression>
                  <Expression xsi:type="rx:Condition">
                    <Name>Trigger1</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Key</Selector>
                        </Expression>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="Value" />
                        </Expression>
                        <Expression xsi:type="Equal">
                          <Operand xsi:type="WorkflowProperty" TypeArguments="p2:TriggerName">
                            <Value>Trigger1</Value>
                          </Operand>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="3" Label="Source1" />
                        <Edge From="2" To="3" Label="Source2" />
                        <Edge From="3" To="4" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:AsyncSubject">
                    <Name>Trigger1</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Value.Frequency</Selector>
                  </Expression>
                  <Expression xsi:type="p1:Format">
                    <harp:MessageType>Write</harp:MessageType>
                    <harp:Register xsi:type="p1:TriggerFrequencyCam1" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Concat" />
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="10" Label="Source1" />
                  <Edge From="1" To="10" Label="Source2" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="9" To="10" Label="Source3" />
                  <Edge From="10" To="11" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:DelaySubscription">
                <rx:DueTime>PT1S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>StartCameras</Name>
            </Expression>
            <Expression xsi:type="p1:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="p1:CreateStartAndStopPayload">
                <p1:StartAndStop>StartCam0 StartCam1</p1:StartAndStop>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>StopCameras</Name>
            </Expression>
            <Expression xsi:type="p1:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="p1:CreateStartAndStopPayload">
                <p1:StartAndStop>StopCam0 StopCam1</p1:StartAndStop>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>Commands</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Events</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:FilterMessageType">
                <harp:FilterType>Include</harp:FilterType>
                <harp:MessageType>Event</harp:MessageType>
              </Combinator>
            </Expression>
            <Expression xsi:type="p1:Parse">
              <harp:Register xsi:type="p1:TimestampedCam0Event" />
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Name>TriggerEvent</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Value</Selector>
                  </Expression>
                  <Expression xsi:type="HasFlag">
                    <Operand xsi:type="WorkflowProperty" TypeArguments="p1:CameraEvents">
                      <Value>Trigger</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Trigger0</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Events</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:FilterMessageType">
                <harp:FilterType>Include</harp:FilterType>
                <harp:MessageType>Event</harp:MessageType>
              </Combinator>
            </Expression>
            <Expression xsi:type="p1:Parse">
              <harp:Register xsi:type="p1:TimestampedCam1Event" />
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Name>TriggerEvent</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Value</Selector>
                  </Expression>
                  <Expression xsi:type="HasFlag">
                    <Operand xsi:type="WorkflowProperty" TypeArguments="p1:CameraEvents">
                      <Value>Trigger</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Trigger1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="rx:GroupBy">
              <rx:KeySelector>Item2.Key,Item2.Value.Frequency</rx:KeySelector>
              <rx:ElementSelector>Item1</rx:ElementSelector>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>Triggers</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="3" To="6" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source2" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="17" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="17" Label="Source2" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="14" To="17" Label="Source3" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="16" To="17" Label="Source4" />
            <Edge From="17" To="18" Label="Source1" />
            <Edge From="19" To="20" Label="Source1" />
            <Edge From="20" To="21" Label="Source1" />
            <Edge From="21" To="22" Label="Source1" />
            <Edge From="22" To="24" Label="Source1" />
            <Edge From="23" To="24" Label="Source2" />
            <Edge From="24" To="31" Label="Source1" />
            <Edge From="25" To="26" Label="Source1" />
            <Edge From="26" To="27" Label="Source1" />
            <Edge From="27" To="28" Label="Source1" />
            <Edge From="28" To="30" Label="Source1" />
            <Edge From="29" To="30" Label="Source2" />
            <Edge From="30" To="31" Label="Source2" />
            <Edge From="31" To="32" Label="Source1" />
            <Edge From="32" To="33" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>CameraControllerEvents</Name>
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
      <Expression xsi:type="rx:PublishSubject" TypeArguments="sys:Object">
        <rx:Name>StartCameras</rx:Name>
      </Expression>
      <Expression xsi:type="rx:PublishSubject" TypeArguments="sys:Object">
        <rx:Name>StopCameras</rx:Name>
      </Expression>
      <Expression xsi:type="rx:ReplaySubject" TypeArguments="p3:IGroupedObservable(sys:Tuple(p2:TriggerName,sys:Int32),harp:Timestamped(p1:CameraEvents))">
        <rx:Name>Triggers</rx:Name>
        <rx:BufferSize xsi:nil="true" />
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>