<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:p1="clr-namespace:System.Reactive.Linq;assembly=System.Reactive.Interfaces"
                 xmlns:p2="clr-namespace:HtsLoom;assembly=Extensions"
                 xmlns:scg="clr-namespace:System.Collections.Generic;assembly=mscorlib"
                 xmlns:sys="clr-namespace:System;assembly=mscorlib"
                 xmlns:p3="clr-namespace:;assembly=Extensions"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:zmq="clr-namespace:Bonsai.ZeroMQ;assembly=Bonsai.ZeroMQ"
                 xmlns:gui="clr-namespace:Bonsai.Gui;assembly=Bonsai.Gui"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="GroupWorkflow">
        <Name>LoomClient</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="rx:ReplaySubject" TypeArguments="p1:IGroupedObservable(p2:ScreenName,scg:KeyValuePair(sys:String,p2:LoomingPresentationParameters))">
              <rx:Name>TaskLoom</rx:Name>
              <rx:BufferSize xsi:nil="true" />
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Name>LoomTrigger</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:AsyncSubject">
                    <Name>LoomTriggerObservable </Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Key</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p3:GetEnumKey" />
                  </Expression>
                  <Expression xsi:type="rx:AsyncSubject">
                    <Name>Address</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>LoomTriggerObservable </Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Merge" />
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Value</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p2:SerializeToJson">
                      <p2:Formatting>None</p2:Formatting>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Address</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p2:SerializeToYaml" />
                  </Expression>
                  <Expression xsi:type="io:CsvWriter">
                    <io:FileName>D:\Tests\aeon-swc\aa-dev-task-1656fe1\LoomParameters.csv</io:FileName>
                    <io:Append>false</io:Append>
                    <io:Overwrite>false</io:Overwrite>
                    <io:Suffix>Timestamp</io:Suffix>
                    <io:IncludeHeader>true</io:IncludeHeader>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="8" To="13" Label="Source1" />
                  <Edge From="9" To="11" Label="Source1" />
                  <Edge From="10" To="11" Label="Source2" />
                  <Edge From="11" To="12" Label="Source1" />
                  <Edge From="13" To="14" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="InputMapping">
              <PropertyMappings>
                <Property Name="Topic" Selector="Item2" />
              </PropertyMappings>
              <Selector>Item1</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="zmq:Publisher">
                <zmq:ConnectionString>&gt;tcp://172.24.158.114:4242</zmq:ConnectionString>
                <zmq:Topic>ScreenEast</zmq:Topic>
              </Combinator>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>TaskLoom</Name>
      </Expression>
      <Expression xsi:type="rx:Condition">
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Key</Selector>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" />
            </Expression>
            <Expression xsi:type="Equal">
              <Operand xsi:type="WorkflowProperty" TypeArguments="p2:ScreenName">
                <Value>ScreenNorth</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="3" Label="Source1" />
            <Edge From="2" To="3" Label="Source2" />
            <Edge From="3" To="4" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Value" DisplayName="SelectedScreen" />
      </Expression>
      <Expression xsi:type="PropertySource" TypeArguments="WorkflowProperty(p2:ScreenName),p2:ScreenName">
        <MemberName>Value</MemberName>
        <Value>ScreenEast</Value>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="InitialDelay" />
        <Property Name="PulseDuration" />
        <Property Name="InterPulseInterval" />
        <Property Name="NumberOfPulses" />
        <Property Name="StartSize" />
        <Property Name="EndSize" />
        <Property Name="AnimationDuration" />
        <Property Name="TimeOnSet" />
        <Property Name="LoomingColor" />
        <Property Name="X" />
        <Property Name="Y" />
      </Expression>
      <Expression xsi:type="rx:CreateObservable">
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>ScreenName</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Trigger</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="InitialDelay" />
              <Property Name="PulseDuration" />
              <Property Name="InterPulseInterval" />
              <Property Name="NumberOfPulses" />
              <Property Name="StartSize" />
              <Property Name="EndSize" />
              <Property Name="AnimationDuration" />
              <Property Name="TimeOnSet" />
              <Property Name="LoomingColor" />
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="X" />
              <Property Name="Y" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p2:ScreenPosition">
                <p2:X>0</p2:X>
                <p2:Y>0</p2:Y>
              </Combinator>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Location" Selector="it" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p2:LoomingPresentationParameters">
                <p2:InitialDelay>0</p2:InitialDelay>
                <p2:PulseDuration>10</p2:PulseDuration>
                <p2:InterPulseInterval>0.5</p2:InterPulseInterval>
                <p2:NumberOfPulses>3</p2:NumberOfPulses>
                <p2:StartSize>0.1</p2:StartSize>
                <p2:EndSize>4</p2:EndSize>
                <p2:AnimationDuration>0.34</p2:AnimationDuration>
                <p2:TimeOnSet>0.25</p2:TimeOnSet>
                <p2:LoomingColor>1</p2:LoomingColor>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>ScreenName</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="3" To="8" Label="Source1" />
            <Edge From="4" To="8" Label="Source2" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source3" />
            <Edge From="8" To="10" Label="Source1" />
            <Edge From="9" To="10" Label="Source2" />
            <Edge From="10" To="11" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Switch" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Item1</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>LoomTest</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p3:KeyValuePairConverter" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Item2</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="rx:GroupBy">
        <rx:KeySelector>Item2</rx:KeySelector>
        <rx:ElementSelector>Item1</rx:ElementSelector>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>TaskLoom</Name>
      </Expression>
      <Expression xsi:type="gui:PropertyGridBuilder">
        <gui:Enabled>true</gui:Enabled>
        <gui:Visible>true</gui:Visible>
        <gui:HelpVisible>true</gui:HelpVisible>
        <gui:ToolbarVisible>true</gui:ToolbarVisible>
        <gui:AutoRefresh>false</gui:AutoRefresh>
      </Expression>
      <Expression xsi:type="VisualizerMapping" />
      <Expression xsi:type="gui:ButtonBuilder">
        <gui:Name>Trigger</gui:Name>
        <gui:Enabled>true</gui:Enabled>
        <gui:Visible>true</gui:Visible>
        <gui:Text>Trigger</gui:Text>
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>Trigger</Name>
      </Expression>
      <Expression xsi:type="VisualizerMapping" />
      <Expression xsi:type="gui:TableLayoutPanelBuilder">
        <gui:Enabled>true</gui:Enabled>
        <gui:Visible>true</gui:Visible>
        <gui:ColumnCount>1</gui:ColumnCount>
        <gui:RowCount>2</gui:RowCount>
        <gui:ColumnStyles />
        <gui:RowStyles />
        <gui:CellSpans />
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="6" Label="Source1" />
      <Edge From="5" To="6" Label="Source2" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="7" To="9" Label="Source1" />
      <Edge From="7" To="12" Label="Source1" />
      <Edge From="8" To="10" Label="Source1" />
      <Edge From="9" To="10" Label="Source2" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="11" To="13" Label="Source1" />
      <Edge From="12" To="13" Label="Source2" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="14" To="15" Label="Source1" />
      <Edge From="16" To="17" Label="Source1" />
      <Edge From="17" To="21" Label="Source1" />
      <Edge From="18" To="19" Label="Source1" />
      <Edge From="19" To="20" Label="Source1" />
      <Edge From="20" To="21" Label="Source2" />
    </Edges>
  </Workflow>
</WorkflowBuilder>